---
API: 2.1
OpenSesame: 3.3.7
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground "#000000"
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/Sanne/Dropbox/MasterProject/Experiments/JavaScript"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#d8d8d8"

define loop Click_loop000
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run Click_sequence000

define loop Click_loop050
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run Click_sequence050

define sequence Click_sequence000
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Rating000 always
	run Mouse000 always
	run RegionOfInterest000 always
	run Repeat_cycle000 always

define sequence Click_sequence050
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Rating050 always
	run Mouse050 always
	run RegionOfInterest050 always
	run Repeat_cycle050 always

define sequence Cond000Sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Randomizer000 always
	run Stim000 always
	run Outcome000 always
	run Click_loop000 always
	run new_logger always

define sequence Cond050Sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Randomizer050 always
	run Stim050 always
	run Outcome050 always
	run Click_loop050 always
	run new_logger always

define sequence Cond100Sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Randomizer100 always
	run Stim100 always
	run Outcome100 always
	run Rating100 always

define sequence Coordinate_Sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define loop Coordinate_loops
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "This loop is for creating global variables of the coordinates"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Row0_Start -374
	setcycle 0 Row0_End -296
	setcycle 0 Row1_Start -295
	setcycle 0 Row1_End -257
	setcycle 0 Row2_Start -256
	setcycle 0 Row2_End -218
	setcycle 0 Row3_Start -217
	setcycle 0 Row3_End -179
	setcycle 0 Row4_Start -178
	setcycle 0 Row4_End -140
	setcycle 0 Row5_Start -139
	setcycle 0 Row5_End -101
	setcycle 0 Row6_Start -100
	setcycle 0 Row6_End -62
	setcycle 0 Row7_Start -61
	setcycle 0 Row7_End -23
	setcycle 0 Row8_Start -22
	setcycle 0 Row8_End 16
	setcycle 0 Row9_Start 17
	setcycle 0 Row9_End 55
	setcycle 0 Row10_Start 56
	setcycle 0 Row10_End 94
	setcycle 0 Row11_Start 95
	setcycle 0 Row11_End 133
	setcycle 0 Row12_Start 134
	setcycle 0 Row12_End 172
	setcycle 0 Row13_Start 173
	setcycle 0 Row13_End 211
	setcycle 0 Row14_Start 212
	setcycle 0 Row14_End 250
	setcycle 0 Row15_Start 251
	setcycle 0 Row15_End 289
	setcycle 0 Row16_Start 290
	setcycle 0 Row16_End 328
	setcycle 0 Row17_Start 329
	setcycle 0 Row17_End 367
	setcycle 0 Col0_Start -502
	setcycle 0 Col0_End -292
	setcycle 0 Col1_Start -291
	setcycle 0 Col1_End -81
	setcycle 0 Col2_Start -80
	setcycle 0 Col2_End 130
	setcycle 0 Col3_Start 131
	setcycle 0 Col3_End 183
	setcycle 0 Col4_Start 184
	setcycle 0 Col4_End 289
	setcycle 0 Col5_Start 290
	setcycle 0 Col5_End 395
	setcycle 0 Col6_Start 396
	setcycle 0 Col6_End 501
	setcycle 0 Next_x 425
	setcycle 0 Next_y 346
	run Coordinate_Sequence

define notepad Info_for_running
	__note__
	Hi!
	The participant number effects the condition it starts in. Participant 1 will see the conditions 000, 050, 100.
	Therefore fixing things in the first condition but running it with either the webOs or the quickrun will not show those changes!
	
	WebOs uses particiant nr 999, so then 050 is seen first
	While the quick run shows 100 first!
	
	====================
	Stim runs for 2 seconds
	Outcome for 1
	Rating for 5 
	
	Rating would eventually have to run for 12 seconds OR until someone filled in all 3 ratings and clicked "next"
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_javascript Initialization
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.Row0_Start = -374
	vars.Row0_End = -296
	vars.Row1_Start = -295
	vars.Row1_End =-257
	vars.Row2_Start = -256
	vars.Row2_End = -218
	vars.Row3_Start = -217
	vars.Row3_End = -179
	vars.Row4_Start = -178
	vars.Row4_End = -140
	vars.Row5_Start = -139
	vars.Row5_End = -101
	vars.Row6_Start = -100
	vars.Row6_End = -62
	vars.Row7_Start = -61
	vars.Row7_End = -23
	vars.Row8_Start = -22
	vars.Row8_End = 16
	vars.Row9_Start = 17
	vars.Row9_End = 55
	vars.Row10_Start = 56
	vars.Row10_End = 94
	vars.Row11_Start = 95
	vars.Row11_End = 133
	vars.Row12_Start = 134
	vars.Row12_End = 172
	vars.Row13_Start = 173
	vars.Row13_End = 211
	vars.Row14_Start = 212
	vars.Row14_End = 250
	vars.Row15_Start = 251
	vars.Row15_End = 289
	vars.Row16_Start = 290
	vars.Row16_End = 328
	vars.Row17_Start = 329
	vars.Row17_End = 367
	
	vars.Col0_Start = -502
	vars.Col0_End = -292
	vars.Col1_Start = -291
	vars.Col1_End = -81
	vars.Col2_Start = -80
	vars.Col2_End = 130
	vars.Col3_Start = 131
	vars.Col3_End = 183
	vars.Col4_Start = 184
	vars.Col4_End = 289
	vars.Col5_Start = 290
	vars.Col5_End = 395
	vars.Col6_Start = 396
	vars.Col6_End = 501
	
	vars.Next_x = 425
	vars.Next_y = 346
	
	//There are 6 different conditions (3 block types that can be combined together in 6 ways)
	//This determines, based on participants number which order people get.
	//vars.counterbalancing = [[2,0,1], [0,1,2], [0,2,1], [1,0,2], [1,2,0], [2,1,0]]
	//vars.block1, vars.block2, vars.block2=vars.counterbalancing[vars.subject_nr%6]
	//Not sure how to do this method in JavaScript so therefore reverted back to the Old ways
	
	if(vars.subject_nr%6 === 1){
	    vars.block1 = 0
	    vars.block2 = 1
	    vars.block3 = 2
	}
	if(vars.subject_nr%6 === 2){
	    vars.block1 = 0
	    vars.block2 = 2
	    vars.block3 = 1
	}
	if(vars.subject_nr%6 === 3){
	    vars.block1 = 1
	    vars.block2 = 0
	    vars.block3 = 2
	}
	if(vars.subject_nr%6 === 4){
	    vars.block1 = 1
	    vars.block2 = 2
	    vars.block3 = 0
	}
	if(vars.subject_nr%6 === 5){
	    vars.block1 = 2
	    vars.block2 = 1
	    vars.block3 = 0
	}
	else if(vars.subject_nr%6 === 0){
	    vars.block1 = 2
	    vars.block2 = 0
	    vars.block3 = 1
	}
	
	//Now we want to shuffle the stimuli for participants
	//The first way to do this is by stim = pool.files(), however that will also include things such as Diamond.png and background.png, so we'd rather not have that
	//Therefore we put them in by hand for now:
	vars.stim = ['Acorn.png', 'Beetle.png', 'BlackBerries.png', 'Feather.png', 'Flower.png', 'Footprints.png', 'Log.png', 'Mouse.png', 'Puddle.png']
	
	
	//STACKOVERFLOW https://stackoverflow.com/questions/2450954/how-to-randomize-shuffle-a-javascript-array
	function shuffle(array) {
	  var currentIndex = array.length, temporaryValue, randomIndex;
	
	  // While there remain elements to shuffle...
	  while (0 !== currentIndex) {
	
	    // Pick a remaining element...
	    randomIndex = Math.floor(Math.random() * currentIndex);
	    currentIndex -= 1;
	
	    // And swap it with the current element.
	    temporaryValue = array[currentIndex];
	    array[currentIndex] = array[randomIndex];
	    array[randomIndex] = temporaryValue;
	  }
	
	  return array;
	}
	
	//random.shuffle(stim) #shuffle them
	//Assign them to either A B or X and to either block 1 2 or 3
	shuffle(vars.stim)
	
	vars.A1 = vars.stim[0]
	vars.B1 = vars.stim[1]
	vars.X1 = vars.stim[2]
	vars.A2 = vars.stim[3]
	vars.B2 = vars.stim[4]
	vars.X2 = vars.stim[5]
	vars.A3 = vars.stim[6]
	vars.B3 = vars.stim[7]
	vars.X3 = vars.stim[8]
	
	//vars.A1, vars.B1, vars.X1, vars.A2, vars.B2, vars.X2, vars.A3, vars.B3, vars.X3 = stim
	console.log(vars.stim)
	console.log(vars.A1 + vars.B1 + vars.X1 + vars.A2 + vars.B2 + vars.X2 + vars.A3 + vars.B3 + vars.X3)
	
	//Here we create an array of possible locations. The stimuli can only appear in column 0 and 2, so not in 1 in which the outcome is located.
	//Note that "column" and 'row' are artifacts left over from when this was created in a form, bascially I translated the columns and rows to coordinates such that they can be displayed on a sketchpad.
	vars.locations = [[vars.Col0_Start + 1,vars.Row0_Start], [vars.Col0_Start + 1,vars.Row1_Start], [vars.Col0_Start + 1,vars.Row2_Start], [vars.Col0_Start + 1,vars.Row3_Start], [vars.Col0_Start + 1,vars.Row4_Start], [vars.Col0_Start + 1,vars.Row5_Start], [vars.Col0_Start + 1,vars.Row6_Start], [vars.Col0_Start + 1,vars.Row7_Start], [vars.Col0_Start + 1,vars.Row8_Start], [vars.Col0_Start + 1,vars.Row9_Start], [vars.Col0_Start + 1,vars.Row10_Start], [vars.Col0_Start + 1,vars.Row11_Start], [vars.Col0_Start + 1,vars.Row12_Start], [vars.Col0_Start + 1,vars.Row13_Start], [vars.Col2_Start + 1,vars.Row0_Start], [vars.Col2_Start + 1,vars.Row1_Start], [vars.Col2_Start + 1,vars.Row2_Start], [vars.Col2_Start + 1,vars.Row3_Start], [vars.Col2_Start + 1,vars.Row4_Start], [vars.Col2_Start + 1,vars.Row5_Start], [vars.Col2_Start + 1,vars.Row6_Start], [vars.Col2_Start + 1,vars.Row7_Start], [vars.Col2_Start + 1,vars.Row8_Start], [vars.Col2_Start + 1,vars.Row9_Start], [vars.Col2_Start + 1,vars.Row10_Start], [vars.Col2_Start + 1,vars.Row11_Start], [vars.Col2_Start + 1,vars.Row12_Start], [vars.Col2_Start + 1,vars.Row13_Start]]
	__end__
	set _prepare "//import Math"

define form_text_display Introduction
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Next
	set margins "50;50;50;50"
	set form_title "Welcome space adventurer!"
	__form_text__
	You are a space adventurer from Mars. You've travelled a long way and you are ready to look for treasure.
	The planet you landed on is called PNF-404 and it was abandoned long ago by its inhabitants. Rumor has it that there are still precious stones buried in the soil. It's your task to find them! To help you figure out where the treasure is buried you should pay attention to your surroundings.
	
	To help you and future treasure hunters on PNF-404, you are given a log book in which you can see the 3 most common items on this part of the planet. After each day please write down for all three items (even if you did not see it that day) how likely you think it is that it will lead to treasure.
	Do this on a scale from 0 to 8, where 0 is very unlikely and 8 is very likely.
	
	Since you want to save the batteries on your equipment you have to fill in the scores within 15 seconds of seeing the items.
	
	You have 16 days on this area of the planet, after which you will go to another part of the planet, where other objects are found.
	
	Have fun exploring and good luck finding treasure!
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define mouse_response Mouse000
	set timeout 12000
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define mouse_response Mouse050
	set timeout 12000
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define feedback Outcome000
	set reset_variables yes
	set duration 1000
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0
	draw image center=0 file="[Outcome]" scale=0.8 show_if=always x=-291 y=-61 z_index=0

define feedback Outcome050
	set reset_variables yes
	set duration 1000
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0
	draw image center=0 file="[Outcome]" scale=0.8 show_if=always x=-291 y=-61 z_index=0

define feedback Outcome100
	set reset_variables yes
	set duration 1000
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0
	draw image center=0 file="[Outcome]" scale=0.8 show_if=always x=-291 y=-61 z_index=0

define inline_javascript Randomizer000
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	vars.pos1 = vars.locations[Math.floor(Math.random() * vars.locations.length)]
	vars.pos1X = vars.pos1[0]
	vars.pos1Y = vars.pos1[1]
	
	vars.temp = []
	
	vars.i = 0
	for(vars.i = 0; vars.i<vars.locations.length;vars.i++){
	    if(vars.locations[vars.i][0] != vars.pos1X){
	        vars.temp.push(vars.locations[vars.i])}
	}
	
	vars.pos2 = vars.temp[Math.floor(Math.random()*vars.temp.length)]
	vars.pos2X = vars.pos2[0]
	vars.pos2Y = vars.pos2[1]
	__end__

define inline_javascript Randomizer050
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	vars.pos1 = vars.locations[Math.floor(Math.random() * vars.locations.length)]
	vars.pos1X = vars.pos1[0]
	vars.pos1Y = vars.pos1[1]
	
	vars.temp = []
	
	vars.i = 0
	for(vars.i = 0; vars.i<vars.locations.length;vars.i++){
	    if(vars.locations[vars.i][0] != vars.pos1X){
	        vars.temp.push(vars.locations[vars.i])}
	}
	
	vars.pos2 = vars.temp[Math.floor(Math.random()*vars.temp.length)]
	vars.pos2X = vars.pos2[0]
	vars.pos2Y = vars.pos2[1]
	__end__

define inline_javascript Randomizer100
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
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	__end__

define feedback Rating000
	set reset_variables yes
	set duration 0
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[A]" scale=0.4 show_if=always x=184 y=-374 z_index=0
	draw image center=0 file="[B]" scale=0.4 show_if=always x=290 y=-374 z_index=0
	draw image center=0 file="[X]" scale=0.4 show_if=always x=395 y=-374 z_index=0
	draw rect color=878787 fill=1 h=32 penwidth=1 show_if=always w=50 x=184 y="[TrialCoordinate]" z_index=0
	draw rect color=878787 fill=1 h=32 penwidth=1 show_if=always w=50 x=290 y="[TrialCoordinate]" z_index=0
	draw rect color=878787 fill=1 h=32 penwidth=1 show_if=always w=50 x=395 y="[TrialCoordinate]" z_index=0
	draw rect color="#878787" fill=1 h=32 penwidth=1 show_if=always w=64 x="[Col6_Start]" y="[Row17_Start]" z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=Next x="[Next_x]" y="[Next_y]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0
	draw image center=0 file="[Outcome]" scale=0.8 show_if=always x=-291 y=-61 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=1 x=131 y=-295 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=2 x=131 y=-256 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=3 x=131 y=-217 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=4 x=131 y=-178 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=5 x=131 y=-139 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=6 x=131 y=-100 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=7 x=131 y=-61 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=8 x=131 y=-22 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=9 x=131 y=17 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=10 x=131 y=56 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=11 x=131 y=95 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=12 x=131 y=134 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=13 x=131 y=173 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=14 x=131 y=212 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=15 x=131 y=251 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=16 x=131 y=290 z_index=0

define feedback Rating050
	set reset_variables yes
	set duration 0
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[A]" scale=0.4 show_if=always x=184 y=-374 z_index=0
	draw image center=0 file="[B]" scale=0.4 show_if=always x=290 y=-374 z_index=0
	draw image center=0 file="[X]" scale=0.4 show_if=always x=395 y=-374 z_index=0
	draw rect color=878787 fill=1 h=32 penwidth=1 show_if=always w=50 x=184 y="[TrialCoordinate]" z_index=0
	draw rect color=878787 fill=1 h=32 penwidth=1 show_if=always w=50 x=290 y="[TrialCoordinate]" z_index=0
	draw rect color=878787 fill=1 h=32 penwidth=1 show_if=always w=50 x=395 y="[TrialCoordinate]" z_index=0
	draw rect color="#878787" fill=1 h=32 penwidth=1 show_if=always w=64 x="[Col6_Start]" y="[Row17_Start]" z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=Next x="[Next_x]" y="[Next_y]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0
	draw image center=0 file="[Outcome]" scale=0.8 show_if=always x=-291 y=-61 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=1 x=131 y=-295 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=2 x=131 y=-256 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=3 x=131 y=-217 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=4 x=131 y=-178 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=5 x=131 y=-139 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=6 x=131 y=-100 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=7 x=131 y=-61 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=8 x=131 y=-22 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=9 x=131 y=17 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=10 x=131 y=56 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=11 x=131 y=95 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=12 x=131 y=134 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=13 x=131 y=173 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=14 x=131 y=212 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=15 x=131 y=251 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=16 x=131 y=290 z_index=0

define feedback Rating100
	set reset_variables yes
	set duration 5000
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[A]" scale=0.4 show_if=always x=184 y=-374 z_index=0
	draw image center=0 file="[B]" scale=0.4 show_if=always x=290 y=-374 z_index=0
	draw image center=0 file="[X]" scale=0.4 show_if=always x=395 y=-374 z_index=0
	draw rect color=black fill=0 h=32 penwidth=1 show_if=always w=50 x=184 y="[TrialCoordinate]" z_index=0
	draw rect color=black fill=0 h=32 penwidth=1 show_if=always w=50 x=290 y="[TrialCoordinate]" z_index=0
	draw rect color=black fill=0 h=32 penwidth=1 show_if=always w=50 x=395 y="[TrialCoordinate]" z_index=0
	draw rect color="#000000" fill=0 h=32 penwidth=1 show_if=always w=64 x=416 y=320 z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0
	draw image center=0 file="[Outcome]" scale=0.8 show_if=always x=-291 y=-61 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=1 x=131 y=-295 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=2 x=131 y=-256 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=3 x=131 y=-217 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=4 x=131 y=-178 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=5 x=131 y=-139 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=6 x=131 y=-100 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=7 x=131 y=-61 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=8 x=131 y=-22 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=9 x=131 y=17 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=10 x=131 y=56 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=11 x=131 y=95 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=12 x=131 y=134 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=13 x=131 y=173 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=14 x=131 y=212 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=15 x=131 y=251 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=16 x=131 y=290 z_index=0

define inline_javascript RegionOfInterest000
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.start_x_roi = vars.Col6_Start 
	vars.start_y_roi = vars.Row17_Start
	vars.end_x_roi = vars.Col6_End
	vars.end_y_roi = vars.Row17_End
	
	if(vars.cursor_x >= vars.start_x_roi & vars.cursor_x < vars.end_x_roi & vars.cursor_y >= vars.start_y_roi & vars.cursor_y < vars.end_y_roi){
	    vars.clicked_next = 'yes'}
	else {
	    vars.clicked_next = 'no'
	}
	if(vars.response == "None"){
	    vars.timeout_occurred = "yes"}
	else{
	    vars.timeout_occurred = "no"}
	
	console.log(vars.clicked_next)
	__end__
	set _prepare ""

define inline_javascript RegionOfInterest050
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.start_x_roi = vars.Col6_Start 
	vars.start_y_roi = vars.Row17_Start
	vars.end_x_roi = vars.Col6_End
	vars.end_y_roi = vars.Row17_End
	
	if(vars.cursor_x >= vars.start_x_roi & vars.cursor_x < vars.end_x_roi & vars.cursor_y >= vars.start_y_roi & vars.cursor_y < vars.end_y_roi){
	    vars.clicked_next = 'yes'}
	else {
	    vars.clicked_next = 'no'
	}
	
	console.log(vars.clicked_next)
	__end__
	set _prepare ""

define repeat_cycle Repeat_cycle000
	set description "Optionally repeat a cycle from a loop"
	set condition "[clicked_next] = no and [timeout_occurred] = no"

define repeat_cycle Repeat_cycle050
	set description "Optionally repeat a cycle from a loop"
	set condition "[clicked_next] = no"

define feedback Stim000
	set reset_variables yes
	set duration 2000
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0

define feedback Stim050
	set reset_variables yes
	set duration 2000
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0

define feedback Stim100
	set reset_variables yes
	set duration 2000
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0

define loop Training_phase
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run main_sequence

define loop _000
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Outcome "Diamond.png"
	setcycle 0 Stim1 "[A1]"
	setcycle 0 Stim2 "[X1]"
	setcycle 0 Trial 1
	setcycle 0 A "[A1]"
	setcycle 0 B "[B1]"
	setcycle 0 X "[X1]"
	setcycle 0 TrialCoordinate "[Row1_Start]"
	setcycle 1 Outcome "NoDiamond.png"
	setcycle 1 Stim1 "[B1]"
	setcycle 1 Stim2 "[X1]"
	setcycle 1 Trial 2
	setcycle 1 A "[A1]"
	setcycle 1 B "[B1]"
	setcycle 1 X "[X1]"
	setcycle 1 TrialCoordinate "[Row2_Start]"
	setcycle 2 Outcome "Diamond.png"
	setcycle 2 Stim1 "[B1]"
	setcycle 2 Stim2 "[X1]"
	setcycle 2 Trial 3
	setcycle 2 A "[A1]"
	setcycle 2 B "[B1]"
	setcycle 2 X "[X1]"
	setcycle 2 TrialCoordinate "[Row3_Start]"
	setcycle 3 Outcome "NoDiamond.png"
	setcycle 3 Stim1 "[A1]"
	setcycle 3 Stim2 "[X1]"
	setcycle 3 Trial 4
	setcycle 3 A "[A1]"
	setcycle 3 B "[B1]"
	setcycle 3 X "[X1]"
	setcycle 3 TrialCoordinate "[Row4_Start]"
	setcycle 4 Outcome "NoDiamond.png"
	setcycle 4 Stim1 "[A1]"
	setcycle 4 Stim2 "[X1]"
	setcycle 4 Trial 5
	setcycle 4 A "[A1]"
	setcycle 4 B "[B1]"
	setcycle 4 X "[X1]"
	setcycle 4 TrialCoordinate "[Row5_Start]"
	setcycle 5 Outcome "Diamond.png"
	setcycle 5 Stim1 "[B1]"
	setcycle 5 Stim2 "[X1]"
	setcycle 5 Trial 6
	setcycle 5 A "[A1]"
	setcycle 5 B "[B1]"
	setcycle 5 X "[X1]"
	setcycle 5 TrialCoordinate "[Row6_Start]"
	setcycle 6 Outcome "Diamond.png"
	setcycle 6 Stim1 "[A1]"
	setcycle 6 Stim2 "[X1]"
	setcycle 6 Trial 7
	setcycle 6 A "[A1]"
	setcycle 6 B "[B1]"
	setcycle 6 X "[X1]"
	setcycle 6 TrialCoordinate "[Row7_Start]"
	setcycle 7 Outcome "NoDiamond.png"
	setcycle 7 Stim1 "[B1]"
	setcycle 7 Stim2 "[X1]"
	setcycle 7 Trial 8
	setcycle 7 A "[A1]"
	setcycle 7 B "[B1]"
	setcycle 7 X "[X1]"
	setcycle 7 TrialCoordinate "[Row8_Start]"
	setcycle 8 Outcome "Diamond.png"
	setcycle 8 Stim1 "[B1]"
	setcycle 8 Stim2 "[X1]"
	setcycle 8 Trial 9
	setcycle 8 A "[A1]"
	setcycle 8 B "[B1]"
	setcycle 8 X "[X1]"
	setcycle 8 TrialCoordinate "[Row9_Start]"
	setcycle 9 Outcome "NoDiamond.png"
	setcycle 9 Stim1 "[A1]"
	setcycle 9 Stim2 "[X1]"
	setcycle 9 Trial 10
	setcycle 9 A "[A1]"
	setcycle 9 B "[B1]"
	setcycle 9 X "[X1]"
	setcycle 9 TrialCoordinate "[Row10_Start]"
	setcycle 10 Outcome "NoDiamond.png"
	setcycle 10 Stim1 "[B1]"
	setcycle 10 Stim2 "[X1]"
	setcycle 10 Trial 11
	setcycle 10 A "[A1]"
	setcycle 10 B "[B1]"
	setcycle 10 X "[X1]"
	setcycle 10 TrialCoordinate "[Row11_Start]"
	setcycle 11 Outcome "Diamond.png"
	setcycle 11 Stim1 "[A1]"
	setcycle 11 Stim2 "[X1]"
	setcycle 11 Trial 12
	setcycle 11 A "[A1]"
	setcycle 11 B "[B1]"
	setcycle 11 X "[X1]"
	setcycle 11 TrialCoordinate "[Row12_Start]"
	setcycle 12 Outcome "NoDiamond.png"
	setcycle 12 Stim1 "[A1]"
	setcycle 12 Stim2 "[X1]"
	setcycle 12 Trial 13
	setcycle 12 A "[A1]"
	setcycle 12 B "[B1]"
	setcycle 12 X "[X1]"
	setcycle 12 TrialCoordinate "[Row13_Start]"
	setcycle 13 Outcome "Diamond.png"
	setcycle 13 Stim1 "[B1]"
	setcycle 13 Stim2 "[X1]"
	setcycle 13 Trial 14
	setcycle 13 A "[A1]"
	setcycle 13 B "[B1]"
	setcycle 13 X "[X1]"
	setcycle 13 TrialCoordinate "[Row14_Start]"
	setcycle 14 Outcome "Diamond.png"
	setcycle 14 Stim1 "[A1]"
	setcycle 14 Stim2 "[X1]"
	setcycle 14 Trial 15
	setcycle 14 A "[A1]"
	setcycle 14 B "[B1]"
	setcycle 14 X "[X1]"
	setcycle 14 TrialCoordinate "[Row15_Start]"
	setcycle 15 Outcome "NoDiamond.png"
	setcycle 15 Stim1 "[B1]"
	setcycle 15 Stim2 "[X1]"
	setcycle 15 Trial 16
	setcycle 15 A "[A1]"
	setcycle 15 B "[B1]"
	setcycle 15 X "[X1]"
	setcycle 15 TrialCoordinate "[Row16_Start]"
	run Cond000Sequence

define loop _050
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 A "[A2]"
	setcycle 0 B "[B2]"
	setcycle 0 Outcome "Diamond.png"
	setcycle 0 Stim1 "[A2]"
	setcycle 0 Stim2 "[X2]"
	setcycle 0 Trial 1
	setcycle 0 TrialCoordinate "[Row1_Start]"
	setcycle 0 X "[X2]"
	setcycle 1 A "[A2]"
	setcycle 1 B "[B2]"
	setcycle 1 Outcome "NoDiamond.png"
	setcycle 1 Stim1 "[B2]"
	setcycle 1 Stim2 "[X2]"
	setcycle 1 Trial 2
	setcycle 1 TrialCoordinate "[Row2_Start]"
	setcycle 1 X "[X2]"
	setcycle 2 A "[A2]"
	setcycle 2 B "[B2]"
	setcycle 2 Outcome "Diamond.png"
	setcycle 2 Stim1 "[B2]"
	setcycle 2 Stim2 "[X2]"
	setcycle 2 Trial 3
	setcycle 2 TrialCoordinate "[Row3_Start]"
	setcycle 2 X "[X2]"
	setcycle 3 A "[A2]"
	setcycle 3 B "[B2]"
	setcycle 3 Outcome "Diamond.png"
	setcycle 3 Stim1 "[A2]"
	setcycle 3 Stim2 "[X2]"
	setcycle 3 Trial 4
	setcycle 3 TrialCoordinate "[Row4_Start]"
	setcycle 3 X "[X2]"
	setcycle 4 A "[A2]"
	setcycle 4 B "[B2]"
	setcycle 4 Outcome "NoDiamond.png"
	setcycle 4 Stim1 "[A2]"
	setcycle 4 Stim2 "[X2]"
	setcycle 4 Trial 5
	setcycle 4 TrialCoordinate "[Row5_Start]"
	setcycle 4 X "[X2]"
	setcycle 5 A "[A2]"
	setcycle 5 B "[B2]"
	setcycle 5 Outcome "NoDiamond.png"
	setcycle 5 Stim1 "[B2]"
	setcycle 5 Stim2 "[X2]"
	setcycle 5 Trial 6
	setcycle 5 TrialCoordinate "[Row6_Start]"
	setcycle 5 X "[X2]"
	setcycle 6 A "[A2]"
	setcycle 6 B "[B2]"
	setcycle 6 Outcome "Diamond.png"
	setcycle 6 Stim1 "[A2]"
	setcycle 6 Stim2 "[X2]"
	setcycle 6 Trial 7
	setcycle 6 TrialCoordinate "[Row7_Start]"
	setcycle 6 X "[X2]"
	setcycle 7 A "[A2]"
	setcycle 7 B "[B2]"
	setcycle 7 Outcome "NoDiamond.png"
	setcycle 7 Stim1 "[B2]"
	setcycle 7 Stim2 "[X2]"
	setcycle 7 Trial 8
	setcycle 7 TrialCoordinate "[Row8_Start]"
	setcycle 7 X "[X2]"
	setcycle 8 A "[A2]"
	setcycle 8 B "[B2]"
	setcycle 8 Outcome "Diamond.png"
	setcycle 8 Stim1 "[B2]"
	setcycle 8 Stim2 "[X2]"
	setcycle 8 Trial 9
	setcycle 8 TrialCoordinate "[Row9_Start]"
	setcycle 8 X "[X2]"
	setcycle 9 A "[A2]"
	setcycle 9 B "[B2]"
	setcycle 9 Outcome "Diamond.png"
	setcycle 9 Stim1 "[A2]"
	setcycle 9 Stim2 "[X2]"
	setcycle 9 Trial 10
	setcycle 9 TrialCoordinate "[Row10_Start]"
	setcycle 9 X "[X2]"
	setcycle 10 A "[A2]"
	setcycle 10 B "[B2]"
	setcycle 10 Outcome "NoDiamond.png"
	setcycle 10 Stim1 "[B2]"
	setcycle 10 Stim2 "[X2]"
	setcycle 10 Trial 11
	setcycle 10 TrialCoordinate "[Row11_Start]"
	setcycle 10 X "[X2]"
	setcycle 11 A "[A2]"
	setcycle 11 B "[B2]"
	setcycle 11 Outcome "Diamond.png"
	setcycle 11 Stim1 "[A2]"
	setcycle 11 Stim2 "[X2]"
	setcycle 11 Trial 12
	setcycle 11 TrialCoordinate "[Row12_Start]"
	setcycle 11 X "[X2]"
	setcycle 12 A "[A2]"
	setcycle 12 B "[B2]"
	setcycle 12 Outcome "NoDiamond.png"
	setcycle 12 Stim1 "[A2]"
	setcycle 12 Stim2 "[X2]"
	setcycle 12 Trial 13
	setcycle 12 TrialCoordinate "[Row13_Start]"
	setcycle 12 X "[X2]"
	setcycle 13 A "[A2]"
	setcycle 13 B "[B2]"
	setcycle 13 Outcome "NoDiamond.png"
	setcycle 13 Stim1 "[B2]"
	setcycle 13 Stim2 "[X2]"
	setcycle 13 Trial 14
	setcycle 13 TrialCoordinate "[Row14_Start]"
	setcycle 13 X "[X2]"
	setcycle 14 A "[A2]"
	setcycle 14 B "[B2]"
	setcycle 14 Outcome "Diamond.png"
	setcycle 14 Stim1 "[A2]"
	setcycle 14 Stim2 "[X2]"
	setcycle 14 Trial 15
	setcycle 14 TrialCoordinate "[Row15_Start]"
	setcycle 14 X "[X2]"
	setcycle 15 A "[A2]"
	setcycle 15 B "[B2]"
	setcycle 15 Outcome "NoDiamond.png"
	setcycle 15 Stim1 "[B2]"
	setcycle 15 Stim2 "[X2]"
	setcycle 15 Trial 16
	setcycle 15 TrialCoordinate "[Row16_Start]"
	setcycle 15 X "[X2]"
	run Cond050Sequence

define loop _100
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Outcome "Diamond.png"
	setcycle 0 Stim1 "[A3]"
	setcycle 0 Stim2 "[X3]"
	setcycle 0 Trial 1
	setcycle 0 A "[A3]"
	setcycle 0 B "[B3]"
	setcycle 0 X "[X3]"
	setcycle 0 TrialCoordinate "[Row1_Start]"
	setcycle 1 Outcome "NoDiamond.png"
	setcycle 1 Stim1 "[B3]"
	setcycle 1 Stim2 "[X3]"
	setcycle 1 Trial 2
	setcycle 1 A "[A3]"
	setcycle 1 B "[B3]"
	setcycle 1 X "[X3]"
	setcycle 1 TrialCoordinate "[Row2_Start]"
	setcycle 2 Outcome "NoDiamond.png"
	setcycle 2 Stim1 "[B3]"
	setcycle 2 Stim2 "[X3]"
	setcycle 2 Trial 3
	setcycle 2 A "[A3]"
	setcycle 2 B "[B3]"
	setcycle 2 X "[X3]"
	setcycle 2 TrialCoordinate "[Row3_Start]"
	setcycle 3 Outcome "Diamond.png"
	setcycle 3 Stim1 "[A3]"
	setcycle 3 Stim2 "[X3]"
	setcycle 3 Trial 4
	setcycle 3 A "[A3]"
	setcycle 3 B "[B3]"
	setcycle 3 X "[X3]"
	setcycle 3 TrialCoordinate "[Row4_Start]"
	setcycle 4 Outcome "Diamond.png"
	setcycle 4 Stim1 "[A3]"
	setcycle 4 Stim2 "[X3]"
	setcycle 4 Trial 5
	setcycle 4 A "[A3]"
	setcycle 4 B "[B3]"
	setcycle 4 X "[X3]"
	setcycle 4 TrialCoordinate "[Row5_Start]"
	setcycle 5 Outcome "NoDiamond.png"
	setcycle 5 Stim1 "[B3]"
	setcycle 5 Stim2 "[X3]"
	setcycle 5 Trial 6
	setcycle 5 A "[A3]"
	setcycle 5 B "[B3]"
	setcycle 5 X "[X3]"
	setcycle 5 TrialCoordinate "[Row6_Start]"
	setcycle 6 Outcome "Diamond.png"
	setcycle 6 Stim1 "[A3]"
	setcycle 6 Stim2 "[X3]"
	setcycle 6 Trial 7
	setcycle 6 A "[A3]"
	setcycle 6 B "[B3]"
	setcycle 6 X "[X3]"
	setcycle 6 TrialCoordinate "[Row7_Start]"
	setcycle 7 Outcome "NoDiamond.png"
	setcycle 7 Stim1 "[B3]"
	setcycle 7 Stim2 "[X3]"
	setcycle 7 Trial 8
	setcycle 7 A "[A3]"
	setcycle 7 B "[B3]"
	setcycle 7 X "[X3]"
	setcycle 7 TrialCoordinate "[Row8_Start]"
	setcycle 8 Outcome "NoDiamond.png"
	setcycle 8 Stim1 "[B3]"
	setcycle 8 Stim2 "[X3]"
	setcycle 8 Trial 9
	setcycle 8 A "[A3]"
	setcycle 8 B "[B3]"
	setcycle 8 X "[X3]"
	setcycle 8 TrialCoordinate "[Row9_Start]"
	setcycle 9 Outcome "Diamond.png"
	setcycle 9 Stim1 "[A3]"
	setcycle 9 Stim2 "[X3]"
	setcycle 9 Trial 10
	setcycle 9 A "[A3]"
	setcycle 9 B "[B3]"
	setcycle 9 X "[X3]"
	setcycle 9 TrialCoordinate "[Row10_Start]"
	setcycle 10 Outcome "NoDiamond.png"
	setcycle 10 Stim1 "[B3]"
	setcycle 10 Stim2 "[X3]"
	setcycle 10 Trial 11
	setcycle 10 A "[A3]"
	setcycle 10 B "[B3]"
	setcycle 10 X "[X3]"
	setcycle 10 TrialCoordinate "[Row11_Start]"
	setcycle 11 Outcome "Diamond.png"
	setcycle 11 Stim1 "[A3]"
	setcycle 11 Stim2 "[X3]"
	setcycle 11 Trial 12
	setcycle 11 A "[A3]"
	setcycle 11 B "[B3]"
	setcycle 11 X "[X3]"
	setcycle 11 TrialCoordinate "[Row12_Start]"
	setcycle 12 Outcome "Diamond.png"
	setcycle 12 Stim1 "[A3]"
	setcycle 12 Stim2 "[X3]"
	setcycle 12 Trial 13
	setcycle 12 A "[A3]"
	setcycle 12 B "[B3]"
	setcycle 12 X "[X3]"
	setcycle 12 TrialCoordinate "[Row13_Start]"
	setcycle 13 Outcome "NoDiamond.png"
	setcycle 13 Stim1 "[B3]"
	setcycle 13 Stim2 "[X3]"
	setcycle 13 Trial 14
	setcycle 13 A "[A3]"
	setcycle 13 B "[B3]"
	setcycle 13 X "[X3]"
	setcycle 13 TrialCoordinate "[Row14_Start]"
	setcycle 14 Outcome "Diamond.png"
	setcycle 14 Stim1 "[A3]"
	setcycle 14 Stim2 "[X3]"
	setcycle 14 Trial 15
	setcycle 14 A "[A3]"
	setcycle 14 B "[B3]"
	setcycle 14 X "[X3]"
	setcycle 14 TrialCoordinate "[Row15_Start]"
	setcycle 15 Outcome "NoDiamond.png"
	setcycle 15 Stim1 "[B3]"
	setcycle 15 Stim2 "[X3]"
	setcycle 15 Trial 16
	setcycle 15 A "[A3]"
	setcycle 15 B "[B3]"
	setcycle 15 X "[X3]"
	setcycle 15 TrialCoordinate "[Row16_Start]"
	run Cond100Sequence

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Info_for_running always
	run new_form_consent_1 always
	run Initialization always
	run Training_phase always

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sequence main_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run _000 "[block1] = [count_main_sequence]"
	run _050 "[block2] = [count_main_sequence]"
	run _100 "[block3] = [count_main_sequence]"

define feedback new_feedback_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Condition 050" x=-256 y=-96 z_index=0

define feedback new_feedback_2
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Condition 100" x=-192 y=-96 z_index=0

define form_consent new_form_consent
	set timeout infinite
	set spacing 10
	set rows "1;4;1;1"
	set only_render no
	set margins "50;50;50;50"
	set form_title Consent
	__form_text__
	You are about to participate in an experiment from the University of Groningen.
	
	This experiment poses no known risks to your health and the data will be anonimised, such that you will not be associated with the findings.
	
	You can stop at any time during the experiment if you feel uncomfortable. 
	
	Upon completion of your participation in this study you will be provided with a brief explanation of the question this study addresses.
	
	If you have any questions before or after the experiment you can email s.poelstra.1@student.rug.nl.
	__end__
	set description "A simple consent form"
	set decline_text "Do not participate"
	set decline_message "You need to accept the consent form to participate!"
	set cols "2;2"
	set checkbox_text "I have read and understood the information shown above"
	set accept_text "Participate!"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 2 1 checkbox text="[checkbox_text]" var=checkbox_status
	widget 0 3 1 1 button text="[accept_text]" var=accept_status
	widget 1 3 1 1 button text="[decline_text]"


define form_consent new_form_consent_1
	set timeout infinite
	set spacing 10
	set rows "1;4;1;1"
	set only_render no
	set margins "50;50;50;50"
	set form_title "Consent form"
	__form_text__
	In this study we aim to investigate the influence of cue structure on learning. The experiment takes approximately 15 to 20 minutes. You will see images of objects on screen and rate on a scale from 0 to 8 on your keyboard the causal relation between them.
	The data obtained during this study will be stored and processed anonymously and therefore we will not be able to trace back your data or remove your data after submission. The data will only be used for scientific research and not for other purposes.
	There are no foreseeable risks or discomfort as a result of your taking part in this experiment, and you are free to withdraw your participation at any time during the experiment.
	Upon completion of our participation in this study you will be provided with a brief explanation of the question that this study addresses.<br/>
	Please contact Sanne for questions about the experiment ( s.poelstra.1@student.rug.nl ). Any complaints concerning this study can be directed to the Research Ethical Review Committee (CETO) of the University of Groningen ( ceto@rug.nl ) . This research project is carried out under supervision of Dr. Jessie Nixon (University of Tübingen, Germany) and Dr. Jacolien van Rij (University of Groningen, The Netherlands).
	
	Checkboxes: 
	My participation to this experiment is voluntary. I understand that I can stop at any time without giving reasons.
	"I have read and understood the information above and consent that my data will be used for scientific research."
	__end__
	set description "A simple consent form"
	set decline_text "Do not participate"
	set decline_message "You need to accept the consent form to participate!"
	set cols "2;2"
	set checkbox_text "I have read and understood the information shown above"
	set accept_text "Participate!"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 2 1 checkbox text="[checkbox_text]" var=checkbox_status
	widget 0 3 1 1 button text="[accept_text]" var=accept_status
	widget 1 3 1 1 button text="[decline_text]"


define logger new_logger
	set description "Logs experimental data"
	set auto_log yes
	log A
	log B
	log X
	log A1
	log B1
	log X1
	log A2
	log B2
	log X2
	log A3
	log B3
	log X3
	log Stim1
	log Stim2
	log Outcome

define mouse_response new_mouse_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define sequence new_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="OpenSesame 3.3 <i>Lentiform Loewenfeld</i>" x=0 y=0 z_index=0

