---
API: 2.1
OpenSesame: 3.3.6
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground "#000000"
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#d6d6d6"

define inline_javascript Conditions
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//There are 6 different conditions (3 block types that can be combined together in 6 ways)
	//This determines, based on participants number which order people get.
	
	//first we create a list of list with the order of the blocks
	let counterbalancing = [[2,0,1], [0,1,2], [0,2,1], [1,0,2], [1,2,0], [2,1,0]]
	//Then set block 1 2 and 3 to the items on the list on the posistion of the subject number modulo 6
	vars.block1, vars.block2, vars.block3 = counterbalancing[vars.subject_nr%6]
	
	//Now we want to shuffle the stimuli for participants
	//The first way to do this is by stim = pool.files(), however that will also include things such as Diamond.png and background.png, so we'd rather not have that
	//Therefore we put them in by hand for now:
	let stim = ['Acorn.png', 'Beetle.png', 'BlackBerries.png', 'Feather.png', 'Flower.png', 'Footprints.png', 'Log.png', 'Mouse.png', 'Puddle.png']
	
	
	//STACKOVERFLOW
	function shuffle(array) {
	  var currentIndex = array.length, temporaryValue, randomIndex;
	
	  // While there remain elements to shuffle...
	  while (0 !== currentIndex) {
	
	    // Pick a remaining element...
	    randomIndex = Math.floor(Math.random() * currentIndex);
	    currentIndex -= 1;
	
	    // And swap it with the current element.
	    temporaryValue = array[currentIndex];
	    array[currentIndex] = array[randomIndex];
	    array[randomIndex] = temporaryValue;
	  }
	
	  return array;
	}
	///
	
	shuffle(stim)
	//random.shuffle(stim) #shuffle them
	//Assign them to either A B or X and to either block 1 2 or 3
	vars.A1 = stim[0]
	vars.B1 = stim[1]
	vars.X1 = stim[2]
	vars.A2 = stim[3]
	vars.B2 = stim[4]
	vars.X2 = stim[5]
	vars.A3 = stim[6]
	vars.B3 = stim[7]
	vars.X3 = stim[8]
	
	//vars.A1, vars.B1, vars.X1, vars.A2, vars.B2, vars.X2, vars.A3, vars.B3, vars.X3 = stim
	console.log(stim)
	console.log(vars.A1 + vars.B1 + vars.X1 + vars.A2 + vars.B2 + vars.X2 + vars.A3 + vars.B3 + vars.X3)
	__end__
	set _prepare "//import Math"

define inline_script Conditions_Stimuli
	set description "Executes Python code"
	___run__
	#There are 6 different conditions (3 block types that can be combined together in 6 ways)
	#This determines, based on participants number which order people get.
	
	#first we create a list of list with the order of the blocks
	counterbalancing = [[2,0,1], [0,1,2], [0,2,1], [1,0,2], [1,2,0], [2,1,0]]
	#Then set block 1 2 and 3 to the items on the list on the posistion of the subject number modulo 6
	var.block1, var.block2, var.block3 = counterbalancing[var.subject_nr%6]
	
	#Now we want to shuffle the stimuli for participants
	#The first way to do this is by stim = pool.files(), however that will also include things such as Diamond.png and background.png, so we'd rather not have that
	#Therefore we put them in by hand for now:
	stim = ['Acorn.png', 'Beetle.png', 'BlackBerries.png', 'Feather.png', 'Flower.png', 'Footprints.png', 'Log.png', 'Mouse.png', 'Puddle.png']
	random.shuffle(stim) #shuffle them
	#Assign them to either A B or X and to either block 1 2 or 3
	vars.A1, vars.B1, vars.X1, vars.A2, vars.B2, vars.X2, vars.A3, vars.B3, vars.X3 = stim
	print(stim)
	print(var.A1,var.B1,var.X1,var.A2,var.B2,var.X2,var.A3,var.B3,var.X3)
	
	#Create the response dataframes globally was well, to use later to display the responses participants gave
	var.Responses000 = pandas.DataFrame(columns=['ResponsesA', 'ResponsesB', 'ResponsesX'], dtype='int')
	var.Responses050 = pandas.DataFrame(columns=['ResponsesA', 'ResponsesB', 'ResponsesX'], dtype='int')
	var.Responses100 = pandas.DataFrame(columns=['ResponsesA', 'ResponsesB', 'ResponsesX'], dtype='int')
	var.PracticeRate = pandas.DataFrame(columns=['ResponsesA', 'ResponsesB', 'ResponsesX'], dtype='int')
	
	#All possible locations the stimuli can be on
	var.locations = [[0,0], [0,1], [0,2], [0,3], [0,4], [0,5], [0,6], [0,7], [0,8], [0,9], [0,10], [0,11], [0,12], [0,13], [2,0], [2,1], [2,2], [2,3], [2,4], [2,5], [2,6], [2,7], [2,8], [2,9], [2,10], [2,11], [2,12], [2,13]]
	
	###THIS DOES THE SAME, BUT LONGER
	# if self.get('subject_nr')%6 == 1:
	#     block1 = 0
	#     block2 = 1 
	#     block3 = 2
	#     
	# if self.get('subject_nr')%6 == 2:
	#     block1 = 0
	#     block2 = 2  
	#     block3 = 1
	#     
	# if self.get('subject_nr')%6 == 3:
	#     block1 = 1
	#     block2 = 0 
	#     block3 = 2
	#     
	# if self.get('subject_nr')%6 == 4:
	#     block1 = 1
	#     block2 = 2 
	#     block3 = 0
	#     
	# if self.get('subject_nr')%6 == 5:
	#     block1 = 2
	#     block2 = 1 
	#     block3 = 0
	#     
	# elif self.get('subject_nr')%6==0:
	#     block1 = 2
	#     block2 = 0 
	#     block3 = 1
	    
	#We then also don't have to explictely set these variables anymore
	# exp.set('block1', block1)
	# exp.set('block2', block2)
	# exp.set('block3', block3)
	
	
	# A1 = stim[0]
	# B1 = stim[1]
	# X1 = stim[2]
	# A2 = stim[3]
	# B2 = stim[4]
	# X2 = stim[5]
	# A3 = stim[6]
	# B3 = stim[7]
	# X3 = stim[8]
	
	#Set them globally
	# exp.set('A1', A1)
	# exp.set('B1', B1)
	# exp.set('X1', X1)
	# exp.set('A2', A2)
	# exp.set('B2', B2)
	# exp.set('X2', X2)
	# exp.set('A3', A3)
	# exp.set('B3', B3)
	# exp.set('X3', X3)
	__end__
	___prepare__
	#importing packages
	import random
	import pandas
	import re
	__end__

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Conditions always
	run new_loop_1 always

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define feedback new_feedback
	set reset_variables yes
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[image]" scale=0.5 show_if=always x=0 y=-224 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[question1]" x="[x_question]" y="[y_question1]" z_index=0
	draw textline center=1 color=black font_bold=yes font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[question2]" x="[x_question]" y="[y_question2]" z_index=0
	draw textline center=1 color=black font_bold=yes font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[question3]" x="[x_question]" y="[y_question3]" z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[response1]" x="[x_r1]" y="[y_rating1]" z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[response2]" x="[x_r2]" y="[y_rating1]" z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[response1]" x="[x_r1]" y="[y_rating2]" z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[response2]" x="[x_r2]" y="[y_rating2]" z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[response1]" x="[x_r1]" y="[y_rating3]" z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[response2]" x="[x_r2]" y="[y_rating3]" z_index=0
	draw line color=black penwidth=1 show_if=always x1="[x_line_start]" x2="[x_line_end]" y1="[y_rating1]" y2="[y_rating1]" z_index=0
	draw line color=black penwidth=1 show_if=always x1="[x_line_start]" x2="[x_line_end]" y1="[y_rating2]" y2="[y_rating2]" z_index=0
	draw line color=black penwidth=1 show_if=always x1="[x_line_start]" x2="[x_line_end]" y1="[y_rating3]" y2="[y_rating3]" z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=Next x=330 y=330 z_index=0
	draw rect color=black fill=0 h="[h_continue_box]" penwidth=1 show_if=always w="[w_continue_box]" x="[x_continue_box]" y="[y_continue_box]" z_index=0
	draw image center=1 file="os-mouse_response.png" scale=1 show_if="[roi1]= known" x="[x1]" y="[y_rating1]" z_index=0
	draw image center=1 file="os-mouse_response.png" scale=1 show_if="[roi2]= known" x="[x2]" y="[y_rating2]" z_index=0
	draw image center=1 file="os-mouse_response.png" scale=1 show_if="[roi3]=known" x="[x3]" y="[y_rating3]" z_index=0

define feedback new_feedback_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw image center=1 file="[Stim1]" scale=0.5 show_if=always x=-288 y=-192 z_index=0
	draw image center=1 file="[B1]" scale=0.3 show_if=always x=128 y=-192 z_index=0
	draw rect color=black fill=0 h="[h_continue_box]" penwidth=1 show_if=always w="[w_continue_box]" x="[x_continue_box]" y="[y_continue_box]" z_index=0

define inline_javascript new_inline_javascript
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// Determine whether participants clicked on the 'next' button
	let _x = vars.x_continue_box
	let _y = vars.y_continue_box
	let _w = vars.w_continue_box
	let _h = vars.h_continue_box
	
	
	if (
	    vars.cursor_x >= _x &
	    vars.cursor_x < _x + _w &
	    vars.cursor_y >= _y &
	    vars.cursor_y < _y + _h
	){
	    vars.continue_roi_ticked = "yes"
	    }
	
	console.log("continue_roi_ticked = " + vars.continue_roi_ticked)
	console.log("my_cursor_roi_ticked = " + vars.my_cursor_roi_ticked)
	__end__
	set _prepare ""

define inline_javascript new_inline_javascript_1
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	__end__
	___prepare__
	vars.contine_roi_ticked = 'no'
	vars.my_cursor_roi_ticked = 'no'
	__end__

define loop new_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Outcome "Diamond.png"
	setcycle 0 Stim1 "[A1]"
	setcycle 0 Stim2 "[X1]"
	setcycle 0 Trial 1
	setcycle 0 A "[A1]"
	setcycle 0 B "[B1]"
	setcycle 0 X "[X1]"
	setcycle 1 Outcome "NoDiamond.png"
	setcycle 1 Stim1 "[B1]"
	setcycle 1 Stim2 "[X1]"
	setcycle 1 Trial 2
	setcycle 1 A "[A1]"
	setcycle 1 B "[B1]"
	setcycle 1 X "[X1]"
	setcycle 2 Outcome "Diamond.png"
	setcycle 2 Stim1 "[B1]"
	setcycle 2 Stim2 "[X1]"
	setcycle 2 Trial 3
	setcycle 2 A "[A1]"
	setcycle 2 B "[B1]"
	setcycle 2 X "[X1]"
	setcycle 3 Outcome "NoDiamond.png"
	setcycle 3 Stim1 "[A1]"
	setcycle 3 Stim2 "[X1]"
	setcycle 3 Trial 4
	setcycle 3 A "[A1]"
	setcycle 3 B "[B1]"
	setcycle 3 X "[X1]"
	setcycle 4 Outcome "NoDiamond.png"
	setcycle 4 Stim1 "[A1]"
	setcycle 4 Stim2 "[X1]"
	setcycle 4 Trial 5
	setcycle 4 A "[A1]"
	setcycle 4 B "[B1]"
	setcycle 4 X "[X1]"
	setcycle 5 Outcome "Diamond.png"
	setcycle 5 Stim1 "[B1]"
	setcycle 5 Stim2 "[X1]"
	setcycle 5 Trial 6
	setcycle 5 A "[A1]"
	setcycle 5 B "[B1]"
	setcycle 5 X "[X1]"
	setcycle 6 Outcome "Diamond.png"
	setcycle 6 Stim1 "[A1]"
	setcycle 6 Stim2 "[X1]"
	setcycle 6 Trial 7
	setcycle 6 A "[A1]"
	setcycle 6 B "[B1]"
	setcycle 6 X "[X1]"
	setcycle 7 Outcome "NoDiamond.png"
	setcycle 7 Stim1 "[B1]"
	setcycle 7 Stim2 "[X1]"
	setcycle 7 Trial 8
	setcycle 7 A "[A1]"
	setcycle 7 B "[B1]"
	setcycle 7 X "[X1]"
	setcycle 8 Outcome "Diamond.png"
	setcycle 8 Stim1 "[B1]"
	setcycle 8 Stim2 "[X1]"
	setcycle 8 Trial 9
	setcycle 8 A "[A1]"
	setcycle 8 B "[B1]"
	setcycle 8 X "[X1]"
	setcycle 9 Outcome "NoDiamond.png"
	setcycle 9 Stim1 "[A1]"
	setcycle 9 Stim2 "[X1]"
	setcycle 9 Trial 10
	setcycle 9 A "[A1]"
	setcycle 9 B "[B1]"
	setcycle 9 X "[X1]"
	setcycle 10 Outcome "NoDiamond.png"
	setcycle 10 Stim1 "[B1]"
	setcycle 10 Stim2 "[X1]"
	setcycle 10 Trial 11
	setcycle 10 A "[A1]"
	setcycle 10 B "[B1]"
	setcycle 10 X "[X1]"
	setcycle 11 Outcome "Diamond.png"
	setcycle 11 Stim1 "[A1]"
	setcycle 11 Stim2 "[X1]"
	setcycle 11 Trial 12
	setcycle 11 A "[A1]"
	setcycle 11 B "[B1]"
	setcycle 11 X "[X1]"
	setcycle 12 Outcome "NoDiamond.png"
	setcycle 12 Stim1 "[A1]"
	setcycle 12 Stim2 "[X1]"
	setcycle 12 Trial 13
	setcycle 12 A "[A1]"
	setcycle 12 B "[B1]"
	setcycle 12 X "[X1]"
	setcycle 13 Outcome "Diamond.png"
	setcycle 13 Stim1 "[B1]"
	setcycle 13 Stim2 "[X1]"
	setcycle 13 Trial 14
	setcycle 13 A "[A1]"
	setcycle 13 B "[B1]"
	setcycle 13 X "[X1]"
	setcycle 14 Outcome "Diamond.png"
	setcycle 14 Stim1 "[A1]"
	setcycle 14 Stim2 "[X1]"
	setcycle 14 Trial 15
	setcycle 14 A "[A1]"
	setcycle 14 B "[B1]"
	setcycle 14 X "[X1]"
	setcycle 15 Outcome "NoDiamond.png"
	setcycle 15 Stim1 "[B1]"
	setcycle 15 Stim2 "[X1]"
	setcycle 15 Trial 16
	setcycle 15 A "[A1]"
	setcycle 15 B "[B1]"
	setcycle 15 X "[X1]"
	run new_sequence

define loop new_loop_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 x_continue_box 300
	setcycle 0 w_continue_box 100
	setcycle 0 y_continue_box 300
	setcycle 0 h_continue_box 60
	run new_sequence_1

define loop new_loop_2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run new_sequence_2

define mouse_response new_mouse_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_inline_javascript_1 always
	run new_feedback_1 always
	run new_loop_2 always

define sequence new_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_loop always

define sequence new_sequence_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_mouse_response always
	run new_inline_javascript always
	run new_feedback always

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="eyyy lmao" x=-256 y=-96 z_index=0
	draw image center=1 file="[Stim1]" scale=0.5 show_if=always x=-288 y=-192 z_index=0
	draw image center=1 file="[B1]" scale=0.3 show_if=always x=128 y=-192 z_index=0
	draw rect color=black fill=0 h="[h_continue_box]" penwidth=1 show_if=always w="[w_continue_box]" x="[x_continue_box]" y="[y_continue_box]" z_index=0

