---
API: 2.1
OpenSesame: 3.3.7
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Practice Test"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground "#000000"
set font_underline no
set font_size 16
set font_italic no
set font_family sans
set font_bold no
set experiment_path "C:/Users/Sanne/Dropbox/MasterProject/Experiments/JavaScript"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#cecece"

define form_consent ActiveConsentForm
	set timeout infinite
	set spacing 10
	set rows "1;4;1;1"
	set only_render no
	set margins "50;50;50;50"
	set form_title "Consent form"
	__form_text__
	This study aims to investigate how people assign causes to events. The experiment takes approximately 15 to 20 minutes. You will see images of objects on screen and rate on a scale from 1 to 9 on your keyboard the causal relation between them.
	The data obtained during this study will be stored and processed anonymously. We only link your prolificID to be able to pay you. The data will only be used for scientific research and not for other purposes.
	There are no foreseeable risks or discomfort as a result of your taking part in this experiment, and you are free to withdraw your participation at any time during the experiment.
	Upon completion of your participation in this study, you will be provided with a brief explanation of the question that this study addresses.
	
	Please contact Sanne for questions about the experiment ( s.poelstra.1@student.rug.nl ). Any complaints concerning this study can be directed to the Research Ethical Review Committee (CETO) of the University of Groningen ( ceto@rug.nl ) . This research project is carried out under supervision of Dr. Jessie Nixon (University of Tübingen, Germany) and Dr. Jacolien van Rij (University of Groningen, The Netherlands).
	By clicking the checkbox below you agree with the following statements:
	· My participation in this experiment is voluntary. I understand that I can stop at any time without giving reasons.
	· I consent that my data will be used for scientific research.
	__end__
	set description "A simple consent form"
	set decline_text "Do not participate"
	set decline_message "You need to accept the consent form to participate"
	set cols "2;2"
	set checkbox_text "I have read and understood the information above"
	set accept_text "Participate!"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 2 1 checkbox text="[checkbox_text]" var=checkbox_status
	widget 0 3 1 1 button text="[accept_text]" var=accept_status
	widget 1 3 1 1 button text="[decline_text]"


define sketchpad Explanation
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=sans font_italic=no font_size=16 html=yes show_if=always text="You will start with a practice run to get you used to the rating system in the log book.<br /><br />You can select a square to type in with the <left> and <right> arrow keys. The selected box is highlighted with a green line around it. Type in any number between 1 and 9 in the box. If you want to correct a mistake you can just type a number again in the box that you want to change. Please use the keyboard, as numpad cannot be used.<br /><br />Press the <enter> key once you filled in all 3 ratings to continue to the next trial.<br /><br />You will not see any items on screen yet, as this is just practice for the rating system.<br /><br />In this practice run you will have as much time as you need, so don’t worry about the 15 seconds yet. You can try for 4 days.<br /><br />Good luck!" x=0 y=-64 z_index=0
	draw image center=1 file="Diamond.png" scale=1 show_if=always x=-256 y=192 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=sans font_italic=no font_size=16 html=yes show_if=always text="A diamond outcome<br />" x=-256 y=320 z_index=0
	draw image center=1 file="NoDiamond.png" scale=1 show_if=always x=224 y=192 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=sans font_italic=no font_size=16 html=yes show_if=always text="An outcome where there is no diamond" x=224 y=320 z_index=0

define inline_javascript Initialization
	set description "Code for initializing the variables, e.g. randomizing stimuli, creating coordinates etc."
	___run__
	//this is code to collect the prolific ID of people such that it doesnt have        to directly be put in and I can trace it back to pay them
	//var prolific_id = jatos.urlQueryParameters.prolific_pid;
	//vars.prolific_id = prolific_id
	
	
	
	
	
	
	
	//We initialize all row and columns beginning and ending coordinates here.
	//These are chosen in this way because in the Python form these were the coordinates of each row and column and I liked the layout of that.
	vars.Row0_Start = -374
	vars.Row0_End = -296
	vars.Row1_Start = -295
	vars.Row1_End =-257
	vars.Row2_Start = -256
	vars.Row2_End = -218
	vars.Row3_Start = -217
	vars.Row3_End = -179
	vars.Row4_Start = -178
	vars.Row4_End = -140
	vars.Row5_Start = -139
	vars.Row5_End = -101
	vars.Row6_Start = -100
	vars.Row6_End = -62
	vars.Row7_Start = -61
	vars.Row7_End = -23
	vars.Row8_Start = -22
	vars.Row8_End = 16
	vars.Row9_Start = 17
	vars.Row9_End = 55
	vars.Row10_Start = 56
	vars.Row10_End = 94
	vars.Row11_Start = 95
	vars.Row11_End = 133
	vars.Row12_Start = 134
	vars.Row12_End = 172
	vars.Row13_Start = 173
	vars.Row13_End = 211
	vars.Row14_Start = 212
	vars.Row14_End = 250
	vars.Row15_Start = 251
	vars.Row15_End = 289
	vars.Row16_Start = 290
	vars.Row16_End = 328
	vars.Row17_Start = 329
	vars.Row17_End = 367
	
	vars.Col0_Start = -502
	vars.Col0_End = -292
	vars.Col1_Start = -291
	vars.Col1_End = -81
	vars.Col2_Start = -80
	vars.Col2_End = 130
	vars.Col3_Start = 131
	vars.Col3_End = 183
	vars.Col4_Start = 184
	vars.Col4_End = 289
	vars.Col5_Start = 290
	vars.Col5_End = 395
	vars.Col6_Start = 396
	vars.Col6_End = 501
	
	//this variable is such that I can display the second line of the "how likely do you think it is that ..." text in the test phase
	vars.Row0Test_Start = -350
	
	//There are 6 different conditions (3 block types that can be combined together in 6 ways)
	//This determines, based on participants number which order people get.
	
	if(vars.subject_nr%6 === 1){
	    vars.block1 = 0
	    vars.block2 = 1
	    vars.block3 = 2
	}
	if(vars.subject_nr%6 === 2){
	    vars.block1 = 0
	    vars.block2 = 2
	    vars.block3 = 1
	}
	if(vars.subject_nr%6 === 3){
	    vars.block1 = 1
	    vars.block2 = 0
	    vars.block3 = 2
	}
	if(vars.subject_nr%6 === 4){
	    vars.block1 = 1
	    vars.block2 = 2
	    vars.block3 = 0
	}
	if(vars.subject_nr%6 === 5){
	    vars.block1 = 2
	    vars.block2 = 1
	    vars.block3 = 0
	}
	else if(vars.subject_nr%6 === 0){
	    vars.block1 = 2
	    vars.block2 = 0
	    vars.block3 = 1
	}
	//console.log("block1 =" + vars.block1 + "type =" + typeof(vars.block1))
	//console.log("block2 =" + vars.block2)
	//console.log("block3 =" + vars.block3)
	
	//Now we want to shuffle the stimuli for participants
	//The first way to do this is by stim = pool.files(), however that will also include things such as Diamond.png and background.png, so we'd rather not have that
	//Therefore we put them in by hand for now:
	vars.stim = ['Acorn.png', 'Beetle.png', 'BlackBerries.png', 'Feather.png', 'Flower.png', 'Footprints.png', 'Log.png', 'Mouse.png', 'Puddle.png']
	
	//This is a shuffle function from Stackoverflow, because JavaScript does not have a .shuffle function or something like that 
	
	//STACKOVERFLOW https://stackoverflow.com/questions/2450954/how-to-randomize-shuffle-a-javascript-array
	function shuffle(array) {
	  var currentIndex = array.length, temporaryValue, randomIndex;
	
	  // While there remain elements to shuffle...
	  while (0 !== currentIndex) {
	
	    // Pick a remaining element...
	    randomIndex = Math.floor(Math.random() * currentIndex);
	    currentIndex -= 1;
	
	    // And swap it with the current element.
	    temporaryValue = array[currentIndex];
	    array[currentIndex] = array[randomIndex];
	    array[randomIndex] = temporaryValue;
	  }
	
	  return array;
	}
	////////////////
	
	//So now we shuffle and assign them to either A B or X and to either block 1 2 or 3
	shuffle(vars.stim)
	
	vars.A1 = vars.stim[0]
	vars.B1 = vars.stim[1]
	vars.X1 = vars.stim[2]
	vars.A2 = vars.stim[3]
	vars.B2 = vars.stim[4]
	vars.X2 = vars.stim[5]
	vars.A3 = vars.stim[6]
	vars.B3 = vars.stim[7]
	vars.X3 = vars.stim[8]
	vars.C = 'Toadstools.png'
	
	//These logs can be used to check what the stims are, how they are shuffled and what is put in each of the A's, B's and X's
	//console.log(vars.stim)
	//console.log(vars.A1 + vars.B1 + vars.X1 + vars.A2 + vars.B2 + vars.X2 + vars.A3 + vars.B3 + vars.X3)
	
	
	//Here we create an array of possible locations. The stimuli can only appear in column 0 and 2, so not in 1 in which the outcome is located.
	//Note that "column" and 'row' are artifacts left over from when this was created in a form, bascially I translated the columns and rows to coordinates such that they can be displayed on a sketchpad.
	vars.locations = [[vars.Col0_Start + 1,vars.Row0_Start], [vars.Col0_Start + 1,vars.Row1_Start], [vars.Col0_Start + 1,vars.Row2_Start], [vars.Col0_Start + 1,vars.Row3_Start], [vars.Col0_Start + 1,vars.Row4_Start], [vars.Col0_Start + 1,vars.Row5_Start], [vars.Col0_Start + 1,vars.Row6_Start], [vars.Col0_Start + 1,vars.Row7_Start], [vars.Col0_Start + 1,vars.Row8_Start], [vars.Col0_Start + 1,vars.Row9_Start], [vars.Col0_Start + 1,vars.Row10_Start], [vars.Col0_Start + 1,vars.Row11_Start], [vars.Col0_Start + 1,vars.Row12_Start], [vars.Col0_Start + 1,vars.Row13_Start], [vars.Col2_Start + 1,vars.Row0_Start], [vars.Col2_Start + 1,vars.Row1_Start], [vars.Col2_Start + 1,vars.Row2_Start], [vars.Col2_Start + 1,vars.Row3_Start], [vars.Col2_Start + 1,vars.Row4_Start], [vars.Col2_Start + 1,vars.Row5_Start], [vars.Col2_Start + 1,vars.Row6_Start], [vars.Col2_Start + 1,vars.Row7_Start], [vars.Col2_Start + 1,vars.Row8_Start], [vars.Col2_Start + 1,vars.Row9_Start], [vars.Col2_Start + 1,vars.Row10_Start], [vars.Col2_Start + 1,vars.Row11_Start], [vars.Col2_Start + 1,vars.Row12_Start], [vars.Col2_Start + 1,vars.Row13_Start]]
	
	//Here we have an array for responses. This is used to loop over R1, R2 and R3 in the selection of which box people want to type in their answer
	vars.responses = ["R1", "R2", "R3"]
	vars.testResponses = ["R1", "R2"]
	
	vars.Responses000 = []
	vars.Responses050 = []
	vars.Responses100 = []
	vars.Practice1 = []
	vars.Practice2 = []
	vars.Practice3 = []
	__end__
	set _prepare "//import Math"

define form_text_display Introduction
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Next
	set margins "50;50;50;50"
	set form_title "Welcome space adventurer!"
	__form_text__
	In this game, you are searching for treasure on a planet you haven’t visited before, planet PNF-404. To increase your chances of finding treasure, you need to pay attention to the clues in the environment. So pay attention to the clues, do they lead to treasure or to no treasure?
	
	Keep track of your findings in the log book provided. Your task is to estimate how likely each clue is to lead to the treasure. Note however that in this new world, things work differently than on your home planet. The clues might surprise you.
	Rate the likelihood of each clue leading to treasure on a scale from 1 to 9. 1 means that the clue is very unlikely to lead to treasure, and 9 means that the clue is very likely to lead to treasure.
	You have 15 seconds to fill in those scores for all three clues, even if you have not seen one of the clues on this trial.
	
	You have 16 days on this area of the planet, after which you will go to another part of the planet, where different objects are found.
	Have fun exploring and good luck finding treasure!
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define keyboard_response KeyboardPractice
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7;8;9;ENTER;RETURN;RIGHT;LEFT;BACKSPACE"

define keyboard_response KeyboardPractice3
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7;8;9;ENTER;RETURN;RIGHT;LEFT;BACKSPACE"

define keyboard_response KeyboardPractice_1_1
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7;8;9;ENTER;RETURN;RIGHT;LEFT;BACKSPACE"

define inline_javascript KeyboardResponsesPractice
	set description "Code to determine what needs to be done based on keyboard presses"
	___run__
	//With right and left we can cycle through the different boxes
	if(vars.response == 'right'){
	    vars.y += 1
	    vars.current = vars.responses[vars.y%3] //this loops over the 3 items in the loop,namely R1,R2 and R3
	}
	if(vars.response == 'left'){
	    if(vars.y == 0){ //otherwise it can go out of bounds if people press left too often
	        vars.current = vars.responses[vars.y%3]
	    }
	    else{
	        vars.y -= 1
	        vars.current = vars.responses[vars.y%3]
	    }
	}
	
	//If people put in a number, then put that number in whichever rating box was selected
	//had to put 10 here as otherwise it wouldnt work with 9 somehow
	if(vars.response in [1,2,3,4,5,6,7,8,9,10]){
	    if(vars.current === "R1"){
	        vars.responseR1 = vars.response
	    }
	    if(vars.current === "R2"){
	        vars.responseR2 = vars.response
	    }
	    if(vars.current === "R3"){
	        vars.responseR3 = vars.response
	    }
	}
	
	//if someone pressed enter (or return, as it works on my keyboard)
	if(vars.response == 'enter'| vars.response == 'return'){
	    //and all of the responses are filled in, then the check will change to yes
	    if(vars.responseR1 != '' & vars.responseR2 != '' & vars.responseR3 != ''){
	        vars.check = 'yes'
	    }
	    //else set the reminder to yes, to make a bit of text appear that will say "hey fill in all 3 things first pls"
	    else{
	        vars.reminder = 'yes'
	    }
	}
	
	//console.log(vars.response)
	//console.log("R1:" + vars.responseR1)
	//console.log("R2:" + vars.responseR2)
	//console.log("R3:" + vars.responseR3)
	__end__
	set _prepare ""

define inline_javascript KeyboardResponsesPractice3
	set description "Code to determine what needs to be done based on keyboard presses"
	___run__
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	__end__
	set _prepare ""

define inline_javascript KeyboardResponsesPractice_1_1
	set description "Code to determine what needs to be done based on keyboard presses"
	___run__
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	__end__
	set _prepare ""

define loop Keyboard_loopPractice
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run Keyboard_sequencePractice

define loop Keyboard_loopPractice3
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run Keyboard_sequencePractice3

define loop Keyboard_loopPractice_1_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run Keyboard_sequencePractice_1_1

define sequence Keyboard_sequencePractice
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run PreviousResponsesPractice always
	run RatingPractice always
	run KeyboardPractice always
	run KeyboardResponsesPractice always
	run Repeat_cyclePractice always

define sequence Keyboard_sequencePractice3
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run PreviousResponsesPractice3 always
	run RatingPractice3 always
	run KeyboardPractice3 always
	run KeyboardResponsesPractice3 always
	run Repeat_cyclePractice3 always

define sequence Keyboard_sequencePractice_1_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run PreviousResponsesPractice_1_1 always
	run RatingPractice_1_1 always
	run KeyboardPractice_1_1 always
	run KeyboardResponsesPractice_1_1 always
	run Repeat_cyclePractice_1_1 always

define logger Logger
	set description "Logs experimental data"
	set auto_log yes

define logger Logger3
	set description "Logs experimental data"
	set auto_log yes

define logger Logger_1_1
	set description "Logs experimental data"
	set auto_log yes

define inline_javascript LoggingPractice
	set description "Code to log the answers that were given"
	___run__
	//if nothing was filled in for either R1, R2 or R3 (because time ran out for example), then fill in 999 so we can identify and sort on that later
	if(vars.responseR1 == ''){
	    vars.responseR1 = 999
	}
	if(vars.responseR2 == ''){
	    vars.responseR2 = 999
	}
	if(vars.responseR3 == ''){
	    vars.responseR3 = 999
	}
	
	//combine all the new answers into a list, and put that list into the list of lists of the responses for this condition
	vars.NewAnswers = [vars.responseR1, vars.responseR2, vars.responseR3]
	vars.Practice1.push(vars.NewAnswers)
	//console.log(vars.Responses000)
	__end__
	set _prepare ""

define inline_javascript LoggingPractice3
	set description "Code to log the answers that were given"
	___run__
	//if nothing was filled in for either R1, R2 or R3 (because time ran out for example), then fill in 999 so we can identify and sort on that later
	if(vars.responseR1 == ''){
	    vars.responseR1 = 999
	}
	if(vars.responseR2 == ''){
	    vars.responseR2 = 999
	}
	if(vars.responseR3 == ''){
	    vars.responseR3 = 999
	}
	
	//combine all the new answers into a list, and put that list into the list of lists of the responses for this condition
	vars.NewAnswers = [vars.responseR1, vars.responseR2, vars.responseR3]
	vars.Practice3.push(vars.NewAnswers)
	//console.log(vars.Responses000)
	__end__
	set _prepare ""

define inline_javascript LoggingPractice_1_1
	set description "Code to log the answers that were given"
	___run__
	//if nothing was filled in for either R1, R2 or R3 (because time ran out for example), then fill in 999 so we can identify and sort on that later
	if(vars.responseR1 == ''){
	    vars.responseR1 = 999
	}
	if(vars.responseR2 == ''){
	    vars.responseR2 = 999
	}
	if(vars.responseR3 == ''){
	    vars.responseR3 = 999
	}
	
	//combine all the new answers into a list, and put that list into the list of lists of the responses for this condition
	vars.NewAnswers = [vars.responseR1, vars.responseR2, vars.responseR3]
	vars.Practice2.push(vars.NewAnswers)
	//console.log(vars.Responses000)
	__end__
	set _prepare ""

define feedback OutcomePractice3
	set reset_variables yes
	set duration 1000
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="[Outcome]" x="[Col1_Start]" y="[Row7_Start]" z_index=0

define feedback OutcomePractice_1_1
	set reset_variables yes
	set duration 1000
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="[Stim1]" x="[pos1X]" y="[pos1Y]" z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="[Stim2]" x="[pos2X]" y="[pos2Y]" z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="[Outcome]" x="[Col1_Start]" y="[Row7_Start]" z_index=0

define form_text_display PracticeRun
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Start!"
	set margins "50;50;50;50"
	set form_title "Practice Run"
	__form_text__
	You will start with a practice run to get you used to the rating system in the log book.
	
	You can select a square to type in with the <left> and <right> arrow keys. The selected box is highlighted with a green line around it. Type in any number between 1 and 9 in the box. If you want to correct a mistake you can just type a number again in the box that you want to change. Please use the keyboard, as the number pad (numpad) cannot be used.
	
	Press the <enter> key once you filled in all 3 ratings to continue to the next trial.
	
	Since this is just a practice for using the rating system, you will only see text, e.g. “Clue 1”, “Clue 2”, “No diamond”, rather than any actual objects.
	In this practice run you will have as much time as you need, so don’t worry about the 15 seconds yet. You can try for 4 days.
	
	Good luck!
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define loop Practice_Run_Type1
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "4 practice trials"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Trial 1
	setcycle 0 TrialCoordinate "[Row1_Start]"
	setcycle 0 TrialCoordinateEnd "[Row1_End]"
	setcycle 0 Type Practice1
	setcycle 1 Trial 2
	setcycle 1 TrialCoordinate "[Row2_Start]"
	setcycle 1 TrialCoordinateEnd "[Row2_End]"
	setcycle 1 Type Practice1
	setcycle 2 Trial 3
	setcycle 2 TrialCoordinate "[Row3_Start]"
	setcycle 2 TrialCoordinateEnd "[Row3_End]"
	setcycle 2 Type Practice1
	setcycle 3 Trial 4
	setcycle 3 TrialCoordinate "[Row4_Start]"
	setcycle 3 TrialCoordinateEnd "[Row4_End]"
	setcycle 3 Type Practice1
	run Practice_sequence

define loop Practice_Run_Type2
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "4 practice trials"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Trial 1
	setcycle 0 TrialCoordinate "[Row1_Start]"
	setcycle 0 TrialCoordinateEnd "[Row1_End]"
	setcycle 0 Outcome "A Diamond"
	setcycle 0 Stim1 "Clue 1"
	setcycle 0 Stim2 "Clue 2"
	setcycle 1 Trial 2
	setcycle 1 TrialCoordinate "[Row2_Start]"
	setcycle 1 TrialCoordinateEnd "[Row2_End]"
	setcycle 1 Outcome "No Diamond"
	setcycle 1 Stim1 "Clue 3"
	setcycle 1 Stim2 Clue2
	setcycle 2 Trial 3
	setcycle 2 TrialCoordinate "[Row3_Start]"
	setcycle 2 TrialCoordinateEnd "[Row3_End]"
	setcycle 2 Outcome "No Diamond"
	setcycle 2 Stim1 "Clue 1"
	setcycle 2 Stim2 "Clue 2"
	setcycle 3 Trial 4
	setcycle 3 TrialCoordinate "[Row4_Start]"
	setcycle 3 TrialCoordinateEnd "[Row4_End]"
	setcycle 3 Outcome "A Diamond"
	setcycle 3 Stim1 "Clue 3"
	setcycle 3 Stim2 "Clue 2"
	run ""

define loop Practice_Run_Type2_1
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "4 practice trials"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Trial 1
	setcycle 0 TrialCoordinate "[Row1_Start]"
	setcycle 0 TrialCoordinateEnd "[Row1_End]"
	setcycle 0 Outcome "   Diamond"
	setcycle 0 Stim1 "   Clue 1"
	setcycle 0 Stim2 "   Clue 2"
	setcycle 1 Trial 2
	setcycle 1 TrialCoordinate "[Row2_Start]"
	setcycle 1 TrialCoordinateEnd "[Row2_End]"
	setcycle 1 Outcome "   No Diamond"
	setcycle 1 Stim1 "   Clue 3"
	setcycle 1 Stim2 "   Clue 2"
	setcycle 2 Trial 3
	setcycle 2 TrialCoordinate "[Row3_Start]"
	setcycle 2 TrialCoordinateEnd "[Row3_End]"
	setcycle 2 Outcome "   No Diamond"
	setcycle 2 Stim1 "   Clue 1"
	setcycle 2 Stim2 "   Clue 2"
	setcycle 3 Trial 4
	setcycle 3 TrialCoordinate "[Row4_Start]"
	setcycle 3 TrialCoordinateEnd "[Row4_End]"
	setcycle 3 Outcome "   A Diamond"
	setcycle 3 Stim1 "   Clue 3"
	setcycle 3 Stim2 "   Clue 2"
	run Practice_sequence_1_1

define loop Practice_Run_Type3
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "4 practice trials"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Trial 1
	setcycle 0 TrialCoordinate "[Row1_Start]"
	setcycle 0 TrialCoordinateEnd "[Row1_End]"
	setcycle 0 Outcome "A Diamond"
	setcycle 0 Stim1 "Clue 1"
	setcycle 0 Stim2 "Clue 2"
	setcycle 1 Trial 2
	setcycle 1 TrialCoordinate "[Row2_Start]"
	setcycle 1 TrialCoordinateEnd "[Row2_End]"
	setcycle 1 Outcome "No Diamond"
	setcycle 1 Stim1 "Clue 3"
	setcycle 1 Stim2 Clue2
	setcycle 2 Trial 3
	setcycle 2 TrialCoordinate "[Row3_Start]"
	setcycle 2 TrialCoordinateEnd "[Row3_End]"
	setcycle 2 Outcome "No Diamond"
	setcycle 2 Stim1 "Clue 1"
	setcycle 2 Stim2 "Clue 2"
	setcycle 3 Trial 4
	setcycle 3 TrialCoordinate "[Row4_Start]"
	setcycle 3 TrialCoordinateEnd "[Row4_End]"
	setcycle 3 Outcome "A Diamond"
	setcycle 3 Stim1 "Clue 3"
	setcycle 3 Stim2 "Clue 2"
	run ""

define loop Practice_Run_Type3_1
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "4 practice trials"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Trial 1
	setcycle 0 TrialCoordinate "[Row1_Start]"
	setcycle 0 TrialCoordinateEnd "[Row1_End]"
	setcycle 0 Outcome "A Diamond"
	setcycle 0 Stim1 "Marble.png"
	setcycle 0 Stim2 "Card.png"
	setcycle 1 Trial 2
	setcycle 1 TrialCoordinate "[Row2_Start]"
	setcycle 1 TrialCoordinateEnd "[Row2_End]"
	setcycle 1 Outcome "No Diamond"
	setcycle 1 Stim1 "Shoe.png"
	setcycle 1 Stim2 "Card.png"
	setcycle 2 Trial 3
	setcycle 2 TrialCoordinate "[Row3_Start]"
	setcycle 2 TrialCoordinateEnd "[Row3_End]"
	setcycle 2 Outcome "No Diamond"
	setcycle 2 Stim1 "Marble.png"
	setcycle 2 Stim2 "Card.png"
	setcycle 3 Trial 4
	setcycle 3 TrialCoordinate "[Row4_Start]"
	setcycle 3 TrialCoordinateEnd "[Row4_End]"
	setcycle 3 Outcome "A Diamond"
	setcycle 3 Stim1 "Shoe.png"
	setcycle 3 Stim2 "Card.png"
	run Practice_sequence3

define sequence Practice_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run TrialInitializerPractice always
	run Keyboard_loopPractice always
	run LoggingPractice always
	run Logger always

define sequence Practice_sequence3
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run TrialInitializerPractice3 always
	run StimPractice3 always
	run OutcomePractice3 always
	run Keyboard_loopPractice3 always
	run LoggingPractice3 always
	run Logger3 always

define sequence Practice_sequence_1_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run TrialInitializerPractice_1_1 always
	run StimPractice_1_1 always
	run OutcomePractice_1_1 always
	run Keyboard_loopPractice_1_1 always
	run LoggingPractice_1_1 always
	run Logger_1_1 always

define inline_javascript PreviousResponsesPractice
	set description "Get the previous responses"
	___run__
	//i am so so sorry future me
	
	//OKAY what I did here was. I cannot dynamically put everything on the sketchpad as with my form in Python. So to get around this problem in the easiest way (as I'd like to test after two months thanks) I created a for loop with differently named variables for EVERY TRIAL, such that all these variables can be displayed
	
	vars.j=1
	//console.log(vars.Responses000)
	if(vars.Trial == 2){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T1A = vars.Practice1[vars.j-1][0]
	        vars.T1B = vars.Practice1[vars.j-1][1]
	        vars.T1X = vars.Practice1[vars.j-1][2]
	        
	        if(vars.T1A == 999){
	            vars.T1A = 'X'
	        }
	        if(vars.T1B == 999){
	            vars.T1B = 'X'
	        }
	        if(vars.T1X == 999){
	            vars.T1X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 3){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T2A = vars.Practice1[vars.j-1][0]
	        vars.T2B = vars.Practice1[vars.j-1][1]
	        vars.T2X = vars.Practice1[vars.j-1][2]
	        
	        if(vars.T2A == 999){
	            vars.T2A = 'X'
	        }
	        if(vars.T2B == 999){
	            vars.T2B = 'X'
	        }
	        if(vars.T2X == 999){
	            vars.T2X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 4){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T3A = vars.Practice1[vars.j-1][0]
	        vars.T3B = vars.Practice1[vars.j-1][1]
	        vars.T3X = vars.Practice1[vars.j-1][2]
	        
	        if(vars.T3A == 999){
	            vars.T3A = 'X'
	        }
	        if(vars.T3B == 999){
	            vars.T3B = 'X'
	        }
	        if(vars.T3X == 999){
	            vars.T3X = 'X'
	        }
	    }
	}
	__end__
	set _prepare ""

define inline_javascript PreviousResponsesPractice3
	set description "Get the previous responses"
	___run__
	//i am so so sorry future me
	
	//OKAY what I did here was. I cannot dynamically put everything on the sketchpad as with my form in Python. So to get around this problem in the easiest way (as I'd like to test after two months thanks) I created a for loop with differently named variables for EVERY TRIAL, such that all these variables can be displayed
	
	vars.j=1
	//console.log(vars.Responses000)
	if(vars.Trial == 2){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T1A = vars.Practice3[vars.j-1][0]
	        vars.T1B = vars.Practice3[vars.j-1][1]
	        vars.T1X = vars.Practice3[vars.j-1][2]
	        
	        if(vars.T1A == 999){
	            vars.T1A = 'X'
	        }
	        if(vars.T1B == 999){
	            vars.T1B = 'X'
	        }
	        if(vars.T1X == 999){
	            vars.T1X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 3){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T2A = vars.Practice3[vars.j-1][0]
	        vars.T2B = vars.Practice3[vars.j-1][1]
	        vars.T2X = vars.Practice3[vars.j-1][2]
	        
	        if(vars.T2A == 999){
	            vars.T2A = 'X'
	        }
	        if(vars.T2B == 999){
	            vars.T2B = 'X'
	        }
	        if(vars.T2X == 999){
	            vars.T2X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 4){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T3A = vars.Practice3[vars.j-1][0]
	        vars.T3B = vars.Practice3[vars.j-1][1]
	        vars.T3X = vars.Practice3[vars.j-1][2]
	        
	        if(vars.T3A == 999){
	            vars.T3A = 'X'
	        }
	        if(vars.T3B == 999){
	            vars.T3B = 'X'
	        }
	        if(vars.T3X == 999){
	            vars.T3X = 'X'
	        }
	    }
	}
	__end__
	set _prepare ""

define inline_javascript PreviousResponsesPractice_1_1
	set description "Get the previous responses"
	___run__
	//i am so so sorry future me
	
	//OKAY what I did here was. I cannot dynamically put everything on the sketchpad as with my form in Python. So to get around this problem in the easiest way (as I'd like to test after two months thanks) I created a for loop with differently named variables for EVERY TRIAL, such that all these variables can be displayed
	
	vars.j=1
	//console.log(vars.Responses000)
	if(vars.Trial == 2){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T1A = vars.Practice2[vars.j-1][0]
	        vars.T1B = vars.Practice2[vars.j-1][1]
	        vars.T1X = vars.Practice2[vars.j-1][2]
	        
	        if(vars.T1A == 999){
	            vars.T1A = 'X'
	        }
	        if(vars.T1B == 999){
	            vars.T1B = 'X'
	        }
	        if(vars.T1X == 999){
	            vars.T1X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 3){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T2A = vars.Practice2[vars.j-1][0]
	        vars.T2B = vars.Practice2[vars.j-1][1]
	        vars.T2X = vars.Practice2[vars.j-1][2]
	        
	        if(vars.T2A == 999){
	            vars.T2A = 'X'
	        }
	        if(vars.T2B == 999){
	            vars.T2B = 'X'
	        }
	        if(vars.T2X == 999){
	            vars.T2X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 4){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T3A = vars.Practice2[vars.j-1][0]
	        vars.T3B = vars.Practice2[vars.j-1][1]
	        vars.T3X = vars.Practice2[vars.j-1][2]
	        
	        if(vars.T3A == 999){
	            vars.T3A = 'X'
	        }
	        if(vars.T3B == 999){
	            vars.T3B = 'X'
	        }
	        if(vars.T3X == 999){
	            vars.T3X = 'X'
	        }
	    }
	}
	__end__
	set _prepare ""

define feedback RatingPractice
	set reset_variables yes
	set duration 0
	set description "Shows background, rating boxes and text"
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Object 1" x="[Col4_Start]" y="[Row0_Start]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Object 2" x="[Col5_Start]" y="[Row0_Start]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Object 3" x="[Col6_Start]" y="[Row0_Start]" z_index=0
	draw rect color="#f8f8ff" fill=1 h=32 penwidth=1 show_if=always w=50 x="[Col4_Start]" y="[TrialCoordinate]" z_index=0
	draw rect color="#f8f8ff" fill=1 h=32 penwidth=1 show_if=always w=50 x="[Col5_Start]" y="[TrialCoordinate]" z_index=0
	draw rect color="#f8f8ff" fill=1 h=32 penwidth=1 show_if=always w=50 x="[Col6_Start]" y="[TrialCoordinate]" z_index=0
	draw rect color="#00b300" fill=0 h=32 penwidth=1 show_if="[current]=R1" w=50 x="[Col4_Start]" y="[TrialCoordinate]" z_index=0
	draw rect color="#00b300" fill=0 h=32 penwidth=1 show_if="[current]=R2" w=50 x="[Col5_Start]" y="[TrialCoordinate]" z_index=0
	draw rect color="#00b300" fill=0 h=32 penwidth=1 show_if="[current]=R3" w=50 x="[Col6_Start]" y="[TrialCoordinate]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[responseR1]" x="[Col4_Start]" y="[TrialCoordinate]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[responseR2]" x="[Col5_Start]" y="[TrialCoordinate]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[responseR3]" x="[Col6_Start]" y="[TrialCoordinate]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=1 x="[Col3_Start]" y="[Row1_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=2 x="[Col3_Start]" y="[Row2_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=3 x="[Col3_Start]" y="[Row3_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=4 x="[Col3_Start]" y="[Row4_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=14 html=yes show_if="[reminder]=yes" text="Please fill in all three scores first!" x="[Col4_Start]" y="[Row17_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=14 html=yes show_if="[reminder]=no" text="Press enter when all three boxes" x="[Col4_Start]" y="[Row17_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=14 html=yes show_if="[reminder]=no" text="are filled in to continue" x="[Col4_Start]" y=350 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=2" text="[T1A]" x="[Col4_Start]" y="[Row1_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=2" text="[T1B]" x="[Col5_Start]" y="[Row1_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=2" text="[T1X]" x="[Col6_Start]" y="[Row1_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=3" text="[T2A]" x="[Col4_Start]" y="[Row2_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=3" text="[T2B]" x="[Col5_Start]" y="[Row2_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=3" text="[T2X]" x="[Col6_Start]" y="[Row2_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=4" text="[T3A]" x="[Col4_Start]" y="[Row3_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=4" text="[T3B]" x="[Col5_Start]" y="[Row3_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=4" text="[T3X]" x="[Col6_Start]" y="[Row3_Start]" z_index=0

define feedback RatingPractice3
	set reset_variables yes
	set duration 0
	set description "Shows background, rating boxes and text"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="[Outcome]" x="[Col1_Start]" y="[Row7_Start]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Object 1" x="[Col4_Start]" y="[Row0_Start]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Object 2" x="[Col5_Start]" y="[Row0_Start]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Object 3" x="[Col6_Start]" y="[Row0_Start]" z_index=0
	draw rect color="#f8f8ff" fill=1 h=32 penwidth=1 show_if=always w=50 x="[Col4_Start]" y="[TrialCoordinate]" z_index=0
	draw rect color="#f8f8ff" fill=1 h=32 penwidth=1 show_if=always w=50 x="[Col5_Start]" y="[TrialCoordinate]" z_index=0
	draw rect color="#f8f8ff" fill=1 h=32 penwidth=1 show_if=always w=50 x="[Col6_Start]" y="[TrialCoordinate]" z_index=0
	draw rect color="#00b300" fill=0 h=32 penwidth=1 show_if="[current]=R1" w=50 x="[Col4_Start]" y="[TrialCoordinate]" z_index=0
	draw rect color="#00b300" fill=0 h=32 penwidth=1 show_if="[current]=R2" w=50 x="[Col5_Start]" y="[TrialCoordinate]" z_index=0
	draw rect color="#00b300" fill=0 h=32 penwidth=1 show_if="[current]=R3" w=50 x="[Col6_Start]" y="[TrialCoordinate]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[responseR1]" x="[Col4_Start]" y="[TrialCoordinate]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[responseR2]" x="[Col5_Start]" y="[TrialCoordinate]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[responseR3]" x="[Col6_Start]" y="[TrialCoordinate]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=1 x="[Col3_Start]" y="[Row1_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=2 x="[Col3_Start]" y="[Row2_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=3 x="[Col3_Start]" y="[Row3_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=4 x="[Col3_Start]" y="[Row4_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=14 html=yes show_if="[reminder]=yes" text="Please fill in all three scores first!" x="[Col4_Start]" y="[Row17_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=14 html=yes show_if="[reminder]=no" text="Press enter when all three boxes" x="[Col4_Start]" y="[Row17_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=14 html=yes show_if="[reminder]=no" text="are filled in to continue" x="[Col4_Start]" y=350 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=14 html=yes show_if="[Trial]>=1" text="A score of 1 means very" x="[Col4_Start]" y="[Row7_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=14 html=yes show_if="[Trial]>=1" text="unlikely to predict a diamond," x="[Col4_Start]" y=-41 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=14 html=yes show_if="[Trial]>=1" text="a score of 9 means very" x="[Col4_Start]" y=-21 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=14 html=yes show_if="[Trial]>=1" text="likely to predict a diamond" x="[Col4_Start]" y=-1 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=2" text="[T1A]" x="[Col4_Start]" y="[Row1_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=2" text="[T1B]" x="[Col5_Start]" y="[Row1_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=2" text="[T1X]" x="[Col6_Start]" y="[Row1_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=3" text="[T2A]" x="[Col4_Start]" y="[Row2_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=3" text="[T2B]" x="[Col5_Start]" y="[Row2_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=3" text="[T2X]" x="[Col6_Start]" y="[Row2_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=4" text="[T3A]" x="[Col4_Start]" y="[Row3_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=4" text="[T3B]" x="[Col5_Start]" y="[Row3_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=4" text="[T3X]" x="[Col6_Start]" y="[Row3_Start]" z_index=0

define feedback RatingPractice_1_1
	set reset_variables yes
	set duration 0
	set description "Shows background, rating boxes and text"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="[Stim1]" x="[pos1X]" y="[pos1Y]" z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="[Stim2]" x="[pos2X]" y="[pos2Y]" z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="[Outcome]" x="[Col1_Start]" y="[Row7_Start]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Clue 1" x="[Col4_Start]" y="[Row0_Start]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Clue 2" x="[Col5_Start]" y="[Row0_Start]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Clue 3" x="[Col6_Start]" y="[Row0_Start]" z_index=0
	draw rect color="#f8f8ff" fill=1 h=32 penwidth=1 show_if=always w=50 x="[Col4_Start]" y="[TrialCoordinate]" z_index=0
	draw rect color="#f8f8ff" fill=1 h=32 penwidth=1 show_if=always w=50 x="[Col5_Start]" y="[TrialCoordinate]" z_index=0
	draw rect color="#f8f8ff" fill=1 h=32 penwidth=1 show_if=always w=50 x="[Col6_Start]" y="[TrialCoordinate]" z_index=0
	draw rect color="#00b300" fill=0 h=32 penwidth=1 show_if="[current]=R1" w=50 x="[Col4_Start]" y="[TrialCoordinate]" z_index=0
	draw rect color="#00b300" fill=0 h=32 penwidth=1 show_if="[current]=R2" w=50 x="[Col5_Start]" y="[TrialCoordinate]" z_index=0
	draw rect color="#00b300" fill=0 h=32 penwidth=1 show_if="[current]=R3" w=50 x="[Col6_Start]" y="[TrialCoordinate]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[responseR1]" x="[Col4_Start]" y="[TrialCoordinate]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[responseR2]" x="[Col5_Start]" y="[TrialCoordinate]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[responseR3]" x="[Col6_Start]" y="[TrialCoordinate]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=1 x="[Col3_Start]" y="[Row1_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=2 x="[Col3_Start]" y="[Row2_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=3 x="[Col3_Start]" y="[Row3_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=4 x="[Col3_Start]" y="[Row4_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=14 html=yes show_if="[reminder]=yes" text="Please fill in all three scores first!" x="[Col4_Start]" y="[Row17_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=14 html=yes show_if="[reminder]=no" text="Press enter when all three boxes" x="[Col4_Start]" y="[Row17_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=14 html=yes show_if="[reminder]=no" text="are filled in to continue" x="[Col4_Start]" y=350 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=2" text="[T1A]" x="[Col4_Start]" y="[Row1_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=2" text="[T1B]" x="[Col5_Start]" y="[Row1_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=2" text="[T1X]" x="[Col6_Start]" y="[Row1_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=3" text="[T2A]" x="[Col4_Start]" y="[Row2_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=3" text="[T2B]" x="[Col5_Start]" y="[Row2_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=3" text="[T2X]" x="[Col6_Start]" y="[Row2_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=4" text="[T3A]" x="[Col4_Start]" y="[Row3_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=4" text="[T3B]" x="[Col5_Start]" y="[Row3_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=4" text="[T3X]" x="[Col6_Start]" y="[Row3_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=14 html=yes show_if="[Trial]==2" text="Please note that the diamond occurs" x="[Col3_Start]" y="[Row7_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=14 html=yes show_if="[Trial]==2" text="in some trials, but not in others." x="[Col3_Start]" y=-41 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=14 html=yes show_if="[Trial]==1" text="Remember, a score of 1 means very unlikely" x="[Col3_Start]" y="[Row7_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=14 html=yes show_if="[Trial]==1" text="to predict a diamond, while a score of 9" x="[Col3_Start]" y=-41 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=14 html=yes show_if="[Trial]==1" text="means very likely to predict a diamond." x="[Col3_Start]" y=-21 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=14 html=yes show_if="[Trial]==1" text="likely to predict a diamond" x="[Col3_Start]" y=-1 z_index=0

define repeat_cycle Repeat_cyclePractice
	set description "Repeat this until the check = yes"
	set condition "[check] == no"

define repeat_cycle Repeat_cyclePractice3
	set description "Repeat this until the check = yes"
	set condition "[check] == no"

define repeat_cycle Repeat_cyclePractice_1_1
	set description "Repeat this until the check = yes"
	set condition "[check] == no"

define feedback StimPractice3
	set reset_variables yes
	set duration 2000
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0

define feedback StimPractice_1_1
	set reset_variables yes
	set duration 2000
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="[Stim1]" x="[pos1X]" y="[pos1Y]" z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="[Stim2]" x="[pos2X]" y="[pos2Y]" z_index=0

define inline_javascript TrialInitializerPractice
	set description "Initialize each trail for the practice run"
	set _run ""
	___prepare__
	//Set in place a .check, to check if all three values are filled in later on
	//a .reminder to indicate whether people clicked on enter too soon
	//a .current to indicate which textbox is selected/highlighted
	//and a .y which will be the indicator of which text box is selected (currently - so vars.responses[0])
	vars.check = 'no'
	vars.reminder = 'no'
	vars.current = vars.responses[0]
	vars.y = 0
	
	//Then we have the default input for the response for responses 1,2 and 3
	vars.responseR1 = ''
	vars.responseR2 = ''
	vars.responseR3 = ''
	__end__

define inline_javascript TrialInitializerPractice3
	set description "Initialize each trail for the practice run"
	set _run ""
	___prepare__
	vars.pos1 = vars.locations[Math.floor(Math.random() * vars.locations.length)]
	vars.pos1X = vars.pos1[0]
	vars.pos1Y = vars.pos1[1]
	
	vars.temp = []
	
	//create an array that has all the points in it that are not in the same column as the previous stimuli
	vars.i = 0
	for(vars.i = 0; vars.i<vars.locations.length;vars.i++){
	    if(vars.locations[vars.i][0] != vars.pos1X){
	        vars.temp.push(vars.locations[vars.i])}
	}
	
	//then pick a random one again
	vars.pos2 = vars.temp[Math.floor(Math.random()*vars.temp.length)]
	vars.pos2X = vars.pos2[0]
	vars.pos2Y = vars.pos2[1]
	
	
	//Set in place a .check, to check if all three values are filled in later on
	//a .reminder to indicate whether people clicked on enter too soon
	//a .current to indicate which textbox is selected/highlighted
	//and a .y which will be the indicator of which text box is selected (currently - so vars.responses[0])
	vars.check = 'no'
	vars.reminder = 'no'
	vars.current = vars.responses[0]
	vars.y = 0
	
	//Then we have the default input for the response for responses 1,2 and 3
	vars.responseR1 = ''
	vars.responseR2 = ''
	vars.responseR3 = ''
	__end__

define inline_javascript TrialInitializerPractice_1_1
	set description "Initialize each trail for the practice run"
	set _run ""
	___prepare__
	vars.pos1 = vars.locations[Math.floor(Math.random() * vars.locations.length)]
	vars.pos1X = vars.pos1[0]
	vars.pos1Y = vars.pos1[1]
	
	vars.temp = []
	
	//create an array that has all the points in it that are not in the same column as the previous stimuli
	vars.i = 0
	for(vars.i = 0; vars.i<vars.locations.length;vars.i++){
	    if(vars.locations[vars.i][0] != vars.pos1X){
	        vars.temp.push(vars.locations[vars.i])}
	}
	
	//then pick a random one again
	vars.pos2 = vars.temp[Math.floor(Math.random()*vars.temp.length)]
	vars.pos2X = vars.pos2[0]
	vars.pos2Y = vars.pos2[1]
	
	
	//Set in place a .check, to check if all three values are filled in later on
	//a .reminder to indicate whether people clicked on enter too soon
	//a .current to indicate which textbox is selected/highlighted
	//and a .y which will be the indicator of which text box is selected (currently - so vars.responses[0])
	vars.check = 'no'
	vars.reminder = 'no'
	vars.current = vars.responses[0]
	vars.y = 0
	
	//Then we have the default input for the response for responses 1,2 and 3
	vars.responseR1 = ''
	vars.responseR2 = ''
	vars.responseR3 = ''
	__end__

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_notepad always
	run ActiveConsentForm always
	run Introduction always
	run Initialization always
	run PracticeRun always
	run Practice_Run_Type2_1 always

define notepad new_notepad
	set note "In this small demo, "
	set description "A simple notepad to document your experiment. This plug-in does nothing."

