---
API: 2.1
OpenSesame: 3.3.7
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground "#000000"
set font_underline no
set font_size 16
set font_italic no
set font_family sans
set font_bold no
set experiment_path "C:/Users/Sanne/Dropbox/MasterProject/Experiments/JavaScript"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#cecece"

define inline_javascript Alternative_stimuli
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//a file to create alternative versions of the stimuli... not the neatest solution, but it works
	
	vars.C_alt = 'Mushrooms.png'
	
	if(vars.A1 == 'Acorn.png'){
	    vars.A1_alt = 'Chestnut.png'
	}
	if(vars.A1 == 'Beetle.png'){
	    vars.A1_alt = 'Ladybug.png'
	}
	if(vars.A1 == 'BlackBerries.png'){
	    vars.A1_alt = 'RedBerries.png'
	}
	if(vars.A1 == 'Feather.png'){
	    vars.A1_alt = 'Peacock.png'
	}
	if(vars.A1 == 'Flower.png'){
	    vars.A1_alt = 'Rose.png'
	}
	if(vars.A1 == 'Footprints.png'){
	    vars.A1_alt = 'BearFootprints.png'
	}
	if(vars.A1 == 'Log.png'){
	    vars.A1_alt = 'Stump.png'
	}
	if(vars.A1 == 'Mouse.png'){
	    vars.A1_alt = 'Hamster.png'
	}
	if(vars.A1 == 'Puddle.png'){
	    vars.A1_alt = 'Snowflakes.png'
	}
	
	
	if(vars.A3 == 'Acorn.png'){
	    vars.A3_alt = 'Chestnut.png'
	}
	if(vars.A3 == 'Beetle.png'){
	    vars.A3_alt = 'Ladybug.png'
	}
	if(vars.A3 == 'BlackBerries.png'){
	    vars.A3_alt = 'RedBerries.png'
	}
	if(vars.A3 == 'Feather.png'){
	    vars.A3_alt = 'Peacock.png'
	}
	if(vars.A3 == 'Flower.png'){
	    vars.A3_alt = 'Rose.png'
	}
	if(vars.A3 == 'Footprints.png'){
	    vars.A3_alt = 'BearFootprints.png'
	}
	if(vars.A3 == 'Log.png'){
	    vars.A3_alt = 'Stump.png'
	}
	if(vars.A3 == 'Mouse.png'){
	    vars.A3_alt = 'Hamster.png'
	}
	if(vars.A3 == 'Puddle.png'){
	    vars.A3_alt = 'Snowflakes.png'
	}
	
	
	
	
	if(vars.B1 == 'Acorn.png'){
	    vars.B1_alt = 'Chestnut.png'
	}
	if(vars.B1 == 'Beetle.png'){
	    vars.B1_alt = 'Ladybug.png'
	}
	if(vars.B1 == 'BlackBerries.png'){
	    vars.B1_alt = 'RedBerries.png'
	}
	if(vars.B1 == 'Feather.png'){
	    vars.B1_alt = 'Peacock.png'
	}
	if(vars.B1 == 'Flower.png'){
	    vars.B1_alt = 'Rose.png'
	}
	if(vars.B1 == 'Footprints.png'){
	    vars.B1_alt = 'BearFootprints.png'
	}
	if(vars.B1 == 'Log.png'){
	    vars.B1_alt = 'Stump.png'
	}
	if(vars.B1 == 'Mouse.png'){
	    vars.B1_alt = 'Hamster.png'
	}
	if(vars.B1 == 'Puddle.png'){
	    vars.B1_alt = 'Snowflakes.png'
	}
	
	
	if(vars.B3 == 'Acorn.png'){
	    vars.B3_alt = 'Chestnut.png'
	}
	if(vars.B3 == 'Beetle.png'){
	    vars.B3_alt = 'Ladybug.png'
	}
	if(vars.B3 == 'BlackBerries.png'){
	    vars.B3_alt = 'RedBerries.png'
	}
	if(vars.B3 == 'Feather.png'){
	    vars.B3_alt = 'Peacock.png'
	}
	if(vars.B3 == 'Flower.png'){
	    vars.B3_alt = 'Rose.png'
	}
	if(vars.B3 == 'Footprints.png'){
	    vars.B3_alt = 'BearFootprints.png'
	}
	if(vars.B3 == 'Log.png'){
	    vars.B3_alt = 'Stump.png'
	}
	if(vars.B3 == 'Mouse.png'){
	    vars.B3_alt = 'Hamster.png'
	}
	if(vars.B3 == 'Puddle.png'){
	    vars.B3_alt = 'Snowflakes.png'
	}
	
	if(vars.X1 == 'Acorn.png'){
	    vars.X1_alt = 'Chestnut.png'
	}
	if(vars.X1 == 'Beetle.png'){
	    vars.X1_alt = 'Ladybug.png'
	}
	if(vars.X1 == 'BlackBerries.png'){
	    vars.X1_alt = 'RedBerries.png'
	}
	if(vars.X1 == 'Feather.png'){
	    vars.X1_alt = 'Peacock.png'
	}
	if(vars.X1 == 'Flower.png'){
	    vars.X1_alt = 'Rose.png'
	}
	if(vars.X1 == 'Footprints.png'){
	    vars.X1_alt = 'BearFootprints.png'
	}
	if(vars.X1 == 'Log.png'){
	    vars.X1_alt = 'Stump.png'
	}
	if(vars.X1 == 'Mouse.png'){
	    vars.X1_alt = 'Hamster.png'
	}
	if(vars.X1 == 'Puddle.png'){
	    vars.X1_alt = 'Snowflakes.png'
	}
	
	
	if(vars.X3 == 'Acorn.png'){
	    vars.X3_alt = 'Chestnut.png'
	}
	if(vars.X3 == 'Beetle.png'){
	    vars.X3_alt = 'Ladybug.png'
	}
	if(vars.X3 == 'BlackBerries.png'){
	    vars.X3_alt = 'RedBerries.png'
	}
	if(vars.X3 == 'Feather.png'){
	    vars.X3_alt = 'Peacock.png'
	}
	if(vars.X3 == 'Flower.png'){
	    vars.X3_alt = 'Rose.png'
	}
	if(vars.X3 == 'Footprints.png'){
	    vars.X3_alt = 'BearFootprints.png'
	}
	if(vars.X3 == 'Log.png'){
	    vars.X3_alt = 'Stump.png'
	}
	if(vars.X3 == 'Mouse.png'){
	    vars.X3_alt = 'Hamster.png'
	}
	if(vars.X3 == 'Puddle.png'){
	    vars.X3_alt = 'Snowflakes.png'
	}
	__end__
	set _prepare ""

define sequence Cond000Sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run TrialInitializer000 always
	run Stim000 always
	run SetTimer000 always
	run Keyboard_loop000 always
	run Logging000 always
	run Logger always

define sequence Cond050Sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run TrialInitializer050 always
	run Stim050 always
	run SetTimer050 always
	run Keyboard_loop050 always
	run Logging050 always
	run Logger always

define sequence Cond100Sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run TrialInitializer100 always
	run Stim100 always
	run SetTimer100 always
	run Keyboard_loop100 always
	run Logging100 always
	run Logger always

define inline_javascript CurrentTime000
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.current_time = new Date().getTime();
	//how much time has passed?
	vars.time_passed = vars.current_time - vars.starting_time
	//update the timeout
	vars.var_timeout = 13000 - vars.time_passed
	//Make sure that the timeout cannot be negative
	if(vars.var_timeout <=0){
	    //change the variable keeping track
	    vars.timeout_occurred = "yes"
	}
	//console.log("var_timeout: " + vars.var_timeout)
	__end__
	set _prepare ""

define inline_javascript CurrentTime050
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.current_time = new Date().getTime();
	//how much time has passed?
	vars.time_passed = vars.current_time - vars.starting_time
	//update the timeout
	vars.var_timeout = 13000 - vars.time_passed
	//Make sure that the timeout cannot be negative
	if(vars.var_timeout <=0){
	    //change the variable keeping track
	    vars.timeout_occurred = "yes"
	}
	//console.log("var_timeout: " + vars.var_timeout)
	__end__
	set _prepare ""

define inline_javascript CurrentTime100
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
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	__end__
	set _prepare ""

define inline_javascript Initialization
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//We initialize all row and columns beginning and ending coordinates here.
	//These are chosen in this way because in the Python form these were the coordinates of each row and column and I liked the layout of that.
	vars.Row0_Start = -374
	vars.Row0_End = -296
	vars.Row1_Start = -295
	vars.Row1_End =-257
	vars.Row2_Start = -256
	vars.Row2_End = -218
	vars.Row3_Start = -217
	vars.Row3_End = -179
	vars.Row4_Start = -178
	vars.Row4_End = -140
	vars.Row5_Start = -139
	vars.Row5_End = -101
	vars.Row6_Start = -100
	vars.Row6_End = -62
	vars.Row7_Start = -61
	vars.Row7_End = -23
	vars.Row8_Start = -22
	vars.Row8_End = 16
	vars.Row9_Start = 17
	vars.Row9_End = 55
	vars.Row10_Start = 56
	vars.Row10_End = 94
	vars.Row11_Start = 95
	vars.Row11_End = 133
	vars.Row12_Start = 134
	vars.Row12_End = 172
	vars.Row13_Start = 173
	vars.Row13_End = 211
	vars.Row14_Start = 212
	vars.Row14_End = 250
	vars.Row15_Start = 251
	vars.Row15_End = 289
	vars.Row16_Start = 290
	vars.Row16_End = 328
	vars.Row17_Start = 329
	vars.Row17_End = 367
	
	vars.Col0_Start = -502
	vars.Col0_End = -292
	vars.Col1_Start = -291
	vars.Col1_End = -81
	vars.Col2_Start = -80
	vars.Col2_End = 130
	vars.Col3_Start = 131
	vars.Col3_End = 183
	vars.Col4_Start = 184
	vars.Col4_End = 289
	vars.Col5_Start = 290
	vars.Col5_End = 395
	vars.Col6_Start = 396
	vars.Col6_End = 501
	
	
	//PUT A FEW PIXELS BELOW ROW0 HERE, to palce text
	vars.Row0Test_Start = -350
	
	
	//There are 6 different conditions (3 block types that can be combined together in 6 ways)
	//This determines, based on participants number which order people get.
	
	if(vars.subject_nr%6 === 1){
	    vars.block1 = 0
	    vars.block2 = 1
	    vars.block3 = 2
	}
	if(vars.subject_nr%6 === 2){
	    vars.block1 = 0
	    vars.block2 = 2
	    vars.block3 = 1
	}
	if(vars.subject_nr%6 === 3){
	    vars.block1 = 1
	    vars.block2 = 0
	    vars.block3 = 2
	}
	if(vars.subject_nr%6 === 4){
	    vars.block1 = 1
	    vars.block2 = 2
	    vars.block3 = 0
	}
	if(vars.subject_nr%6 === 5){
	    vars.block1 = 2
	    vars.block2 = 1
	    vars.block3 = 0
	}
	else if(vars.subject_nr%6 === 0){
	    vars.block1 = 2
	    vars.block2 = 0
	    vars.block3 = 1
	}
	//console.log("block1 =" + vars.block1 + "type =" + typeof(vars.block1))
	//console.log("block2 =" + vars.block2)
	//console.log("block3 =" + vars.block3)
	
	//Now we want to shuffle the stimuli for participants
	//The first way to do this is by stim = pool.files(), however that will also include things such as Diamond.png and background.png, so we'd rather not have that
	//Therefore we put them in by hand for now:
	vars.stim = ['Acorn.png', 'Beetle.png', 'BlackBerries.png', 'Feather.png', 'Flower.png', 'Footprints.png', 'Log.png', 'Mouse.png', 'Puddle.png']
	
	//This is a shuffle function from Stackoverflow, because JavaScript does not have a .shuffle function or something like that 
	
	//STACKOVERFLOW https://stackoverflow.com/questions/2450954/how-to-randomize-shuffle-a-javascript-array
	function shuffle(array) {
	  var currentIndex = array.length, temporaryValue, randomIndex;
	
	  // While there remain elements to shuffle...
	  while (0 !== currentIndex) {
	
	    // Pick a remaining element...
	    randomIndex = Math.floor(Math.random() * currentIndex);
	    currentIndex -= 1;
	
	    // And swap it with the current element.
	    temporaryValue = array[currentIndex];
	    array[currentIndex] = array[randomIndex];
	    array[randomIndex] = temporaryValue;
	  }
	
	  return array;
	}
	////////////////
	
	//So now we shuffle and assign them to either A B or X and to either block 1 2 or 3
	shuffle(vars.stim)
	
	vars.A1 = vars.stim[0]
	vars.B1 = vars.stim[1]
	vars.X1 = vars.stim[2]
	vars.A2 = vars.stim[3]
	vars.B2 = vars.stim[4]
	vars.X2 = vars.stim[5]
	vars.A3 = vars.stim[6]
	vars.B3 = vars.stim[7]
	vars.X3 = vars.stim[8]
	vars.C = 'Toadstools.png'
	
	//These logs can be used to check what the stims are, how they are shuffled and what is put in each of the A's, B's and X's
	//console.log(vars.stim)
	//console.log(vars.A1 + vars.B1 + vars.X1 + vars.A2 + vars.B2 + vars.X2 + vars.A3 + vars.B3 + vars.X3)
	
	
	//Here we create an array of possible locations. The stimuli can only appear in column 0 and 2, so not in 1 in which the outcome is located.
	//Note that "column" and 'row' are artifacts left over from when this was created in a form, bascially I translated the columns and rows to coordinates such that they can be displayed on a sketchpad.
	vars.locations = [[vars.Col0_Start + 1,vars.Row0_Start], [vars.Col0_Start + 1,vars.Row1_Start], [vars.Col0_Start + 1,vars.Row2_Start], [vars.Col0_Start + 1,vars.Row3_Start], [vars.Col0_Start + 1,vars.Row4_Start], [vars.Col0_Start + 1,vars.Row5_Start], [vars.Col0_Start + 1,vars.Row6_Start], [vars.Col0_Start + 1,vars.Row7_Start], [vars.Col0_Start + 1,vars.Row8_Start], [vars.Col0_Start + 1,vars.Row9_Start], [vars.Col0_Start + 1,vars.Row10_Start], [vars.Col0_Start + 1,vars.Row11_Start], [vars.Col0_Start + 1,vars.Row12_Start], [vars.Col0_Start + 1,vars.Row13_Start], [vars.Col2_Start + 1,vars.Row0_Start], [vars.Col2_Start + 1,vars.Row1_Start], [vars.Col2_Start + 1,vars.Row2_Start], [vars.Col2_Start + 1,vars.Row3_Start], [vars.Col2_Start + 1,vars.Row4_Start], [vars.Col2_Start + 1,vars.Row5_Start], [vars.Col2_Start + 1,vars.Row6_Start], [vars.Col2_Start + 1,vars.Row7_Start], [vars.Col2_Start + 1,vars.Row8_Start], [vars.Col2_Start + 1,vars.Row9_Start], [vars.Col2_Start + 1,vars.Row10_Start], [vars.Col2_Start + 1,vars.Row11_Start], [vars.Col2_Start + 1,vars.Row12_Start], [vars.Col2_Start + 1,vars.Row13_Start]]
	
	//Here we have an array for responses. This is used to loop over R1, R2 and R3 in the selection of which box people want to type in their answer
	vars.responses = ["R1", "R2", "R3"]
	vars.testResponses = ["R1", "R2"]
	
	vars.Responses000 = []
	vars.Responses050 = []
	vars.Responses100 = []
	__end__
	set _prepare "//import Math"

define keyboard_response Keyboard000
	set timeout 13000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7;8;9;ENTER;RETURN;RIGHT;LEFT"

define keyboard_response Keyboard050
	set timeout 13000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7;8;9;ENTER;RETURN;RIGHT;LEFT"

define keyboard_response Keyboard100
	set timeout 13000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7;8;9;ENTER;RETURN;RIGHT;LEFT"

define inline_javascript KeyboardResponses000
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//With right and left we can cycle through the different boxes
	if(vars.response == 'right'){
	    vars.y += 1
	    vars.current = vars.testResponses[vars.y%2] //this loops over the 3 items in the loop,namely R1,R2 and R3
	}
	if(vars.response == 'left'){
	    if(vars.y == 0){ //otherwise it can go out of bounds if people press left too often
	        vars.current = vars.testResponses[vars.y%2]
	    }
	    else{
	        vars.y -= 1
	        vars.current = vars.testResponses[vars.y%2]
	    }
	}
	
	//If people put in a number, then put that number in whichever rating box was selected
	//had to put 10 here as otherwise it wouldnt work with 9 somehow
	if(vars.response in [1,2,3,4,5,6,7,8,9,10]){
	    if(vars.current === "R1"){
	        vars.responseR1 = vars.response
	    }
	    if(vars.current === "R2"){
	        vars.responseR2 = vars.response
	    }
	}
	
	//if someone pressed enter (or return, as it works on my keyboard)
	if(vars.response == 'enter'| vars.response == 'return'){
	    //and all of the responses are filled in, then the check will change to yes
	    if(vars.responseR1 != '' & vars.responseR2 != ''){
	        vars.check = 'yes'
	    }
	    //else set the reminder to yes, to make a bit of text appear that will say "hey fill in all 3 things first pls"
	    else{
	        vars.reminder = 'yes'
	    }
	}
	
	//console.log(vars.response)
	//console.log("R1:" + vars.responseR1)
	//console.log("R2:" + vars.responseR2)
	//console.log("R3:" + vars.responseR3)
	__end__
	set _prepare ""

define inline_javascript KeyboardResponses050
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//With right and left we can cycle through the different boxes
	if(vars.response == 'right'){
	    vars.y += 1
	    vars.current = vars.testResponses[vars.y%2] //this loops over the 3 items in the loop,namely R1,R2 and R3
	}
	if(vars.response == 'left'){
	    if(vars.y == 0){ //otherwise it can go out of bounds if people press left too often
	        vars.current = vars.testResponses[vars.y%2]
	    }
	    else{
	        vars.y -= 1
	        vars.current = vars.testResponses[vars.y%2]
	    }
	}
	
	//If people put in a number, then put that number in whichever rating box was selected
	//had to put 10 here as otherwise it wouldnt work with 9 somehow
	if(vars.response in [1,2,3,4,5,6,7,8,9,10]){
	    if(vars.current === "R1"){
	        vars.responseR1 = vars.response
	    }
	    if(vars.current === "R2"){
	        vars.responseR2 = vars.response
	    }
	}
	
	//if someone pressed enter (or return, as it works on my keyboard)
	if(vars.response == 'enter'| vars.response == 'return'){
	    //and all of the responses are filled in, then the check will change to yes
	    if(vars.responseR1 != '' & vars.responseR2 != ''){
	        vars.check = 'yes'
	    }
	    //else set the reminder to yes, to make a bit of text appear that will say "hey fill in all 3 things first pls"
	    else{
	        vars.reminder = 'yes'
	    }
	}
	
	//console.log(vars.response)
	//console.log("R1:" + vars.responseR1)
	//console.log("R2:" + vars.responseR2)
	//console.log("R3:" + vars.responseR3)
	__end__
	set _prepare ""

define inline_javascript KeyboardResponses100
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
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	__end__
	set _prepare ""

define loop Keyboard_loop000
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run Keyboard_sequence000

define loop Keyboard_loop050
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run Keyboard_sequence050

define loop Keyboard_loop100
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run Keyboard_sequence100

define sequence Keyboard_sequence000
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run CurrentTime000 always
	run Rating000 always
	run Keyboard000 always
	run KeyboardResponses000 always
	run Repeat_cycle000 always

define sequence Keyboard_sequence050
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run CurrentTime050 always
	run Rating050 always
	run Keyboard050 always
	run KeyboardResponses050 always
	run Repeat_cycle050 always

define sequence Keyboard_sequence100
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run CurrentTime100 always
	run Rating100 always
	run Keyboard100 always
	run KeyboardResponses100 always
	run Repeat_cycle100 always

define logger Logger
	set description "Logs experimental data"
	set auto_log yes

define inline_javascript Logging000
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//if nothing was filled in for either R1, R2 or R3 (because time ran out for example), then fill in 999 so we can identify and sort on that later
	if(vars.responseR1 == ''){
	    vars.responseR1 = 999
	}
	if(vars.responseR2 == ''){
	    vars.responseR2 = 999
	}
	__end__
	set _prepare ""

define inline_javascript Logging050
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//if nothing was filled in for either R1, R2 or R3 (because time ran out for example), then fill in 999 so we can identify and sort on that later
	if(vars.responseR1 == ''){
	    vars.responseR1 = 999
	}
	if(vars.responseR2 == ''){
	    vars.responseR2 = 999
	}
	__end__
	set _prepare ""

define inline_javascript Logging100
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//if nothing was filled in for either R1, R2 or R3 (because time ran out for example), then fill in 999 so we can identify and sort on that later
	if(vars.responseR1 == ''){
	    vars.responseR1 = 999
	}
	if(vars.responseR2 == ''){
	    vars.responseR2 = 999
	}
	__end__
	set _prepare ""

define feedback Outcome000
	set reset_variables yes
	set duration 1000
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0
	draw image center=0 file="[Outcome]" scale=0.8 show_if=always x="[Col1_Start]" y="[Row7_Start]" z_index=0

define feedback Outcome050
	set reset_variables yes
	set duration 1000
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0
	draw image center=0 file="[Outcome]" scale=0.8 show_if=always x="[Col1_Start]" y="[Row7_Start]" z_index=0

define feedback Outcome100
	set reset_variables yes
	set duration 1000
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0
	draw image center=0 file="[Outcome]" scale=0.8 show_if=always x="[Col1_Start]" y="[Row7_Start]" z_index=0

define inline_javascript PreviousResponses000
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//i am so so sorry future me
	
	//OKAY what I did here was. I cannot dynamically put everything on the sketchpad as with my form in Python. So to get around this problem in the easiest way (as I'd like to test after two months thanks) I created a for loop with differently named variables for EVERY TRIAL, such that all these variables can be displayed
	
	vars.j=1
	//console.log(vars.Responses000)
	if(vars.Trial == 2){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T1A = vars.Responses000[vars.j-1][0]
	        vars.T1B = vars.Responses000[vars.j-1][1]
	        vars.T1X = vars.Responses000[vars.j-1][2]
	        
	        if(vars.T1A == 999){
	            vars.T1A = 'X'
	        }
	        if(vars.T1B == 999){
	            vars.T1B = 'X'
	        }
	        if(vars.T1X == 999){
	            vars.T1X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 3){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T2A = vars.Responses000[vars.j-1][0]
	        vars.T2B = vars.Responses000[vars.j-1][1]
	        vars.T2X = vars.Responses000[vars.j-1][2]
	        
	        if(vars.T2A == 999){
	            vars.T2A = 'X'
	        }
	        if(vars.T2B == 999){
	            vars.T2B = 'X'
	        }
	        if(vars.T2X == 999){
	            vars.T2X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 4){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T3A = vars.Responses000[vars.j-1][0]
	        vars.T3B = vars.Responses000[vars.j-1][1]
	        vars.T3X = vars.Responses000[vars.j-1][2]
	        
	        if(vars.T3A == 999){
	            vars.T3A = 'X'
	        }
	        if(vars.T3B == 999){
	            vars.T3B = 'X'
	        }
	        if(vars.T3X == 999){
	            vars.T3X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 5){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T4A = vars.Responses000[vars.j-1][0]
	        vars.T4B = vars.Responses000[vars.j-1][1]
	        vars.T4X = vars.Responses000[vars.j-1][2]
	        
	        if(vars.T4A == 999){
	            vars.T4A = 'X'
	        }
	        if(vars.T4B == 999){
	            vars.T4B = 'X'
	        }
	        if(vars.T4X == 999){
	            vars.T4X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 6){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T5A = vars.Responses000[vars.j-1][0]
	        vars.T5B = vars.Responses000[vars.j-1][1]
	        vars.T5X = vars.Responses000[vars.j-1][2]
	        
	        if(vars.T5A == 999){
	            vars.T5A = 'X'
	        }
	        if(vars.T5B == 999){
	            vars.T5B = 'X'
	        }
	        if(vars.T5X == 999){
	            vars.T5X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 7){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T6A = vars.Responses000[vars.j-1][0]
	        vars.T6B = vars.Responses000[vars.j-1][1]
	        vars.T6X = vars.Responses000[vars.j-1][2]
	        
	        if(vars.T6A == 999){
	            vars.T6A = 'X'
	        }
	        if(vars.T6B == 999){
	            vars.T6B = 'X'
	        }
	        if(vars.T6X == 999){
	            vars.T6X = 'X'
	        }
	    }
	}
	if(vars.Trial == 8){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T7A = vars.Responses000[vars.j-1][0]
	        vars.T7B = vars.Responses000[vars.j-1][1]
	        vars.T7X = vars.Responses000[vars.j-1][2]
	        
	        if(vars.T7A == 999){
	            vars.T7A = 'X'
	        }
	        if(vars.T7B == 999){
	            vars.T7B = 'X'
	        }
	        if(vars.T7X == 999){
	            vars.T7X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 9){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T8A = vars.Responses000[vars.j-1][0]
	        vars.T8B = vars.Responses000[vars.j-1][1]
	        vars.T8X = vars.Responses000[vars.j-1][2]
	        
	        if(vars.T8A == 999){
	            vars.T8A = 'X'
	        }
	        if(vars.T8B == 999){
	            vars.T8B = 'X'
	        }
	        if(vars.T8X == 999){
	            vars.T8X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 10){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T9A = vars.Responses000[vars.j-1][0]
	        vars.T9B = vars.Responses000[vars.j-1][1]
	        vars.T9X = vars.Responses000[vars.j-1][2]
	        
	        if(vars.T9A == 999){
	            vars.T9A = 'X'
	        }
	        if(vars.T9B == 999){
	            vars.T9B = 'X'
	        }
	        if(vars.T9X == 999){
	            vars.T9X = 'X'
	        }
	    }
	}
	if(vars.Trial == 11){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T10A = vars.Responses000[vars.j-1][0]
	        vars.T10B = vars.Responses000[vars.j-1][1]
	        vars.T10X = vars.Responses000[vars.j-1][2]
	        
	        if(vars.T10A == 999){
	            vars.T10A = 'X'
	        }
	        if(vars.T10B == 999){
	            vars.T10B = 'X'
	        }
	        if(vars.T10X == 999){
	            vars.T10X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 12){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T11A = vars.Responses000[vars.j-1][0]
	        vars.T11B = vars.Responses000[vars.j-1][1]
	        vars.T11X = vars.Responses000[vars.j-1][2]
	        
	        if(vars.T11A == 999){
	            vars.T11A = 'X'
	        }
	        if(vars.T11B == 999){
	            vars.T11B = 'X'
	        }
	        if(vars.T11X == 999){
	            vars.T11X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 13){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T12A = vars.Responses000[vars.j-1][0]
	        vars.T12B = vars.Responses000[vars.j-1][1]
	        vars.T12X = vars.Responses000[vars.j-1][2]
	        
	        if(vars.T12A == 999){
	            vars.T12A = 'X'
	        }
	        if(vars.T12B == 999){
	            vars.T12B = 'X'
	        }
	        if(vars.T12X == 999){
	            vars.T12X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 14){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T13A = vars.Responses000[vars.j-1][0]
	        vars.T13B = vars.Responses000[vars.j-1][1]
	        vars.T13X = vars.Responses000[vars.j-1][2]
	        
	        if(vars.T13A == 999){
	            vars.T13A = 'X'
	        }
	        if(vars.T13B == 999){
	            vars.T13B = 'X'
	        }
	        if(vars.T13X == 999){
	            vars.T13X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 15){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T14A = vars.Responses000[vars.j-1][0]
	        vars.T14B = vars.Responses000[vars.j-1][1]
	        vars.T14X = vars.Responses000[vars.j-1][2]
	        
	        if(vars.T14A == 999){
	            vars.T14A = 'X'
	        }
	        if(vars.T14B == 999){
	            vars.T14B = 'X'
	        }
	        if(vars.T14X == 999){
	            vars.T14X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 16){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T15A = vars.Responses000[vars.j-1][0]
	        vars.T15B = vars.Responses000[vars.j-1][1]
	        vars.T15X = vars.Responses000[vars.j-1][2]
	        
	        if(vars.T15A == 999){
	            vars.T15A = 'X'
	        }
	        if(vars.T15B == 999){
	            vars.T15B = 'X'
	        }
	        if(vars.T15X == 999){
	            vars.T15X = 'X'
	        }
	    }
	}
	__end__
	set _prepare ""

define inline_javascript PreviousResponses050
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//i am so so sorry future me
	
	//OKAY what I did here was. I cannot dynamically put everything on the sketchpad as with my form in Python. So to get around this problem in the easiest way (as I'd like to test after two months thanks) I created a for loop with differently named variables for EVERY TRIAL, such that all these variables can be displayed
	
	vars.j=1
	//console.log(vars.Responses050)
	if(vars.Trial == 2){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T1A = vars.Responses050[vars.j-1][0]
	        vars.T1B = vars.Responses050[vars.j-1][1]
	        vars.T1X = vars.Responses050[vars.j-1][2]
	        
	        if(vars.T1A == 999){
	            vars.T1A = 'X'
	        }
	        if(vars.T1B == 999){
	            vars.T1B = 'X'
	        }
	        if(vars.T1X == 999){
	            vars.T1X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 3){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T2A = vars.Responses050[vars.j-1][0]
	        vars.T2B = vars.Responses050[vars.j-1][1]
	        vars.T2X = vars.Responses050[vars.j-1][2]
	        
	        if(vars.T2A == 999){
	            vars.T2A = 'X'
	        }
	        if(vars.T2B == 999){
	            vars.T2B = 'X'
	        }
	        if(vars.T2X == 999){
	            vars.T2X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 4){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T3A = vars.Responses050[vars.j-1][0]
	        vars.T3B = vars.Responses050[vars.j-1][1]
	        vars.T3X = vars.Responses050[vars.j-1][2]
	        
	        if(vars.T3A == 999){
	            vars.T3A = 'X'
	        }
	        if(vars.T3B == 999){
	            vars.T3B = 'X'
	        }
	        if(vars.T3X == 999){
	            vars.T3X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 5){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T4A = vars.Responses050[vars.j-1][0]
	        vars.T4B = vars.Responses050[vars.j-1][1]
	        vars.T4X = vars.Responses050[vars.j-1][2]
	        
	        if(vars.T4A == 999){
	            vars.T4A = 'X'
	        }
	        if(vars.T4B == 999){
	            vars.T4B = 'X'
	        }
	        if(vars.T4X == 999){
	            vars.T4X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 6){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T5A = vars.Responses050[vars.j-1][0]
	        vars.T5B = vars.Responses050[vars.j-1][1]
	        vars.T5X = vars.Responses050[vars.j-1][2]
	        
	        if(vars.T5A == 999){
	            vars.T5A = 'X'
	        }
	        if(vars.T5B == 999){
	            vars.T5B = 'X'
	        }
	        if(vars.T5X == 999){
	            vars.T5X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 7){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T6A = vars.Responses050[vars.j-1][0]
	        vars.T6B = vars.Responses050[vars.j-1][1]
	        vars.T6X = vars.Responses050[vars.j-1][2]
	        
	        if(vars.T6A == 999){
	            vars.T6A = 'X'
	        }
	        if(vars.T6B == 999){
	            vars.T6B = 'X'
	        }
	        if(vars.T6X == 999){
	            vars.T6X = 'X'
	        }
	    }
	}
	if(vars.Trial == 8){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T7A = vars.Responses050[vars.j-1][0]
	        vars.T7B = vars.Responses050[vars.j-1][1]
	        vars.T7X = vars.Responses050[vars.j-1][2]
	        
	        if(vars.T7A == 999){
	            vars.T7A = 'X'
	        }
	        if(vars.T7B == 999){
	            vars.T7B = 'X'
	        }
	        if(vars.T7X == 999){
	            vars.T7X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 9){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T8A = vars.Responses050[vars.j-1][0]
	        vars.T8B = vars.Responses050[vars.j-1][1]
	        vars.T8X = vars.Responses050[vars.j-1][2]
	        
	        if(vars.T8A == 999){
	            vars.T8A = 'X'
	        }
	        if(vars.T8B == 999){
	            vars.T8B = 'X'
	        }
	        if(vars.T8X == 999){
	            vars.T8X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 10){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T9A = vars.Responses050[vars.j-1][0]
	        vars.T9B = vars.Responses050[vars.j-1][1]
	        vars.T9X = vars.Responses050[vars.j-1][2]
	        
	        if(vars.T9A == 999){
	            vars.T9A = 'X'
	        }
	        if(vars.T9B == 999){
	            vars.T9B = 'X'
	        }
	        if(vars.T9X == 999){
	            vars.T9X = 'X'
	        }
	    }
	}
	if(vars.Trial == 11){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T10A = vars.Responses050[vars.j-1][0]
	        vars.T10B = vars.Responses050[vars.j-1][1]
	        vars.T10X = vars.Responses050[vars.j-1][2]
	        
	        if(vars.T10A == 999){
	            vars.T10A = 'X'
	        }
	        if(vars.T10B == 999){
	            vars.T10B = 'X'
	        }
	        if(vars.T10X == 999){
	            vars.T10X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 12){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T11A = vars.Responses050[vars.j-1][0]
	        vars.T11B = vars.Responses050[vars.j-1][1]
	        vars.T11X = vars.Responses050[vars.j-1][2]
	        
	        if(vars.T11A == 999){
	            vars.T11A = 'X'
	        }
	        if(vars.T11B == 999){
	            vars.T11B = 'X'
	        }
	        if(vars.T11X == 999){
	            vars.T11X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 13){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T12A = vars.Responses050[vars.j-1][0]
	        vars.T12B = vars.Responses050[vars.j-1][1]
	        vars.T12X = vars.Responses050[vars.j-1][2]
	        
	        if(vars.T12A == 999){
	            vars.T12A = 'X'
	        }
	        if(vars.T12B == 999){
	            vars.T12B = 'X'
	        }
	        if(vars.T12X == 999){
	            vars.T12X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 14){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T13A = vars.Responses050[vars.j-1][0]
	        vars.T13B = vars.Responses050[vars.j-1][1]
	        vars.T13X = vars.Responses050[vars.j-1][2]
	        
	        if(vars.T13A == 999){
	            vars.T13A = 'X'
	        }
	        if(vars.T13B == 999){
	            vars.T13B = 'X'
	        }
	        if(vars.T13X == 999){
	            vars.T13X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 15){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T14A = vars.Responses050[vars.j-1][0]
	        vars.T14B = vars.Responses050[vars.j-1][1]
	        vars.T14X = vars.Responses050[vars.j-1][2]
	        
	        if(vars.T14A == 999){
	            vars.T14A = 'X'
	        }
	        if(vars.T14B == 999){
	            vars.T14B = 'X'
	        }
	        if(vars.T14X == 999){
	            vars.T14X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 16){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T15A = vars.Responses050[vars.j-1][0]
	        vars.T15B = vars.Responses050[vars.j-1][1]
	        vars.T15X = vars.Responses050[vars.j-1][2]
	        
	        if(vars.T15A == 999){
	            vars.T15A = 'X'
	        }
	        if(vars.T15B == 999){
	            vars.T15B = 'X'
	        }
	        if(vars.T15X == 999){
	            vars.T15X = 'X'
	        }
	    }
	}
	__end__
	set _prepare ""

define inline_javascript PreviousResponses100
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//i am so so sorry future me
	
	//OKAY what I did here was. I cannot dynamically put everything on the sketchpad as with my form in Python. So to get around this problem in the easiest way (as I'd like to test after two months thanks) I created a for loop with differently named variables for EVERY TRIAL, such that all these variables can be displayed
	
	vars.j=1
	//console.log(vars.Responses100)
	if(vars.Trial == 2){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	       // console.log("vars.j" + vars.j)
	        vars.T1A = vars.Responses100[vars.j-1][0]
	        vars.T1B = vars.Responses100[vars.j-1][1]
	        vars.T1X = vars.Responses100[vars.j-1][2]
	        
	        if(vars.T1A == 999){
	            vars.T1A = 'X'
	        }
	        if(vars.T1B == 999){
	            vars.T1B = 'X'
	        }
	        if(vars.T1X == 999){
	            vars.T1X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 3){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	       // console.log("vars.j" + vars.j)
	        vars.T2A = vars.Responses100[vars.j-1][0]
	        vars.T2B = vars.Responses100[vars.j-1][1]
	        vars.T2X = vars.Responses100[vars.j-1][2]
	        
	        if(vars.T2A == 999){
	            vars.T2A = 'X'
	        }
	        if(vars.T2B == 999){
	            vars.T2B = 'X'
	        }
	        if(vars.T2X == 999){
	            vars.T2X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 4){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	       // console.log("vars.j" + vars.j)
	        vars.T3A = vars.Responses100[vars.j-1][0]
	        vars.T3B = vars.Responses100[vars.j-1][1]
	        vars.T3X = vars.Responses100[vars.j-1][2]
	        
	        if(vars.T3A == 999){
	            vars.T3A = 'X'
	        }
	        if(vars.T3B == 999){
	            vars.T3B = 'X'
	        }
	        if(vars.T3X == 999){
	            vars.T3X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 5){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	       // console.log("vars.j" + vars.j)
	        vars.T4A = vars.Responses100[vars.j-1][0]
	        vars.T4B = vars.Responses100[vars.j-1][1]
	        vars.T4X = vars.Responses100[vars.j-1][2]
	        
	        if(vars.T4A == 999){
	            vars.T4A = 'X'
	        }
	        if(vars.T4B == 999){
	            vars.T4B = 'X'
	        }
	        if(vars.T4X == 999){
	            vars.T4X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 6){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	       // console.log("vars.j" + vars.j)
	        vars.T5A = vars.Responses100[vars.j-1][0]
	        vars.T5B = vars.Responses100[vars.j-1][1]
	        vars.T5X = vars.Responses100[vars.j-1][2]
	        
	        if(vars.T5A == 999){
	            vars.T5A = 'X'
	        }
	        if(vars.T5B == 999){
	            vars.T5B = 'X'
	        }
	        if(vars.T5X == 999){
	            vars.T5X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 7){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	       // console.log("vars.j" + vars.j)
	        vars.T6A = vars.Responses100[vars.j-1][0]
	        vars.T6B = vars.Responses100[vars.j-1][1]
	        vars.T6X = vars.Responses100[vars.j-1][2]
	        
	        if(vars.T6A == 999){
	            vars.T6A = 'X'
	        }
	        if(vars.T6B == 999){
	            vars.T6B = 'X'
	        }
	        if(vars.T6X == 999){
	            vars.T6X = 'X'
	        }
	    }
	}
	if(vars.Trial == 8){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	       // console.log("vars.j" + vars.j)
	        vars.T7A = vars.Responses100[vars.j-1][0]
	        vars.T7B = vars.Responses100[vars.j-1][1]
	        vars.T7X = vars.Responses100[vars.j-1][2]
	        
	        if(vars.T7A == 999){
	            vars.T7A = 'X'
	        }
	        if(vars.T7B == 999){
	            vars.T7B = 'X'
	        }
	        if(vars.T7X == 999){
	            vars.T7X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 9){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	       // console.log("vars.j" + vars.j)
	        vars.T8A = vars.Responses100[vars.j-1][0]
	        vars.T8B = vars.Responses100[vars.j-1][1]
	        vars.T8X = vars.Responses100[vars.j-1][2]
	        
	        if(vars.T8A == 999){
	            vars.T8A = 'X'
	        }
	        if(vars.T8B == 999){
	            vars.T8B = 'X'
	        }
	        if(vars.T8X == 999){
	            vars.T8X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 10){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	       // console.log("vars.j" + vars.j)
	        vars.T9A = vars.Responses100[vars.j-1][0]
	        vars.T9B = vars.Responses100[vars.j-1][1]
	        vars.T9X = vars.Responses100[vars.j-1][2]
	        
	        if(vars.T9A == 999){
	            vars.T9A = 'X'
	        }
	        if(vars.T9B == 999){
	            vars.T9B = 'X'
	        }
	        if(vars.T9X == 999){
	            vars.T9X = 'X'
	        }
	    }
	}
	if(vars.Trial == 11){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	       // console.log("vars.j" + vars.j)
	        vars.T10A = vars.Responses100[vars.j-1][0]
	        vars.T10B = vars.Responses100[vars.j-1][1]
	        vars.T10X = vars.Responses100[vars.j-1][2]
	        
	        if(vars.T10A == 999){
	            vars.T10A = 'X'
	        }
	        if(vars.T10B == 999){
	            vars.T10B = 'X'
	        }
	        if(vars.T10X == 999){
	            vars.T10X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 12){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	       // console.log("vars.j" + vars.j)
	        vars.T11A = vars.Responses100[vars.j-1][0]
	        vars.T11B = vars.Responses100[vars.j-1][1]
	        vars.T11X = vars.Responses100[vars.j-1][2]
	        
	        if(vars.T11A == 999){
	            vars.T11A = 'X'
	        }
	        if(vars.T11B == 999){
	            vars.T11B = 'X'
	        }
	        if(vars.T11X == 999){
	            vars.T11X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 13){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T12A = vars.Responses100[vars.j-1][0]
	        vars.T12B = vars.Responses100[vars.j-1][1]
	        vars.T12X = vars.Responses100[vars.j-1][2]
	        
	        if(vars.T12A == 999){
	            vars.T12A = 'X'
	        }
	        if(vars.T12B == 999){
	            vars.T12B = 'X'
	        }
	        if(vars.T12X == 999){
	            vars.T12X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 14){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T13A = vars.Responses100[vars.j-1][0]
	        vars.T13B = vars.Responses100[vars.j-1][1]
	        vars.T13X = vars.Responses100[vars.j-1][2]
	        
	        if(vars.T13A == 999){
	            vars.T13A = 'X'
	        }
	        if(vars.T13B == 999){
	            vars.T13B = 'X'
	        }
	        if(vars.T13X == 999){
	            vars.T13X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 15){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T14A = vars.Responses100[vars.j-1][0]
	        vars.T14B = vars.Responses100[vars.j-1][1]
	        vars.T14X = vars.Responses100[vars.j-1][2]
	        
	        if(vars.T14A == 999){
	            vars.T14A = 'X'
	        }
	        if(vars.T14B == 999){
	            vars.T14B = 'X'
	        }
	        if(vars.T14X == 999){
	            vars.T14X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 16){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        //console.log("vars.j" + vars.j)
	        vars.T15A = vars.Responses100[vars.j-1][0]
	        vars.T15B = vars.Responses100[vars.j-1][1]
	        vars.T15X = vars.Responses100[vars.j-1][2]
	        
	        if(vars.T15A == 999){
	            vars.T15A = 'X'
	        }
	        if(vars.T15B == 999){
	            vars.T15B = 'X'
	        }
	        if(vars.T15X == 999){
	            vars.T15X = 'X'
	        }
	    }
	}
	__end__
	set _prepare ""

define feedback Rating000
	set reset_variables yes
	set duration 0
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.4 show_if=always x="[Col4_Start]" y="[Row8_Start]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.4 show_if=always x="[Col5_Start]" y="[Row8_Start]" z_index=0
	draw rect color="#f8f8ff" fill=1 h=32 penwidth=1 show_if=always w=50 x="[Col4_Start]" y="[Row10_Start]" z_index=0
	draw rect color="#f8f8ff" fill=1 h=32 penwidth=1 show_if=always w=50 x="[Col5_Start]" y="[Row10_Start]" z_index=0
	draw rect color="#00b300" fill=0 h=32 penwidth=1 show_if="[current]=R1" w=50 x="[Col4_Start]" y="[Row10_Start]" z_index=0
	draw rect color="#00b300" fill=0 h=32 penwidth=1 show_if="[current]=R2" w=50 x="[Col5_Start]" y="[Row10_Start]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[responseR1]" x="[Col4_Start]" y="[Row10_Start]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[responseR2]" x="[Col5_Start]" y="[Row10_Start]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=14 html=yes show_if="[reminder]=yes" text="Please fill in all scores first!" x="[Col4_Start]" y="[Row17_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="How likely will these objects lead to" x="[Col3_Start]" y="[Row0_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="the result in the picture below?" x="[Col3_Start]" y="[Row0Test_Start]" z_index=0
	draw image center=0 file="[Outcome]" scale=0.8 show_if=always x="[Col4_Start]" y="[Row2_Start]" z_index=0

define feedback Rating050
	set reset_variables yes
	set duration 0
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.4 show_if=always x="[Col4_Start]" y="[Row8_Start]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.4 show_if=always x="[Col5_Start]" y="[Row8_Start]" z_index=0
	draw rect color="#f8f8ff" fill=1 h=32 penwidth=1 show_if=always w=50 x="[Col4_Start]" y="[Row10_Start]" z_index=0
	draw rect color="#f8f8ff" fill=1 h=32 penwidth=1 show_if=always w=50 x="[Col5_Start]" y="[Row10_Start]" z_index=0
	draw rect color="#00b300" fill=0 h=32 penwidth=1 show_if="[current]=R1" w=50 x="[Col4_Start]" y="[Row10_Start]" z_index=0
	draw rect color="#00b300" fill=0 h=32 penwidth=1 show_if="[current]=R2" w=50 x="[Col5_Start]" y="[Row10_Start]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[responseR1]" x="[Col4_Start]" y="[Row10_Start]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[responseR2]" x="[Col5_Start]" y="[Row10_Start]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=14 html=yes show_if="[reminder]=yes" text="Please fill in all scores first!" x="[Col4_Start]" y="[Row17_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="How likely will these objects lead to" x="[Col3_Start]" y="[Row0_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="the result in the picture below?" x="[Col3_Start]" y="[Row0Test_Start]" z_index=0
	draw image center=0 file="[Outcome]" scale=0.8 show_if=always x="[Col4_Start]" y="[Row2_Start]" z_index=0

define feedback Rating100
	set reset_variables yes
	set duration 0
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.4 show_if=always x="[Col4_Start]" y="[Row8_Start]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.4 show_if=always x="[Col5_Start]" y="[Row8_Start]" z_index=0
	draw rect color="#f8f8ff" fill=1 h=32 penwidth=1 show_if=always w=50 x="[Col4_Start]" y="[Row10_Start]" z_index=0
	draw rect color="#f8f8ff" fill=1 h=32 penwidth=1 show_if=always w=50 x="[Col5_Start]" y="[Row10_Start]" z_index=0
	draw rect color="#00b300" fill=0 h=32 penwidth=1 show_if="[current]=R1" w=50 x="[Col4_Start]" y="[Row10_Start]" z_index=0
	draw rect color="#00b300" fill=0 h=32 penwidth=1 show_if="[current]=R2" w=50 x="[Col5_Start]" y="[Row10_Start]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[responseR1]" x="[Col4_Start]" y="[Row10_Start]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[responseR2]" x="[Col5_Start]" y="[Row10_Start]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=14 html=yes show_if="[reminder]=yes" text="Please fill in all scores first!" x="[Col4_Start]" y="[Row17_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="How likely will these objects lead to" x="[Col3_Start]" y="[Row0_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="the result in the picture below?" x="[Col3_Start]" y="[Row0Test_Start]" z_index=0
	draw image center=0 file="[Outcome]" scale=0.8 show_if=always x="[Col4_Start]" y="[Row2_Start]" z_index=0

define repeat_cycle Repeat_cycle000
	set description "Optionally repeat a cycle from a loop"
	set condition "[check] == no and [timeout_occurred] == no"

define repeat_cycle Repeat_cycle050
	set description "Optionally repeat a cycle from a loop"
	set condition "[check] == no and [timeout_occurred] == no"

define repeat_cycle Repeat_cycle100
	set description "Optionally repeat a cycle from a loop"
	set condition "[check] == no and [timeout_occurred] == no"

define inline_javascript SetTimer000
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//create a timeout variable, and this makes sure it resets every trial
	vars.var_timeout = 13000
	//the current time stamp before starting the click loop
	vars.starting_time = new Date().getTime();
	//create a variable that checks if a timeout occured
	vars.timeout_occurred = "no"
	__end__
	set _prepare ""

define inline_javascript SetTimer050
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//create a timeout variable, and this makes sure it resets every trial
	vars.var_timeout = 13000
	//the current time stamp before starting the click loop
	vars.starting_time = new Date().getTime();
	//create a variable that checks if a timeout occured
	vars.timeout_occurred = "no"
	__end__
	set _prepare ""

define inline_javascript SetTimer100
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//create a timeout variable, and this makes sure it resets every trial
	vars.var_timeout = 13000
	//the current time stamp before starting the click loop
	vars.starting_time = new Date().getTime();
	//create a variable that checks if a timeout occured
	vars.timeout_occurred = "no"
	__end__
	set _prepare ""

define feedback Stim000
	set reset_variables yes
	set duration 2000
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0

define feedback Stim050
	set reset_variables yes
	set duration 2000
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0

define feedback Stim100
	set reset_variables yes
	set duration 2000
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0

define notepad TODOs
	__note__
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define loop Test_Part1
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Outcome "Diamond.png"
	setcycle 0 Stim1 "[A1]"
	setcycle 0 Stim2 "[X1]"
	setcycle 0 Trial 1
	setcycle 1 Outcome "Fossil.png"
	setcycle 1 Stim1 "[A1]"
	setcycle 1 Stim2 "[X1]"
	setcycle 1 Trial 2
	setcycle 2 Outcome "Diamond.png"
	setcycle 2 Stim1 "[B1]"
	setcycle 2 Stim2 "[X1]"
	setcycle 2 Trial 3
	setcycle 3 Outcome "Fossil.png"
	setcycle 3 Stim1 "[B1]"
	setcycle 3 Stim2 "[X1]"
	setcycle 3 Trial 4
	setcycle 4 Outcome "Diamond.png"
	setcycle 4 Stim1 "[C]"
	setcycle 4 Stim2 "[X1]"
	setcycle 4 Trial 5
	setcycle 5 Outcome "Fossil.png"
	setcycle 5 Stim1 "[C]"
	setcycle 5 Stim2 "[X1]"
	setcycle 5 Trial 6
	setcycle 6 Outcome "Diamond.png"
	setcycle 6 Stim1 "[A3]"
	setcycle 6 Stim2 "[X3]"
	setcycle 6 Trial 7
	setcycle 7 Outcome "Fossil.png"
	setcycle 7 Stim1 "[A3]"
	setcycle 7 Stim2 "[X3]"
	setcycle 7 Trial 8
	setcycle 8 Outcome "Diamond.png"
	setcycle 8 Stim1 "[B3]"
	setcycle 8 Stim2 "[X3]"
	setcycle 8 Trial 9
	setcycle 9 Outcome "Fossil.png"
	setcycle 9 Stim1 "[B3]"
	setcycle 9 Stim2 "[X3]"
	setcycle 9 Trial 10
	run Cond000Sequence

define loop Test_Part2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Outcome "Diamond.png"
	setcycle 0 Stim1 "[A1]"
	setcycle 0 Stim2 "[X1]"
	setcycle 0 Trial 1
	setcycle 1 Outcome "Fossil.png"
	setcycle 1 Stim1 "[A1]"
	setcycle 1 Stim2 "[X1]"
	setcycle 1 Trial 2
	setcycle 2 Outcome "Diamond.png"
	setcycle 2 Stim1 "[B1]"
	setcycle 2 Stim2 "[X1]"
	setcycle 2 Trial 3
	setcycle 3 Outcome "Fossil.png"
	setcycle 3 Stim1 "[B1]"
	setcycle 3 Stim2 "[X1]"
	setcycle 3 Trial 4
	setcycle 4 Outcome "Diamond.png"
	setcycle 4 Stim1 "[C]"
	setcycle 4 Stim2 "[X1]"
	setcycle 4 Trial 5
	setcycle 5 Outcome "Fossil.png"
	setcycle 5 Stim1 "[C]"
	setcycle 5 Stim2 "[X1]"
	setcycle 5 Trial 6
	setcycle 6 Outcome "Diamond.png"
	setcycle 6 Stim1 "[A3]"
	setcycle 6 Stim2 "[X3]"
	setcycle 6 Trial 7
	setcycle 7 Outcome "Fossil.png"
	setcycle 7 Stim1 "[A3]"
	setcycle 7 Stim2 "[X3]"
	setcycle 7 Trial 8
	setcycle 8 Outcome "Diamond.png"
	setcycle 8 Stim1 "[B3]"
	setcycle 8 Stim2 "[X3]"
	setcycle 8 Trial 9
	setcycle 9 Outcome "Fossil.png"
	setcycle 9 Stim1 "[B3]"
	setcycle 9 Stim2 "[X3]"
	setcycle 9 Trial 10
	run Cond050Sequence

define loop Test_Part3
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 15
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Outcome "Diamond.png"
	setcycle 0 Stim1 "[A1_alt]"
	setcycle 0 Stim2 "[X1_alt]"
	setcycle 0 Trial 1
	setcycle 1 Outcome "Fossil.png"
	setcycle 1 Stim1 "[A1_alt]"
	setcycle 1 Stim2 "[X1_alt]"
	setcycle 1 Trial 2
	setcycle 2 Outcome "NoDiamond.png"
	setcycle 2 Stim1 "[A1_alt]"
	setcycle 2 Stim2 "[X1_alt]"
	setcycle 2 Trial 3
	setcycle 3 Outcome "Diamond.png"
	setcycle 3 Stim1 "[B1_alt]"
	setcycle 3 Stim2 "[X1_alt]"
	setcycle 3 Trial 4
	setcycle 4 Outcome "Fossil.png"
	setcycle 4 Stim1 "[B1_alt]"
	setcycle 4 Stim2 "[X1_alt]"
	setcycle 4 Trial 5
	setcycle 5 Outcome "NoDiamond.png"
	setcycle 5 Stim1 "[B1_alt]"
	setcycle 5 Stim2 "[X1_alt]"
	setcycle 5 Trial 6
	setcycle 6 Outcome "Diamond.png"
	setcycle 6 Stim1 "[C_alt]"
	setcycle 6 Stim2 "[X1_alt]"
	setcycle 6 Trial 7
	setcycle 7 Outcome "Fossil.png"
	setcycle 7 Stim1 "[C_alt]"
	setcycle 7 Stim2 "[X1_alt]"
	setcycle 7 Trial 8
	setcycle 8 Outcome "NoDiamond.png"
	setcycle 8 Stim1 "[C_alt]"
	setcycle 8 Stim2 "[X1_alt]"
	setcycle 8 Trial 9
	setcycle 9 Outcome "Diamond.png"
	setcycle 9 Stim1 "[A3_alt]"
	setcycle 9 Stim2 "[X3_alt]"
	setcycle 9 Trial 10
	setcycle 10 Outcome "Fossil.png"
	setcycle 10 Stim1 "[A3_alt]"
	setcycle 10 Stim2 "[X3_alt]"
	setcycle 10 Trial 11
	setcycle 11 Outcome "NoDiamond.png"
	setcycle 11 Stim1 "[A3_alt]"
	setcycle 11 Stim2 "[X3_alt]"
	setcycle 11 Trial 12
	setcycle 12 Outcome "Diamond.png"
	setcycle 12 Stim1 "[B3_alt]"
	setcycle 12 Stim2 "[X3_alt]"
	setcycle 12 Trial 13
	setcycle 13 Outcome "Fossil.png"
	setcycle 13 Stim1 "[B3_alt]"
	setcycle 13 Stim2 "[X3_alt]"
	setcycle 13 Trial 14
	setcycle 14 Outcome "NoDiamond.png"
	setcycle 14 Stim1 "[B3_alt]"
	setcycle 14 Stim2 "[X3_alt]"
	setcycle 14 Trial 15
	run Cond100Sequence

define loop Test_phase
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column Test
	run main_sequence

define inline_javascript TrialInitializer000
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	//This next bit randomized the location in which the stimuli appear
	
	//From locations, pick a random item (list), then put the first item of this list as x and the second as y
	vars.pos1 = vars.locations[Math.floor(Math.random() * vars.locations.length)]
	vars.pos1X = vars.pos1[0]
	vars.pos1Y = vars.pos1[1]
	
	vars.temp = []
	
	//create an array that has all the points in it that are not in the same column as the previous stimuli
	vars.i = 0
	for(vars.i = 0; vars.i<vars.locations.length;vars.i++){
	    if(vars.locations[vars.i][0] != vars.pos1X){
	        vars.temp.push(vars.locations[vars.i])}
	}
	
	//then pick a random one again
	vars.pos2 = vars.temp[Math.floor(Math.random()*vars.temp.length)]
	vars.pos2X = vars.pos2[0]
	vars.pos2Y = vars.pos2[1]
	
	//Set in place a .check, to check if all two values are filled in later on
	//a .reminder to indicate whether people clicked on enter too soon
	//a .current to indicate which textbox is selected/highlighted
	//and a .y which will be the indicator of which text box is selected (currently - so vars.responses[0])
	vars.check = 'no'
	vars.reminder = 'no'
	vars.current = vars.testResponses[0]
	vars.y = 0
	
	//Then we have the default input for the response for responses 1,2 and 3
	vars.responseR1 = ''
	vars.responseR2 = ''
	__end__

define inline_javascript TrialInitializer050
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	//This next bit randomized the location in which the stimuli appear
	
	//From locations, pick a random item (list), then put the first item of this list as x and the second as y
	vars.pos1 = vars.locations[Math.floor(Math.random() * vars.locations.length)]
	vars.pos1X = vars.pos1[0]
	vars.pos1Y = vars.pos1[1]
	
	vars.temp = []
	
	//create an array that has all the points in it that are not in the same column as the previous stimuli
	vars.i = 0
	for(vars.i = 0; vars.i<vars.locations.length;vars.i++){
	    if(vars.locations[vars.i][0] != vars.pos1X){
	        vars.temp.push(vars.locations[vars.i])}
	}
	
	//then pick a random one again
	vars.pos2 = vars.temp[Math.floor(Math.random()*vars.temp.length)]
	vars.pos2X = vars.pos2[0]
	vars.pos2Y = vars.pos2[1]
	
	//Set in place a .check, to check if all values are filled in later on
	//a .reminder to indicate whether people clicked on enter too soon
	//a .current to indicate which textbox is selected/highlighted
	//and a .y which will be the indicator of which text box is selected (currently - so vars.responses[0])
	vars.check = 'no'
	vars.reminder = 'no'
	vars.current = vars.testResponses[0]
	vars.y = 0
	
	//Then we have the default input for the response for responses 1,2 and 3
	vars.responseR1 = ''
	vars.responseR2 = ''
	__end__

define inline_javascript TrialInitializer100
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	//This next bit randomized the location in which the stimuli appear
	
	//From locations, pick a random item (list), then put the first item of this list as x and the second as y
	vars.pos1 = vars.locations[Math.floor(Math.random() * vars.locations.length)]
	vars.pos1X = vars.pos1[0]
	vars.pos1Y = vars.pos1[1]
	
	vars.temp = []
	
	//create an array that has all the points in it that are not in the same column as the previous stimuli
	vars.i = 0
	for(vars.i = 0; vars.i<vars.locations.length;vars.i++){
	    if(vars.locations[vars.i][0] != vars.pos1X){
	        vars.temp.push(vars.locations[vars.i])}
	}
	
	//then pick a random one again
	vars.pos2 = vars.temp[Math.floor(Math.random()*vars.temp.length)]
	vars.pos2X = vars.pos2[0]
	vars.pos2Y = vars.pos2[1]
	
	//Set in place a .check, to check if all three values are filled in later on
	//a .reminder to indicate whether people clicked on enter too soon
	//a .current to indicate which textbox is selected/highlighted
	//and a .y which will be the indicator of which text box is selected (currently - so vars.responses[0])
	vars.check = 'no'
	vars.reminder = 'no'
	vars.current = vars.testResponses[0]
	vars.y = 0
	
	//Then we have the default input for the response for responses 1,2 and 3
	vars.responseR1 = ''
	vars.responseR2 = ''
	__end__

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Initialization always
	run Alternative_stimuli always
	run Test_phase always

define sequence main_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Test_Part1 always
	run Test_Part2 always
	run Test_Part3 always

define feedback new_feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"

define form_consent new_form_consent
	set timeout infinite
	set spacing 10
	set rows "1;4;1;1"
	set only_render no
	set margins "50;50;50;50"
	set form_title "Consent form"
	__form_text__
	In this study we aim to investigate how people assign causes to events. The experiment takes approximately 15 to 20 minutes. You will see images of objects on screen and rate on a scale from 1 to 9 on your keyboard the causal relation between them. 
	The data obtained during this study will be stored and processed anonymously and therefore we will not be able to trace back your data or remove your data after submission. The data will only be used for scientific research and not for other purposes.
	There are no foreseeable risks or discomfort as a result of your taking part in this experiment, and you are free to withdraw your participation at any time during the experiment. 
	Upon completion of your participation in this study, you will be provided with a brief explanation of the question that this study addresses.
	
	Please contact Sanne for questions about the experiment ( s.poelstra.1@student.rug.nl ). Any complaints concerning this study can be directed to the Research Ethical Review Committee (CETO) of the University of Groningen ( ceto@rug.nl ) . This research project is carried out under supervision of Dr. Jessie Nixon (University of Tübingen, Germany) and Dr. Jacolien van Rij (University of Groningen, The Netherlands).
	By clicking the checkbox below you agree with the following statements:
	· My participation in this experiment is voluntary. I understand that I can stop at any time without giving reasons.
	· I consent that my data will be used for scientific research.
	__end__
	set description "A simple consent form"
	set decline_text "Do not participate"
	set decline_message "You need to accept the consent form to participate"
	set cols "2;2"
	set checkbox_text "I have read and understood the information above"
	set accept_text "Participate!"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 2 1 checkbox text="[checkbox_text]" var=checkbox_status
	widget 0 3 1 1 button text="[accept_text]" var=accept_status
	widget 1 3 1 1 button text="[decline_text]"


