---
API: 2.1
OpenSesame: 3.3.7
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground "#000000"
set font_underline no
set font_size 16
set font_italic no
set font_family sans
set font_bold no
set experiment_path "C:/Users/Sanne/Dropbox/MasterProject/Experiments/JavaScript"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#cecece"

define form_consent AConsentform
	set timeout infinite
	set spacing 10
	set rows "1;4;1;1"
	set only_render no
	set margins "50;50;50;50"
	set form_title "Consent form"
	__form_text__
	In this study we aim to investigate how people assign causes to events. The experiment takes approximately 15 to 20 minutes. You will see images of objects on screen and rate on a scale from 0 to 8 on your keyboard the causal relation between them. 
	The data obtained during this study will be stored and processed anonymously and therefore we will not be able to trace back your data or remove your data after submission. The data will only be used for scientific research and not for other purposes.
	There are no foreseeable risks or discomfort as a result of your taking part in this experiment, and you are free to withdraw your participation at any time during the experiment. 
	Upon completion of your participation in this study, you will be provided with a brief explanation of the question that this study addresses.
	
	Please contact Sanne for questions about the experiment ( s.poelstra.1@student.rug.nl ). Any complaints concerning this study can be directed to the Research Ethical Review Committee (CETO) of the University of Groningen ( ceto@rug.nl ) . This research project is carried out under supervision of Dr. Jessie Nixon (University of Tübingen, Germany) and Dr. Jacolien van Rij (University of Groningen, The Netherlands).
	By clicking the checkbox below you agree with the following statements:
	· My participation in this experiment is voluntary. I understand that I can stop at any time without giving reasons.
	· I consent that my data will be used for scientific research.
	__end__
	set description "A simple consent form"
	set decline_text "Do not participate"
	set decline_message "You need to accept the consent form to participate"
	set cols "2;2"
	set checkbox_text "I have read and understood the information above"
	set accept_text "Participate!"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 2 1 checkbox text="[checkbox_text]" var=checkbox_status
	widget 0 3 1 1 button text="[accept_text]" var=accept_status
	widget 1 3 1 1 button text="[decline_text]"


define loop Click_loop000
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run Click_sequence000

define loop Click_loop000_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run Click_sequence000_1

define loop Click_loop050
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run Click_sequence050

define sequence Click_sequence000
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run PreviousResponses always
	run Rating000 always
	run Keyboard000 always
	run KeyboardResponses000 always
	run Repeat_cycle000 always

define sequence Click_sequence000_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Mouse000_1 always
	run RegionOfInterest000_1 always
	run Repeat_cycle000_1 always

define sequence Click_sequence050
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Rating050 always
	run Mouse050 always
	run RegionOfInterest050 always
	run Repeat_cycle050 always

define sequence Cond000Sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Randomizer000 always
	run Stim000 always
	run Outcome000 always
	run Click_loop000 always
	run new_logger_1 always

define sequence Cond050Sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Randomizer050 always
	run Stim050 always
	run Outcome050 always
	run Click_loop050 always
	run new_logger_1 always

define sequence Cond100Sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Randomizer100 always
	run Stim100 always
	run Outcome100 always
	run Rating100 always

define sequence Coordinate_Sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Initialization always
	run Training_phase always

define loop Coordinate_loops
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "This loop is for creating global variables of the coordinates"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Row0_Start -374
	setcycle 0 Row0_End -296
	setcycle 0 Row1_Start -295
	setcycle 0 Row1_End -257
	setcycle 0 Row2_Start -256
	setcycle 0 Row2_End -218
	setcycle 0 Row3_Start -217
	setcycle 0 Row3_End -179
	setcycle 0 Row4_Start -178
	setcycle 0 Row4_End -140
	setcycle 0 Row5_Start -139
	setcycle 0 Row5_End -101
	setcycle 0 Row6_Start -100
	setcycle 0 Row6_End -62
	setcycle 0 Row7_Start -61
	setcycle 0 Row7_End -23
	setcycle 0 Row8_Start -22
	setcycle 0 Row8_End 16
	setcycle 0 Row9_Start 17
	setcycle 0 Row9_End 55
	setcycle 0 Row10_Start 56
	setcycle 0 Row10_End 94
	setcycle 0 Row11_Start 95
	setcycle 0 Row11_End 133
	setcycle 0 Row12_Start 134
	setcycle 0 Row12_End 172
	setcycle 0 Row13_Start 173
	setcycle 0 Row13_End 211
	setcycle 0 Row14_Start 212
	setcycle 0 Row14_End 250
	setcycle 0 Row15_Start 251
	setcycle 0 Row15_End 289
	setcycle 0 Row16_Start 290
	setcycle 0 Row16_End 328
	setcycle 0 Row17_Start 329
	setcycle 0 Row17_End 367
	setcycle 0 Col0_Start -502
	setcycle 0 Col0_End -292
	setcycle 0 Col1_Start -291
	setcycle 0 Col1_End -81
	setcycle 0 Col2_Start -80
	setcycle 0 Col2_End 130
	setcycle 0 Col3_Start 131
	setcycle 0 Col3_End 183
	setcycle 0 Col4_Start 184
	setcycle 0 Col4_End 289
	setcycle 0 Col5_Start 290
	setcycle 0 Col5_End 395
	setcycle 0 Col6_Start 396
	setcycle 0 Col6_End 501
	setcycle 0 Next_x 425
	setcycle 0 Next_y 346
	run Coordinate_Sequence

define inline_javascript Initialization
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//There are 6 different conditions (3 block types that can be combined together in 6 ways)
	//This determines, based on participants number which order people get.
	//vars.counterbalancing = [[2,0,1], [0,1,2], [0,2,1], [1,0,2], [1,2,0], [2,1,0]]
	//vars.block1, vars.block2, vars.block2=vars.counterbalancing[vars.subject_nr%6]
	//Not sure how to do this method in JavaScript so therefore reverted back to the Old ways
	
	if(vars.subject_nr%6 === 1){
	    vars.block1 = 0
	    vars.block2 = 1
	    vars.block3 = 2
	}
	if(vars.subject_nr%6 === 2){
	    vars.block1 = 0
	    vars.block2 = 2
	    vars.block3 = 1
	}
	if(vars.subject_nr%6 === 3){
	    vars.block1 = 1
	    vars.block2 = 0
	    vars.block3 = 2
	}
	if(vars.subject_nr%6 === 4){
	    vars.block1 = 1
	    vars.block2 = 2
	    vars.block3 = 0
	}
	if(vars.subject_nr%6 === 5){
	    vars.block1 = 2
	    vars.block2 = 1
	    vars.block3 = 0
	}
	else if(vars.subject_nr%6 === 0){
	    vars.block1 = 2
	    vars.block2 = 0
	    vars.block3 = 1
	}
	
	//Now we want to shuffle the stimuli for participants
	//The first way to do this is by stim = pool.files(), however that will also include things such as Diamond.png and background.png, so we'd rather not have that
	//Therefore we put them in by hand for now:
	vars.stim = ['Acorn.png', 'Beetle.png', 'BlackBerries.png', 'Feather.png', 'Flower.png', 'Footprints.png', 'Log.png', 'Mouse.png', 'Puddle.png']
	
	
	//STACKOVERFLOW https://stackoverflow.com/questions/2450954/how-to-randomize-shuffle-a-javascript-array
	function shuffle(array) {
	  var currentIndex = array.length, temporaryValue, randomIndex;
	
	  // While there remain elements to shuffle...
	  while (0 !== currentIndex) {
	
	    // Pick a remaining element...
	    randomIndex = Math.floor(Math.random() * currentIndex);
	    currentIndex -= 1;
	
	    // And swap it with the current element.
	    temporaryValue = array[currentIndex];
	    array[currentIndex] = array[randomIndex];
	    array[randomIndex] = temporaryValue;
	  }
	
	  return array;
	}
	
	//random.shuffle(stim) #shuffle them
	//Assign them to either A B or X and to either block 1 2 or 3
	shuffle(vars.stim)
	
	vars.A1 = vars.stim[0]
	vars.B1 = vars.stim[1]
	vars.X1 = vars.stim[2]
	vars.A2 = vars.stim[3]
	vars.B2 = vars.stim[4]
	vars.X2 = vars.stim[5]
	vars.A3 = vars.stim[6]
	vars.B3 = vars.stim[7]
	vars.X3 = vars.stim[8]
	
	//vars.A1, vars.B1, vars.X1, vars.A2, vars.B2, vars.X2, vars.A3, vars.B3, vars.X3 = stim
	console.log(vars.stim)
	console.log(vars.A1 + vars.B1 + vars.X1 + vars.A2 + vars.B2 + vars.X2 + vars.A3 + vars.B3 + vars.X3)
	
	//Here we create an array of possible locations. The stimuli can only appear in column 0 and 2, so not in 1 in which the outcome is located.
	//Note that "column" and 'row' are artifacts left over from when this was created in a form, bascially I translated the columns and rows to coordinates such that they can be displayed on a sketchpad.
	vars.locations = [[vars.Col0_Start + 1,vars.Row0_Start], [vars.Col0_Start + 1,vars.Row1_Start], [vars.Col0_Start + 1,vars.Row2_Start], [vars.Col0_Start + 1,vars.Row3_Start], [vars.Col0_Start + 1,vars.Row4_Start], [vars.Col0_Start + 1,vars.Row5_Start], [vars.Col0_Start + 1,vars.Row6_Start], [vars.Col0_Start + 1,vars.Row7_Start], [vars.Col0_Start + 1,vars.Row8_Start], [vars.Col0_Start + 1,vars.Row9_Start], [vars.Col0_Start + 1,vars.Row10_Start], [vars.Col0_Start + 1,vars.Row11_Start], [vars.Col0_Start + 1,vars.Row12_Start], [vars.Col0_Start + 1,vars.Row13_Start], [vars.Col2_Start + 1,vars.Row0_Start], [vars.Col2_Start + 1,vars.Row1_Start], [vars.Col2_Start + 1,vars.Row2_Start], [vars.Col2_Start + 1,vars.Row3_Start], [vars.Col2_Start + 1,vars.Row4_Start], [vars.Col2_Start + 1,vars.Row5_Start], [vars.Col2_Start + 1,vars.Row6_Start], [vars.Col2_Start + 1,vars.Row7_Start], [vars.Col2_Start + 1,vars.Row8_Start], [vars.Col2_Start + 1,vars.Row9_Start], [vars.Col2_Start + 1,vars.Row10_Start], [vars.Col2_Start + 1,vars.Row11_Start], [vars.Col2_Start + 1,vars.Row12_Start], [vars.Col2_Start + 1,vars.Row13_Start]]
	__end__
	set _prepare "//import Math"

define inline_javascript Initialization_1
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.Row0_Start = -374
	vars.Row0_End = -296
	vars.Row1_Start = -295
	vars.Row1_End =-257
	vars.Row2_Start = -256
	vars.Row2_End = -218
	vars.Row3_Start = -217
	vars.Row3_End = -179
	vars.Row4_Start = -178
	vars.Row4_End = -140
	vars.Row5_Start = -139
	vars.Row5_End = -101
	vars.Row6_Start = -100
	vars.Row6_End = -62
	vars.Row7_Start = -61
	vars.Row7_End = -23
	vars.Row8_Start = -22
	vars.Row8_End = 16
	vars.Row9_Start = 17
	vars.Row9_End = 55
	vars.Row10_Start = 56
	vars.Row10_End = 94
	vars.Row11_Start = 95
	vars.Row11_End = 133
	vars.Row12_Start = 134
	vars.Row12_End = 172
	vars.Row13_Start = 173
	vars.Row13_End = 211
	vars.Row14_Start = 212
	vars.Row14_End = 250
	vars.Row15_Start = 251
	vars.Row15_End = 289
	vars.Row16_Start = 290
	vars.Row16_End = 328
	vars.Row17_Start = 329
	vars.Row17_End = 367
	
	vars.Col0_Start = -502
	vars.Col0_End = -292
	vars.Col1_Start = -291
	vars.Col1_End = -81
	vars.Col2_Start = -80
	vars.Col2_End = 130
	vars.Col3_Start = 131
	vars.Col3_End = 183
	vars.Col4_Start = 184
	vars.Col4_End = 289
	vars.Col5_Start = 290
	vars.Col5_End = 395
	vars.Col6_Start = 396
	vars.Col6_End = 501
	
	vars.Next_x = 425
	vars.Next_y = 346
	
	//There are 6 different conditions (3 block types that can be combined together in 6 ways)
	//This determines, based on participants number which order people get.
	//vars.counterbalancing = [[2,0,1], [0,1,2], [0,2,1], [1,0,2], [1,2,0], [2,1,0]]
	//vars.block1, vars.block2, vars.block2=vars.counterbalancing[vars.subject_nr%6]
	//Not sure how to do this method in JavaScript so therefore reverted back to the Old ways
	
	if(vars.subject_nr%6 === 1){
	    vars.block1 = 0
	    vars.block2 = 1
	    vars.block3 = 2
	}
	if(vars.subject_nr%6 === 2){
	    vars.block1 = 0
	    vars.block2 = 2
	    vars.block3 = 1
	}
	if(vars.subject_nr%6 === 3){
	    vars.block1 = 1
	    vars.block2 = 0
	    vars.block3 = 2
	}
	if(vars.subject_nr%6 === 4){
	    vars.block1 = 1
	    vars.block2 = 2
	    vars.block3 = 0
	}
	if(vars.subject_nr%6 === 5){
	    vars.block1 = 2
	    vars.block2 = 1
	    vars.block3 = 0
	}
	else if(vars.subject_nr%6 === 0){
	    vars.block1 = 2
	    vars.block2 = 0
	    vars.block3 = 1
	}
	
	//Now we want to shuffle the stimuli for participants
	//The first way to do this is by stim = pool.files(), however that will also include things such as Diamond.png and background.png, so we'd rather not have that
	//Therefore we put them in by hand for now:
	vars.stim = ['Acorn.png', 'Beetle.png', 'BlackBerries.png', 'Feather.png', 'Flower.png', 'Footprints.png', 'Log.png', 'Mouse.png', 'Puddle.png']
	
	
	//STACKOVERFLOW https://stackoverflow.com/questions/2450954/how-to-randomize-shuffle-a-javascript-array
	function shuffle(array) {
	  var currentIndex = array.length, temporaryValue, randomIndex;
	
	  // While there remain elements to shuffle...
	  while (0 !== currentIndex) {
	
	    // Pick a remaining element...
	    randomIndex = Math.floor(Math.random() * currentIndex);
	    currentIndex -= 1;
	
	    // And swap it with the current element.
	    temporaryValue = array[currentIndex];
	    array[currentIndex] = array[randomIndex];
	    array[randomIndex] = temporaryValue;
	  }
	
	  return array;
	}
	
	//random.shuffle(stim) #shuffle them
	//Assign them to either A B or X and to either block 1 2 or 3
	shuffle(vars.stim)
	
	vars.A1 = vars.stim[0]
	vars.B1 = vars.stim[1]
	vars.X1 = vars.stim[2]
	vars.A2 = vars.stim[3]
	vars.B2 = vars.stim[4]
	vars.X2 = vars.stim[5]
	vars.A3 = vars.stim[6]
	vars.B3 = vars.stim[7]
	vars.X3 = vars.stim[8]
	
	//vars.A1, vars.B1, vars.X1, vars.A2, vars.B2, vars.X2, vars.A3, vars.B3, vars.X3 = stim
	console.log(vars.stim)
	console.log(vars.A1 + vars.B1 + vars.X1 + vars.A2 + vars.B2 + vars.X2 + vars.A3 + vars.B3 + vars.X3)
	
	//Here we create an array of possible locations. The stimuli can only appear in column 0 and 2, so not in 1 in which the outcome is located.
	//Note that "column" and 'row' are artifacts left over from when this was created in a form, bascially I translated the columns and rows to coordinates such that they can be displayed on a sketchpad.
	vars.locations = [[vars.Col0_Start + 1,vars.Row0_Start], [vars.Col0_Start + 1,vars.Row1_Start], [vars.Col0_Start + 1,vars.Row2_Start], [vars.Col0_Start + 1,vars.Row3_Start], [vars.Col0_Start + 1,vars.Row4_Start], [vars.Col0_Start + 1,vars.Row5_Start], [vars.Col0_Start + 1,vars.Row6_Start], [vars.Col0_Start + 1,vars.Row7_Start], [vars.Col0_Start + 1,vars.Row8_Start], [vars.Col0_Start + 1,vars.Row9_Start], [vars.Col0_Start + 1,vars.Row10_Start], [vars.Col0_Start + 1,vars.Row11_Start], [vars.Col0_Start + 1,vars.Row12_Start], [vars.Col0_Start + 1,vars.Row13_Start], [vars.Col2_Start + 1,vars.Row0_Start], [vars.Col2_Start + 1,vars.Row1_Start], [vars.Col2_Start + 1,vars.Row2_Start], [vars.Col2_Start + 1,vars.Row3_Start], [vars.Col2_Start + 1,vars.Row4_Start], [vars.Col2_Start + 1,vars.Row5_Start], [vars.Col2_Start + 1,vars.Row6_Start], [vars.Col2_Start + 1,vars.Row7_Start], [vars.Col2_Start + 1,vars.Row8_Start], [vars.Col2_Start + 1,vars.Row9_Start], [vars.Col2_Start + 1,vars.Row10_Start], [vars.Col2_Start + 1,vars.Row11_Start], [vars.Col2_Start + 1,vars.Row12_Start], [vars.Col2_Start + 1,vars.Row13_Start]]
	
	
	vars.responses = ["R1", "R2", "R3"]
	
	vars.Responses000 = []
	vars.Responses050
	vars.Responses100
	__end__
	___prepare__
	//import Math
	//var DataFrame = require('dataframe-js').DataFrame
	__end__

define keyboard_response Keyboard000
	set timeout 12000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7;8;9;ENTER;RETURN;RIGHT;LEFT"

define inline_javascript KeyboardResponses000
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//With tab we can cycle through the different boxes
	if(vars.response == 'right'){
	    vars.y += 1
	    vars.current = vars.responses[vars.y%3] //this loops over the 3 items in the loop,namely R1,R2 and R3
	}
	if(vars.response == 'left'){
	    if(vars.y == 0){ //otherwise it can go out of bounds
	        vars.current = vars.responses[vars.y%3]
	    }
	    else{
	        vars.y -= 1
	        vars.current = vars.responses[vars.y%3] //this loops over the 3 items in the loop,namely R1,R2 and R3
	    }
	}
	
	//had to put 10 here as otherwise it wouldnt work with 9 somehow
	if(vars.response in [1,2,3,4,5,6,7,8,9,10]){
	    if(vars.current === "R1"){
	        vars.responseR1 = vars.response
	    }
	    if(vars.current === "R2"){
	        vars.responseR2 = vars.response
	    }
	    if(vars.current === "R3"){
	        vars.responseR3 = vars.response
	    }
	}
	
	//if someone pressed enter (or return, as it works on my keyboard)
	if(vars.response == 'enter'| vars.response == 'return'){
	    //console.log("someone pressed enter!")
	    if(vars.responseR1 != '' & vars.responseR2 != '' & vars.responseR3 != ''){
	        vars.check = 'yes'
	        //console.log("and also all the values were filled in")
	    }
	    else{
	        vars.reminder = 'yes'
	    }
	}
	
	//console.log(vars.response)
	//console.log("R1:" + vars.responseR1)
	//console.log("R2:" + vars.responseR2)
	//console.log("R3:" + vars.responseR3)
	__end__
	set _prepare ""

define mouse_response Mouse000
	set timeout 12000
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define mouse_response Mouse000_1
	set timeout 12000
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define mouse_response Mouse050
	set timeout 12000
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define feedback Outcome000
	set reset_variables yes
	set duration 1000
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0
	draw image center=0 file="[Outcome]" scale=0.8 show_if=always x=-291 y=-61 z_index=0

define feedback Outcome000_1
	set reset_variables yes
	set duration 1000
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0
	draw image center=0 file="[Outcome]" scale=0.8 show_if=always x=-291 y=-61 z_index=0

define feedback Outcome050
	set reset_variables yes
	set duration 1000
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0
	draw image center=0 file="[Outcome]" scale=0.8 show_if=always x=-291 y=-61 z_index=0

define feedback Outcome100
	set reset_variables yes
	set duration 1000
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0
	draw image center=0 file="[Outcome]" scale=0.8 show_if=always x=-291 y=-61 z_index=0

define inline_javascript PreviousResponses
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//i am so so sorry future me
	
	//OKAY what I did here was. I cannot dynamically put everything on the sketchpad as with my form in Python. So to get around this problem in the easiest way (as I'd like to test after two months thanks) I created a for look with differently named variables for EVERY TRIAL, such that all these variables can be displayed
	
	vars.j=1
	console.log(vars.Responses000)
	if(vars.Trial == 2){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        console.log("vars.j" + vars.j)
	        vars.T1A = vars.Responses000[vars.j-1][0]
	        vars.T1B = vars.Responses000[vars.j-1][1]
	        vars.T1X = vars.Responses000[vars.j-1][2]
	    }
	}
	
	if(vars.Trial == 3){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        console.log("vars.j" + vars.j)
	        vars.T2A = vars.Responses000[vars.j-1][0]
	        vars.T2B = vars.Responses000[vars.j-1][1]
	        vars.T2X = vars.Responses000[vars.j-1][2]
	    }
	}
	
	if(vars.Trial == 4){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        console.log("vars.j" + vars.j)
	        vars.T3A = vars.Responses000[vars.j-1][0]
	        vars.T3B = vars.Responses000[vars.j-1][1]
	        vars.T3X = vars.Responses000[vars.j-1][2]
	    }
	}
	
	if(vars.Trial == 5){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        console.log("vars.j" + vars.j)
	        vars.T4A = vars.Responses000[vars.j-1][0]
	        vars.T4B = vars.Responses000[vars.j-1][1]
	        vars.T4X = vars.Responses000[vars.j-1][2]
	    }
	}
	
	if(vars.Trial == 6){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        console.log("vars.j" + vars.j)
	        vars.T5A = vars.Responses000[vars.j-1][0]
	        vars.T5B = vars.Responses000[vars.j-1][1]
	        vars.T5X = vars.Responses000[vars.j-1][2]
	    }
	}
	
	if(vars.Trial == 7){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        console.log("vars.j" + vars.j)
	        vars.T6A = vars.Responses000[vars.j-1][0]
	        vars.T6B = vars.Responses000[vars.j-1][1]
	        vars.T6X = vars.Responses000[vars.j-1][2]
	    }
	}
	if(vars.Trial == 8){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        console.log("vars.j" + vars.j)
	        vars.T7A = vars.Responses000[vars.j-1][0]
	        vars.T7B = vars.Responses000[vars.j-1][1]
	        vars.T7X = vars.Responses000[vars.j-1][2]
	    }
	}
	
	if(vars.Trial == 9){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        console.log("vars.j" + vars.j)
	        vars.T8A = vars.Responses000[vars.j-1][0]
	        vars.T8B = vars.Responses000[vars.j-1][1]
	        vars.T8X = vars.Responses000[vars.j-1][2]
	    }
	}
	
	if(vars.Trial == 10){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        console.log("vars.j" + vars.j)
	        vars.T9A = vars.Responses000[vars.j-1][0]
	        vars.T9B = vars.Responses000[vars.j-1][1]
	        vars.T9X = vars.Responses000[vars.j-1][2]
	    }
	}
	if(vars.Trial == 11){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        console.log("vars.j" + vars.j)
	        vars.T10A = vars.Responses000[vars.j-1][0]
	        vars.T10B = vars.Responses000[vars.j-1][1]
	        vars.T10X = vars.Responses000[vars.j-1][2]
	    }
	}
	if(vars.Trial == 12){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        console.log("vars.j" + vars.j)
	        vars.T11A = vars.Responses000[vars.j-1][0]
	        vars.T11B = vars.Responses000[vars.j-1][1]
	        vars.T11X = vars.Responses000[vars.j-1][2]
	    }
	}
	if(vars.Trial == 13){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        console.log("vars.j" + vars.j)
	        vars.T12A = vars.Responses000[vars.j-1][0]
	        vars.T12B = vars.Responses000[vars.j-1][1]
	        vars.T12X = vars.Responses000[vars.j-1][2]
	    }
	}
	if(vars.Trial == 14){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        console.log("vars.j" + vars.j)
	        vars.T13A = vars.Responses000[vars.j-1][0]
	        vars.T13B = vars.Responses000[vars.j-1][1]
	        vars.T13X = vars.Responses000[vars.j-1][2]
	    }
	}
	
	if(vars.Trial == 15){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        console.log("vars.j" + vars.j)
	        vars.T14A = vars.Responses000[vars.j-1][0]
	        vars.T14B = vars.Responses000[vars.j-1][1]
	        vars.T14X = vars.Responses000[vars.j-1][2]
	    }
	}
	
	if(vars.Trial == 16){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        console.log("vars.j" + vars.j)
	        vars.T15A = vars.Responses000[vars.j-1][0]
	        vars.T15B = vars.Responses000[vars.j-1][1]
	        vars.T15X = vars.Responses000[vars.j-1][2]
	    }
	}
	__end__
	set _prepare ""

define inline_javascript Randomizer000
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	vars.pos1 = vars.locations[Math.floor(Math.random() * vars.locations.length)]
	vars.pos1X = vars.pos1[0]
	vars.pos1Y = vars.pos1[1]
	
	vars.temp = []
	
	vars.i = 0
	for(vars.i = 0; vars.i<vars.locations.length;vars.i++){
	    if(vars.locations[vars.i][0] != vars.pos1X){
	        vars.temp.push(vars.locations[vars.i])}
	}
	
	vars.pos2 = vars.temp[Math.floor(Math.random()*vars.temp.length)]
	vars.pos2X = vars.pos2[0]
	vars.pos2Y = vars.pos2[1]
	__end__

define inline_javascript Randomizer000_1
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	vars.pos1 = vars.locations[Math.floor(Math.random() * vars.locations.length)]
	vars.pos1X = vars.pos1[0]
	vars.pos1Y = vars.pos1[1]
	
	vars.temp = []
	
	vars.i = 0
	for(vars.i = 0; vars.i<vars.locations.length;vars.i++){
	    if(vars.locations[vars.i][0] != vars.pos1X){
	        vars.temp.push(vars.locations[vars.i])}
	}
	
	vars.pos2 = vars.temp[Math.floor(Math.random()*vars.temp.length)]
	vars.pos2X = vars.pos2[0]
	vars.pos2Y = vars.pos2[1]
	
	vars.check = 'no'
	vars.reminder = 'no'
	vars.current = vars.responses[0]
	vars.y = 0
	
	vars.responseR1 = ''
	vars.responseR2 = ''
	vars.responseR3 = ''
	__end__

define inline_javascript Randomizer050
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	vars.pos1 = vars.locations[Math.floor(Math.random() * vars.locations.length)]
	vars.pos1X = vars.pos1[0]
	vars.pos1Y = vars.pos1[1]
	
	vars.temp = []
	
	vars.i = 0
	for(vars.i = 0; vars.i<vars.locations.length;vars.i++){
	    if(vars.locations[vars.i][0] != vars.pos1X){
	        vars.temp.push(vars.locations[vars.i])}
	}
	
	vars.pos2 = vars.temp[Math.floor(Math.random()*vars.temp.length)]
	vars.pos2X = vars.pos2[0]
	vars.pos2Y = vars.pos2[1]
	__end__

define inline_javascript Randomizer100
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
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	__end__

define feedback Rating000
	set reset_variables yes
	set duration 0
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[A]" scale=0.4 show_if=always x=184 y=-374 z_index=0
	draw image center=0 file="[B]" scale=0.4 show_if=always x=290 y=-374 z_index=0
	draw image center=0 file="[X]" scale=0.4 show_if=always x=395 y=-374 z_index=0
	draw rect color="#f8f8ff" fill=1 h=32 penwidth=1 show_if=always w=50 x=184 y="[TrialCoordinate]" z_index=0
	draw rect color="#f8f8ff" fill=1 h=32 penwidth=1 show_if=always w=50 x=290 y="[TrialCoordinate]" z_index=0
	draw rect color="#f8f8ff" fill=1 h=32 penwidth=1 show_if=always w=50 x=395 y="[TrialCoordinate]" z_index=0
	draw rect color="#00b300" fill=0 h=32 penwidth=1 show_if="[current]=R1" w=50 x=184 y="[TrialCoordinate]" z_index=0
	draw rect color="#00b300" fill=0 h=32 penwidth=1 show_if="[current]=R2" w=50 x=290 y="[TrialCoordinate]" z_index=0
	draw rect color="#00b300" fill=0 h=32 penwidth=1 show_if="[current]=R3" w=50 x=395 y="[TrialCoordinate]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[responseR1]" x=184 y="[TrialCoordinate]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[responseR2]" x=290 y="[TrialCoordinate]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[responseR3]" x=395 y="[TrialCoordinate]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0
	draw image center=0 file="[Outcome]" scale=0.8 show_if=always x=-291 y=-61 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=1 x=131 y=-295 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=2 x=131 y=-256 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=3 x=131 y=-217 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=4 x=131 y=-178 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=5 x=131 y=-139 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=6 x=131 y=-100 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=7 x=131 y=-61 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=8 x=131 y=-22 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=9 x=131 y=17 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=10 x=131 y=56 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=11 x=131 y=95 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=12 x=131 y=134 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=13 x=131 y=173 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=14 x=131 y=212 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=15 x=131 y=251 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=16 x=131 y=290 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=14 html=yes show_if="[reminder]=yes" text="Please fill in all three scores first!" x="[Col4_Start]" y="[Row17_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=2" text="[T1A]" x="[Col4_Start]" y="[Row1_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=2" text="[T1B]" x="[Col5_Start]" y="[Row1_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=2" text="[T1X]" x="[Col6_Start]" y="[Row1_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=3" text="[T2A]" x="[Col4_Start]" y="[Row2_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=3" text="[T2B]" x="[Col5_Start]" y="[Row2_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=3" text="[T2X]" x="[Col6_Start]" y="[Row2_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=4" text="[T3A]" x="[Col4_Start]" y="[Row3_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=4" text="[T3B]" x="[Col5_Start]" y="[Row3_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=4" text="[T3X]" x="[Col6_Start]" y="[Row3_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=5" text="[T4A]" x="[Col4_Start]" y="[Row4_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=5" text="[T4B]" x="[Col5_Start]" y="[Row4_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=5" text="[T4X]" x="[Col6_Start]" y="[Row4_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=6" text="[T5A]" x="[Col4_Start]" y="[Row5_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=6" text="[T5B]" x="[Col5_Start]" y="[Row5_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=6" text="[T5X]" x="[Col6_Start]" y="[Row5_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=7" text="[T6A]" x="[Col4_Start]" y="[Row6_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=7" text="[T6B]" x="[Col5_Start]" y="[Row6_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=7" text="[T6X]" x="[Col6_Start]" y="[Row6_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=8" text="[T7A]" x="[Col4_Start]" y="[Row7_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=8" text="[T7B]" x="[Col5_Start]" y="[Row7_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=8" text="[T7X]" x="[Col6_Start]" y="[Row7_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=9" text="[T8A]" x="[Col4_Start]" y="[Row8_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=9" text="[T8B]" x="[Col5_Start]" y="[Row8_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=9" text="[T8X]" x="[Col6_Start]" y="[Row8_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=10" text="[T9A]" x="[Col4_Start]" y="[Row9_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=10" text="[T9B]" x="[Col5_Start]" y="[Row9_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=10" text="[T9X]" x="[Col6_Start]" y="[Row9_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=11" text="[T10A]" x="[Col4_Start]" y="[Row10_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=11" text="[T10B]" x="[Col5_Start]" y="[Row10_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=11" text="[T10X]" x="[Col6_Start]" y="[Row10_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=12" text="[T11A]" x="[Col4_Start]" y="[Row11_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=12" text="[T11B]" x="[Col5_Start]" y="[Row11_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=12" text="[T11X]" x="[Col6_Start]" y="[Row11_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=13" text="[T12A]" x="[Col4_Start]" y="[Row12_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=13" text="[T12B]" x="[Col5_Start]" y="[Row12_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=13" text="[T12X]" x="[Col6_Start]" y="[Row12_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=14" text="[T13A]" x="[Col4_Start]" y="[Row13_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=14" text="[T13B]" x="[Col5_Start]" y="[Row13_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=14" text="[T13X]" x="[Col6_Start]" y="[Row13_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=15" text="[T14A]" x="[Col4_Start]" y="[Row14_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=15" text="[T14B]" x="[Col5_Start]" y="[Row14_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=15" text="[T14X]" x="[Col6_Start]" y="[Row14_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=16" text="[T15A]" x="[Col4_Start]" y="[Row15_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=16" text="[T15B]" x="[Col5_Start]" y="[Row15_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=16" text="[T15X]" x="[Col6_Start]" y="[Row15_Start]" z_index=0

define feedback Rating000_1
	set reset_variables yes
	set duration 0
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[A]" scale=0.4 show_if=always x=184 y=-374 z_index=0
	draw image center=0 file="[B]" scale=0.4 show_if=always x=290 y=-374 z_index=0
	draw image center=0 file="[X]" scale=0.4 show_if=always x=395 y=-374 z_index=0
	draw rect color=878787 fill=1 h=32 penwidth=1 show_if=always w=50 x=184 y="[TrialCoordinate]" z_index=0
	draw rect color=878787 fill=1 h=32 penwidth=1 show_if=always w=50 x=290 y="[TrialCoordinate]" z_index=0
	draw rect color=878787 fill=1 h=32 penwidth=1 show_if=always w=50 x=395 y="[TrialCoordinate]" z_index=0
	draw rect color="#878787" fill=1 h=32 penwidth=1 show_if=always w=64 x="[Col6_Start]" y="[Row17_Start]" z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=Next x="[Next_x]" y="[Next_y]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0
	draw image center=0 file="[Outcome]" scale=0.8 show_if=always x=-291 y=-61 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=1 x=131 y=-295 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=2 x=131 y=-256 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=3 x=131 y=-217 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=4 x=131 y=-178 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=5 x=131 y=-139 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=6 x=131 y=-100 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=7 x=131 y=-61 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=8 x=131 y=-22 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=9 x=131 y=17 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=10 x=131 y=56 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=11 x=131 y=95 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=12 x=131 y=134 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=13 x=131 y=173 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=14 x=131 y=212 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=15 x=131 y=251 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=16 x=131 y=290 z_index=0

define feedback Rating050
	set reset_variables yes
	set duration 0
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[A]" scale=0.4 show_if=always x=184 y=-374 z_index=0
	draw image center=0 file="[B]" scale=0.4 show_if=always x=290 y=-374 z_index=0
	draw image center=0 file="[X]" scale=0.4 show_if=always x=395 y=-374 z_index=0
	draw rect color=878787 fill=1 h=32 penwidth=1 show_if=always w=50 x=184 y="[TrialCoordinate]" z_index=0
	draw rect color=878787 fill=1 h=32 penwidth=1 show_if=always w=50 x=290 y="[TrialCoordinate]" z_index=0
	draw rect color=878787 fill=1 h=32 penwidth=1 show_if=always w=50 x=395 y="[TrialCoordinate]" z_index=0
	draw rect color="#878787" fill=1 h=32 penwidth=1 show_if=always w=64 x="[Col6_Start]" y="[Row17_Start]" z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=Next x="[Next_x]" y="[Next_y]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0
	draw image center=0 file="[Outcome]" scale=0.8 show_if=always x=-291 y=-61 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=1 x=131 y=-295 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=2 x=131 y=-256 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=3 x=131 y=-217 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=4 x=131 y=-178 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=5 x=131 y=-139 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=6 x=131 y=-100 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=7 x=131 y=-61 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=8 x=131 y=-22 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=9 x=131 y=17 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=10 x=131 y=56 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=11 x=131 y=95 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=12 x=131 y=134 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=13 x=131 y=173 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=14 x=131 y=212 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=15 x=131 y=251 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=16 x=131 y=290 z_index=0

define feedback Rating100
	set reset_variables yes
	set duration 5000
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[A]" scale=0.4 show_if=always x=184 y=-374 z_index=0
	draw image center=0 file="[B]" scale=0.4 show_if=always x=290 y=-374 z_index=0
	draw image center=0 file="[X]" scale=0.4 show_if=always x=395 y=-374 z_index=0
	draw rect color=black fill=0 h=32 penwidth=1 show_if=always w=50 x=184 y="[TrialCoordinate]" z_index=0
	draw rect color=black fill=0 h=32 penwidth=1 show_if=always w=50 x=290 y="[TrialCoordinate]" z_index=0
	draw rect color=black fill=0 h=32 penwidth=1 show_if=always w=50 x=395 y="[TrialCoordinate]" z_index=0
	draw rect color="#000000" fill=0 h=32 penwidth=1 show_if=always w=64 x=416 y=320 z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0
	draw image center=0 file="[Outcome]" scale=0.8 show_if=always x=-291 y=-61 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=1 x=131 y=-295 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=2 x=131 y=-256 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=3 x=131 y=-217 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=4 x=131 y=-178 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=5 x=131 y=-139 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=6 x=131 y=-100 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=7 x=131 y=-61 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=8 x=131 y=-22 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=9 x=131 y=17 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=10 x=131 y=56 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=11 x=131 y=95 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=12 x=131 y=134 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=13 x=131 y=173 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=14 x=131 y=212 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=15 x=131 y=251 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=16 x=131 y=290 z_index=0

define inline_javascript RegionOfInterest000_1
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.start_x_roi = vars.Col6_Start 
	vars.start_y_roi = vars.Row17_Start
	vars.end_x_roi = vars.Col6_End
	vars.end_y_roi = vars.Row17_End
	
	if(vars.cursor_x >= vars.start_x_roi & vars.cursor_x < vars.end_x_roi & vars.cursor_y >= vars.start_y_roi & vars.cursor_y < vars.end_y_roi){
	    vars.clicked_next = 'yes'}
	else {
	    vars.clicked_next = 'no'
	}
	
	console.log(vars.clicked_next)
	__end__
	set _prepare ""

define inline_javascript RegionOfInterest050
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.start_x_roi = vars.Col6_Start 
	vars.start_y_roi = vars.Row17_Start
	vars.end_x_roi = vars.Col6_End
	vars.end_y_roi = vars.Row17_End
	
	if(vars.cursor_x >= vars.start_x_roi & vars.cursor_x < vars.end_x_roi & vars.cursor_y >= vars.start_y_roi & vars.cursor_y < vars.end_y_roi){
	    vars.clicked_next = 'yes'}
	else {
	    vars.clicked_next = 'no'
	}
	
	console.log(vars.clicked_next)
	__end__
	set _prepare ""

define repeat_cycle Repeat_cycle000
	set description "Optionally repeat a cycle from a loop"
	set condition "[check] == no"

define repeat_cycle Repeat_cycle000_1
	set description "Optionally repeat a cycle from a loop"
	set condition "[clicked_next] = no"

define repeat_cycle Repeat_cycle050
	set description "Optionally repeat a cycle from a loop"
	set condition "[clicked_next] = no"

define feedback Stim000
	set reset_variables yes
	set duration 2000
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0

define feedback Stim000_1
	set reset_variables yes
	set duration 2000
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0

define feedback Stim050
	set reset_variables yes
	set duration 2000
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0

define feedback Stim100
	set reset_variables yes
	set duration 2000
	set description "Provides feedback to the participant"
	draw image center=0 file="bgLight4.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw image center=0 file="[Stim1]" scale=0.8 show_if=always x="[pos1X]" y="[pos1Y]" z_index=0
	draw image center=0 file="[Stim2]" scale=0.8 show_if=always x="[pos2X]" y="[pos2Y]" z_index=0

define loop Training_phase
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run main_sequence

define loop _000
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Outcome "Diamond.png"
	setcycle 0 Stim1 "[A1]"
	setcycle 0 Stim2 "[X1]"
	setcycle 0 Trial 1
	setcycle 0 A "[A1]"
	setcycle 0 B "[B1]"
	setcycle 0 X "[X1]"
	setcycle 0 TrialCoordinate "[Row1_Start]"
	setcycle 1 Outcome "NoDiamond.png"
	setcycle 1 Stim1 "[B1]"
	setcycle 1 Stim2 "[X1]"
	setcycle 1 Trial 2
	setcycle 1 A "[A1]"
	setcycle 1 B "[B1]"
	setcycle 1 X "[X1]"
	setcycle 1 TrialCoordinate "[Row2_Start]"
	setcycle 2 Outcome "Diamond.png"
	setcycle 2 Stim1 "[B1]"
	setcycle 2 Stim2 "[X1]"
	setcycle 2 Trial 3
	setcycle 2 A "[A1]"
	setcycle 2 B "[B1]"
	setcycle 2 X "[X1]"
	setcycle 2 TrialCoordinate "[Row3_Start]"
	setcycle 3 Outcome "NoDiamond.png"
	setcycle 3 Stim1 "[A1]"
	setcycle 3 Stim2 "[X1]"
	setcycle 3 Trial 4
	setcycle 3 A "[A1]"
	setcycle 3 B "[B1]"
	setcycle 3 X "[X1]"
	setcycle 3 TrialCoordinate "[Row4_Start]"
	setcycle 4 Outcome "NoDiamond.png"
	setcycle 4 Stim1 "[A1]"
	setcycle 4 Stim2 "[X1]"
	setcycle 4 Trial 5
	setcycle 4 A "[A1]"
	setcycle 4 B "[B1]"
	setcycle 4 X "[X1]"
	setcycle 4 TrialCoordinate "[Row5_Start]"
	setcycle 5 Outcome "Diamond.png"
	setcycle 5 Stim1 "[B1]"
	setcycle 5 Stim2 "[X1]"
	setcycle 5 Trial 6
	setcycle 5 A "[A1]"
	setcycle 5 B "[B1]"
	setcycle 5 X "[X1]"
	setcycle 5 TrialCoordinate "[Row6_Start]"
	setcycle 6 Outcome "Diamond.png"
	setcycle 6 Stim1 "[A1]"
	setcycle 6 Stim2 "[X1]"
	setcycle 6 Trial 7
	setcycle 6 A "[A1]"
	setcycle 6 B "[B1]"
	setcycle 6 X "[X1]"
	setcycle 6 TrialCoordinate "[Row7_Start]"
	setcycle 7 Outcome "NoDiamond.png"
	setcycle 7 Stim1 "[B1]"
	setcycle 7 Stim2 "[X1]"
	setcycle 7 Trial 8
	setcycle 7 A "[A1]"
	setcycle 7 B "[B1]"
	setcycle 7 X "[X1]"
	setcycle 7 TrialCoordinate "[Row8_Start]"
	setcycle 8 Outcome "Diamond.png"
	setcycle 8 Stim1 "[B1]"
	setcycle 8 Stim2 "[X1]"
	setcycle 8 Trial 9
	setcycle 8 A "[A1]"
	setcycle 8 B "[B1]"
	setcycle 8 X "[X1]"
	setcycle 8 TrialCoordinate "[Row9_Start]"
	setcycle 9 Outcome "NoDiamond.png"
	setcycle 9 Stim1 "[A1]"
	setcycle 9 Stim2 "[X1]"
	setcycle 9 Trial 10
	setcycle 9 A "[A1]"
	setcycle 9 B "[B1]"
	setcycle 9 X "[X1]"
	setcycle 9 TrialCoordinate "[Row10_Start]"
	setcycle 10 Outcome "NoDiamond.png"
	setcycle 10 Stim1 "[B1]"
	setcycle 10 Stim2 "[X1]"
	setcycle 10 Trial 11
	setcycle 10 A "[A1]"
	setcycle 10 B "[B1]"
	setcycle 10 X "[X1]"
	setcycle 10 TrialCoordinate "[Row11_Start]"
	setcycle 11 Outcome "Diamond.png"
	setcycle 11 Stim1 "[A1]"
	setcycle 11 Stim2 "[X1]"
	setcycle 11 Trial 12
	setcycle 11 A "[A1]"
	setcycle 11 B "[B1]"
	setcycle 11 X "[X1]"
	setcycle 11 TrialCoordinate "[Row12_Start]"
	setcycle 12 Outcome "NoDiamond.png"
	setcycle 12 Stim1 "[A1]"
	setcycle 12 Stim2 "[X1]"
	setcycle 12 Trial 13
	setcycle 12 A "[A1]"
	setcycle 12 B "[B1]"
	setcycle 12 X "[X1]"
	setcycle 12 TrialCoordinate "[Row13_Start]"
	setcycle 13 Outcome "Diamond.png"
	setcycle 13 Stim1 "[B1]"
	setcycle 13 Stim2 "[X1]"
	setcycle 13 Trial 14
	setcycle 13 A "[A1]"
	setcycle 13 B "[B1]"
	setcycle 13 X "[X1]"
	setcycle 13 TrialCoordinate "[Row14_Start]"
	setcycle 14 Outcome "Diamond.png"
	setcycle 14 Stim1 "[A1]"
	setcycle 14 Stim2 "[X1]"
	setcycle 14 Trial 15
	setcycle 14 A "[A1]"
	setcycle 14 B "[B1]"
	setcycle 14 X "[X1]"
	setcycle 14 TrialCoordinate "[Row15_Start]"
	setcycle 15 Outcome "NoDiamond.png"
	setcycle 15 Stim1 "[B1]"
	setcycle 15 Stim2 "[X1]"
	setcycle 15 Trial 16
	setcycle 15 A "[A1]"
	setcycle 15 B "[B1]"
	setcycle 15 X "[X1]"
	setcycle 15 TrialCoordinate "[Row16_Start]"
	run Cond000Sequence

define loop _050
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 A "[A2]"
	setcycle 0 B "[B2]"
	setcycle 0 Outcome "Diamond.png"
	setcycle 0 Stim1 "[A2]"
	setcycle 0 Stim2 "[X2]"
	setcycle 0 Trial 1
	setcycle 0 TrialCoordinate "[Row1_Start]"
	setcycle 0 X "[X2]"
	setcycle 1 A "[A2]"
	setcycle 1 B "[B2]"
	setcycle 1 Outcome "NoDiamond.png"
	setcycle 1 Stim1 "[B2]"
	setcycle 1 Stim2 "[X2]"
	setcycle 1 Trial 2
	setcycle 1 TrialCoordinate "[Row2_Start]"
	setcycle 1 X "[X2]"
	setcycle 2 A "[A2]"
	setcycle 2 B "[B2]"
	setcycle 2 Outcome "Diamond.png"
	setcycle 2 Stim1 "[B2]"
	setcycle 2 Stim2 "[X2]"
	setcycle 2 Trial 3
	setcycle 2 TrialCoordinate "[Row3_Start]"
	setcycle 2 X "[X2]"
	setcycle 3 A "[A2]"
	setcycle 3 B "[B2]"
	setcycle 3 Outcome "Diamond.png"
	setcycle 3 Stim1 "[A2]"
	setcycle 3 Stim2 "[X2]"
	setcycle 3 Trial 4
	setcycle 3 TrialCoordinate "[Row4_Start]"
	setcycle 3 X "[X2]"
	setcycle 4 A "[A2]"
	setcycle 4 B "[B2]"
	setcycle 4 Outcome "NoDiamond.png"
	setcycle 4 Stim1 "[A2]"
	setcycle 4 Stim2 "[X2]"
	setcycle 4 Trial 5
	setcycle 4 TrialCoordinate "[Row5_Start]"
	setcycle 4 X "[X2]"
	setcycle 5 A "[A2]"
	setcycle 5 B "[B2]"
	setcycle 5 Outcome "NoDiamond.png"
	setcycle 5 Stim1 "[B2]"
	setcycle 5 Stim2 "[X2]"
	setcycle 5 Trial 6
	setcycle 5 TrialCoordinate "[Row6_Start]"
	setcycle 5 X "[X2]"
	setcycle 6 A "[A2]"
	setcycle 6 B "[B2]"
	setcycle 6 Outcome "Diamond.png"
	setcycle 6 Stim1 "[A2]"
	setcycle 6 Stim2 "[X2]"
	setcycle 6 Trial 7
	setcycle 6 TrialCoordinate "[Row7_Start]"
	setcycle 6 X "[X2]"
	setcycle 7 A "[A2]"
	setcycle 7 B "[B2]"
	setcycle 7 Outcome "NoDiamond.png"
	setcycle 7 Stim1 "[B2]"
	setcycle 7 Stim2 "[X2]"
	setcycle 7 Trial 8
	setcycle 7 TrialCoordinate "[Row8_Start]"
	setcycle 7 X "[X2]"
	setcycle 8 A "[A2]"
	setcycle 8 B "[B2]"
	setcycle 8 Outcome "Diamond.png"
	setcycle 8 Stim1 "[B2]"
	setcycle 8 Stim2 "[X2]"
	setcycle 8 Trial 9
	setcycle 8 TrialCoordinate "[Row9_Start]"
	setcycle 8 X "[X2]"
	setcycle 9 A "[A2]"
	setcycle 9 B "[B2]"
	setcycle 9 Outcome "Diamond.png"
	setcycle 9 Stim1 "[A2]"
	setcycle 9 Stim2 "[X2]"
	setcycle 9 Trial 10
	setcycle 9 TrialCoordinate "[Row10_Start]"
	setcycle 9 X "[X2]"
	setcycle 10 A "[A2]"
	setcycle 10 B "[B2]"
	setcycle 10 Outcome "NoDiamond.png"
	setcycle 10 Stim1 "[B2]"
	setcycle 10 Stim2 "[X2]"
	setcycle 10 Trial 11
	setcycle 10 TrialCoordinate "[Row11_Start]"
	setcycle 10 X "[X2]"
	setcycle 11 A "[A2]"
	setcycle 11 B "[B2]"
	setcycle 11 Outcome "Diamond.png"
	setcycle 11 Stim1 "[A2]"
	setcycle 11 Stim2 "[X2]"
	setcycle 11 Trial 12
	setcycle 11 TrialCoordinate "[Row12_Start]"
	setcycle 11 X "[X2]"
	setcycle 12 A "[A2]"
	setcycle 12 B "[B2]"
	setcycle 12 Outcome "NoDiamond.png"
	setcycle 12 Stim1 "[A2]"
	setcycle 12 Stim2 "[X2]"
	setcycle 12 Trial 13
	setcycle 12 TrialCoordinate "[Row13_Start]"
	setcycle 12 X "[X2]"
	setcycle 13 A "[A2]"
	setcycle 13 B "[B2]"
	setcycle 13 Outcome "NoDiamond.png"
	setcycle 13 Stim1 "[B2]"
	setcycle 13 Stim2 "[X2]"
	setcycle 13 Trial 14
	setcycle 13 TrialCoordinate "[Row14_Start]"
	setcycle 13 X "[X2]"
	setcycle 14 A "[A2]"
	setcycle 14 B "[B2]"
	setcycle 14 Outcome "Diamond.png"
	setcycle 14 Stim1 "[A2]"
	setcycle 14 Stim2 "[X2]"
	setcycle 14 Trial 15
	setcycle 14 TrialCoordinate "[Row15_Start]"
	setcycle 14 X "[X2]"
	setcycle 15 A "[A2]"
	setcycle 15 B "[B2]"
	setcycle 15 Outcome "NoDiamond.png"
	setcycle 15 Stim1 "[B2]"
	setcycle 15 Stim2 "[X2]"
	setcycle 15 Trial 16
	setcycle 15 TrialCoordinate "[Row16_Start]"
	setcycle 15 X "[X2]"
	run Cond050Sequence

define loop _100
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Outcome "Diamond.png"
	setcycle 0 Stim1 "[A3]"
	setcycle 0 Stim2 "[X3]"
	setcycle 0 Trial 1
	setcycle 0 A "[A3]"
	setcycle 0 B "[B3]"
	setcycle 0 X "[X3]"
	setcycle 0 TrialCoordinate "[Row1_Start]"
	setcycle 1 Outcome "NoDiamond.png"
	setcycle 1 Stim1 "[B3]"
	setcycle 1 Stim2 "[X3]"
	setcycle 1 Trial 2
	setcycle 1 A "[A3]"
	setcycle 1 B "[B3]"
	setcycle 1 X "[X3]"
	setcycle 1 TrialCoordinate "[Row2_Start]"
	setcycle 2 Outcome "NoDiamond.png"
	setcycle 2 Stim1 "[B3]"
	setcycle 2 Stim2 "[X3]"
	setcycle 2 Trial 3
	setcycle 2 A "[A3]"
	setcycle 2 B "[B3]"
	setcycle 2 X "[X3]"
	setcycle 2 TrialCoordinate "[Row3_Start]"
	setcycle 3 Outcome "Diamond.png"
	setcycle 3 Stim1 "[A3]"
	setcycle 3 Stim2 "[X3]"
	setcycle 3 Trial 4
	setcycle 3 A "[A3]"
	setcycle 3 B "[B3]"
	setcycle 3 X "[X3]"
	setcycle 3 TrialCoordinate "[Row4_Start]"
	setcycle 4 Outcome "Diamond.png"
	setcycle 4 Stim1 "[A3]"
	setcycle 4 Stim2 "[X3]"
	setcycle 4 Trial 5
	setcycle 4 A "[A3]"
	setcycle 4 B "[B3]"
	setcycle 4 X "[X3]"
	setcycle 4 TrialCoordinate "[Row5_Start]"
	setcycle 5 Outcome "NoDiamond.png"
	setcycle 5 Stim1 "[B3]"
	setcycle 5 Stim2 "[X3]"
	setcycle 5 Trial 6
	setcycle 5 A "[A3]"
	setcycle 5 B "[B3]"
	setcycle 5 X "[X3]"
	setcycle 5 TrialCoordinate "[Row6_Start]"
	setcycle 6 Outcome "Diamond.png"
	setcycle 6 Stim1 "[A3]"
	setcycle 6 Stim2 "[X3]"
	setcycle 6 Trial 7
	setcycle 6 A "[A3]"
	setcycle 6 B "[B3]"
	setcycle 6 X "[X3]"
	setcycle 6 TrialCoordinate "[Row7_Start]"
	setcycle 7 Outcome "NoDiamond.png"
	setcycle 7 Stim1 "[B3]"
	setcycle 7 Stim2 "[X3]"
	setcycle 7 Trial 8
	setcycle 7 A "[A3]"
	setcycle 7 B "[B3]"
	setcycle 7 X "[X3]"
	setcycle 7 TrialCoordinate "[Row8_Start]"
	setcycle 8 Outcome "NoDiamond.png"
	setcycle 8 Stim1 "[B3]"
	setcycle 8 Stim2 "[X3]"
	setcycle 8 Trial 9
	setcycle 8 A "[A3]"
	setcycle 8 B "[B3]"
	setcycle 8 X "[X3]"
	setcycle 8 TrialCoordinate "[Row9_Start]"
	setcycle 9 Outcome "Diamond.png"
	setcycle 9 Stim1 "[A3]"
	setcycle 9 Stim2 "[X3]"
	setcycle 9 Trial 10
	setcycle 9 A "[A3]"
	setcycle 9 B "[B3]"
	setcycle 9 X "[X3]"
	setcycle 9 TrialCoordinate "[Row10_Start]"
	setcycle 10 Outcome "NoDiamond.png"
	setcycle 10 Stim1 "[B3]"
	setcycle 10 Stim2 "[X3]"
	setcycle 10 Trial 11
	setcycle 10 A "[A3]"
	setcycle 10 B "[B3]"
	setcycle 10 X "[X3]"
	setcycle 10 TrialCoordinate "[Row11_Start]"
	setcycle 11 Outcome "Diamond.png"
	setcycle 11 Stim1 "[A3]"
	setcycle 11 Stim2 "[X3]"
	setcycle 11 Trial 12
	setcycle 11 A "[A3]"
	setcycle 11 B "[B3]"
	setcycle 11 X "[X3]"
	setcycle 11 TrialCoordinate "[Row12_Start]"
	setcycle 12 Outcome "Diamond.png"
	setcycle 12 Stim1 "[A3]"
	setcycle 12 Stim2 "[X3]"
	setcycle 12 Trial 13
	setcycle 12 A "[A3]"
	setcycle 12 B "[B3]"
	setcycle 12 X "[X3]"
	setcycle 12 TrialCoordinate "[Row13_Start]"
	setcycle 13 Outcome "NoDiamond.png"
	setcycle 13 Stim1 "[B3]"
	setcycle 13 Stim2 "[X3]"
	setcycle 13 Trial 14
	setcycle 13 A "[A3]"
	setcycle 13 B "[B3]"
	setcycle 13 X "[X3]"
	setcycle 13 TrialCoordinate "[Row14_Start]"
	setcycle 14 Outcome "Diamond.png"
	setcycle 14 Stim1 "[A3]"
	setcycle 14 Stim2 "[X3]"
	setcycle 14 Trial 15
	setcycle 14 A "[A3]"
	setcycle 14 B "[B3]"
	setcycle 14 X "[X3]"
	setcycle 14 TrialCoordinate "[Row15_Start]"
	setcycle 15 Outcome "NoDiamond.png"
	setcycle 15 Stim1 "[B3]"
	setcycle 15 Stim2 "[X3]"
	setcycle 15 Trial 16
	setcycle 15 A "[A3]"
	setcycle 15 B "[B3]"
	setcycle 15 X "[X3]"
	setcycle 15 TrialCoordinate "[Row16_Start]"
	run Cond100Sequence

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_form_text_display always
	run Initialization_1 always
	run new_loop_1 always

define sequence main_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run _000 "[block1] = [count_main_sequence]"
	run _050 "[block2] = [count_main_sequence]"
	run _100 "[block3] = [count_main_sequence]"

define advanced_delay new_advanced_delay
	set jitter_mode Uniform
	set jitter 0
	set duration 1000
	set description "Waits for a specified duration"

define form_text_display new_form_text_display
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Start!"
	set margins "50;50;50;50"
	set form_title Welcome
	__form_text__
	Hi there! 
	
	Here is a small demo of my experiment. I'll get it working for all conditions soon but I wanted to show you right away!!
	
	The controls are: left and right arrow keys to select a box to fill in. Then type 1-9 on your keyboard (no numpad), and once everything is filled in, press enter!
	
	Hope you enjoy this little demonstration!
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display new_form_text_display_1
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Title
	set form_text "Your message"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define inline_javascript new_inline_javascript
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	set _prepare ""

define inline_javascript new_inline_javascript_1
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.responseR1
	vars.responseR2
	vars.responseR3
	
	vars.NewAnswers = [vars.responseR1, vars.responseR2, vars.responseR3]
	vars.Responses000.push(vars.NewAnswers)
	console.log(vars.Responses000)
	__end__
	set _prepare ""

define logger new_logger
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger_1
	set description "Logs experimental data"
	set auto_log yes
	log A
	log B
	log X
	log A1
	log B1
	log X1
	log A2
	log B2
	log X2
	log A3
	log B3
	log X3
	log Stim1
	log Stim2
	log Outcome

define loop new_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Row0_Start -374
	setcycle 0 Row0_End -296
	setcycle 0 Row1_Start -295
	setcycle 0 Row1_End -257
	setcycle 0 Row2_Start -256
	setcycle 0 Row2_End -218
	setcycle 0 Row3_Start -217
	setcycle 0 Row3_End -179
	setcycle 0 Row4_Start -178
	setcycle 0 Row4_End -140
	setcycle 0 Row5_Start -139
	setcycle 0 Row5_End -101
	setcycle 0 Row6_Start -100
	setcycle 0 Row6_End -62
	setcycle 0 Row7_Start -61
	setcycle 0 Row7_End -23
	setcycle 0 Row8_Start -22
	setcycle 0 Row8_End 16
	setcycle 0 Row9_Start 17
	setcycle 0 Row9_End 55
	setcycle 0 Row10_Start 56
	setcycle 0 Row10_End 94
	setcycle 0 Row11_Start 95
	setcycle 0 Row11_End 133
	setcycle 0 Row12_Start 134
	setcycle 0 Row12_End 172
	setcycle 0 Row13_Start 173
	setcycle 0 Row13_End 211
	setcycle 0 Row14_Start 212
	setcycle 0 Row14_End 250
	setcycle 0 Row15_Start 251
	setcycle 0 Row15_End 289
	setcycle 0 Row16_Start 290
	setcycle 0 Row16_End 328
	setcycle 0 Row17_Start 329
	setcycle 0 Row17_End 367
	setcycle 0 Col0_Start -502
	setcycle 0 Col0_End -292
	setcycle 0 Col1_Start -291
	setcycle 0 Col1_End -81
	setcycle 0 Col2_Start -80
	setcycle 0 Col2_End 130
	setcycle 0 Col3_Start 131
	setcycle 0 Col3_End 183
	setcycle 0 Col4_Start 184
	setcycle 0 Col4_End 289
	setcycle 0 Col5_Start 290
	setcycle 0 Col5_End 395
	setcycle 0 Col6_Start 396
	setcycle 0 Col6_End 501
	setcycle 0 Next_x 425
	setcycle 0 Next_y 346
	run new_sequence

define loop new_loop_1
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 A "[A1]"
	setcycle 0 B "[B1]"
	setcycle 0 Outcome "Diamond.png"
	setcycle 0 Stim1 "[A1]"
	setcycle 0 Stim2 "[X1]"
	setcycle 0 Trial 1
	setcycle 0 TrialCoordinate "[Row1_Start]"
	setcycle 0 TrialCoordinateEnd "[Row1_End]"
	setcycle 0 X "[X1]"
	setcycle 0 TrialCoordinateMinusOne 0
	setcycle 1 A "[A1]"
	setcycle 1 B "[B1]"
	setcycle 1 Outcome "NoDiamond.png"
	setcycle 1 Stim1 "[B1]"
	setcycle 1 Stim2 "[X1]"
	setcycle 1 Trial 2
	setcycle 1 TrialCoordinate "[Row2_Start]"
	setcycle 1 TrialCoordinateEnd "[Row2_End]"
	setcycle 1 X "[X1]"
	setcycle 1 TrialCoordinateMinusOne "[Row1_Start]"
	setcycle 2 A "[A1]"
	setcycle 2 B "[B1]"
	setcycle 2 Outcome "Diamond.png"
	setcycle 2 Stim1 "[B1]"
	setcycle 2 Stim2 "[X1]"
	setcycle 2 Trial 3
	setcycle 2 TrialCoordinate "[Row3_Start]"
	setcycle 2 TrialCoordinateEnd "[Row3_End]"
	setcycle 2 X "[X1]"
	setcycle 2 TrialCoordinateMinusOne "[Row2_Start]"
	setcycle 3 A "[A1]"
	setcycle 3 B "[B1]"
	setcycle 3 Outcome "NoDiamond.png"
	setcycle 3 Stim1 "[A1]"
	setcycle 3 Stim2 "[X1]"
	setcycle 3 Trial 4
	setcycle 3 TrialCoordinate "[Row4_Start]"
	setcycle 3 TrialCoordinateEnd "[Row4_End]"
	setcycle 3 X "[X1]"
	setcycle 3 TrialCoordinateMinusOne "[Row3_Start]"
	setcycle 4 A "[A1]"
	setcycle 4 B "[B1]"
	setcycle 4 Outcome "NoDiamond.png"
	setcycle 4 Stim1 "[A1]"
	setcycle 4 Stim2 "[X1]"
	setcycle 4 Trial 5
	setcycle 4 TrialCoordinate "[Row5_Start]"
	setcycle 4 TrialCoordinateEnd "[Row5_End]"
	setcycle 4 X "[X1]"
	setcycle 4 TrialCoordinateMinusOne "[Row4_Start]"
	setcycle 5 A "[A1]"
	setcycle 5 B "[B1]"
	setcycle 5 Outcome "Diamond.png"
	setcycle 5 Stim1 "[B1]"
	setcycle 5 Stim2 "[X1]"
	setcycle 5 Trial 6
	setcycle 5 TrialCoordinate "[Row6_Start]"
	setcycle 5 TrialCoordinateEnd "[Row6_End]"
	setcycle 5 X "[X1]"
	setcycle 5 TrialCoordinateMinusOne "[Row5_Start]"
	setcycle 6 A "[A1]"
	setcycle 6 B "[B1]"
	setcycle 6 Outcome "Diamond.png"
	setcycle 6 Stim1 "[A1]"
	setcycle 6 Stim2 "[X1]"
	setcycle 6 Trial 7
	setcycle 6 TrialCoordinate "[Row7_Start]"
	setcycle 6 TrialCoordinateEnd "[Row7_End]"
	setcycle 6 X "[X1]"
	setcycle 6 TrialCoordinateMinusOne "[Row6_Start]"
	setcycle 7 A "[A1]"
	setcycle 7 B "[B1]"
	setcycle 7 Outcome "NoDiamond.png"
	setcycle 7 Stim1 "[B1]"
	setcycle 7 Stim2 "[X1]"
	setcycle 7 Trial 8
	setcycle 7 TrialCoordinate "[Row8_Start]"
	setcycle 7 TrialCoordinateEnd "[Row8_End]"
	setcycle 7 X "[X1]"
	setcycle 7 TrialCoordinateMinusOne "[Row7_Start]"
	setcycle 8 A "[A1]"
	setcycle 8 B "[B1]"
	setcycle 8 Outcome "Diamond.png"
	setcycle 8 Stim1 "[B1]"
	setcycle 8 Stim2 "[X1]"
	setcycle 8 Trial 9
	setcycle 8 TrialCoordinate "[Row9_Start]"
	setcycle 8 TrialCoordinateEnd "[Row9_End]"
	setcycle 8 X "[X1]"
	setcycle 8 TrialCoordinateMinusOne "[Row8_Start]"
	setcycle 9 A "[A1]"
	setcycle 9 B "[B1]"
	setcycle 9 Outcome "NoDiamond.png"
	setcycle 9 Stim1 "[A1]"
	setcycle 9 Stim2 "[X1]"
	setcycle 9 Trial 10
	setcycle 9 TrialCoordinate "[Row10_Start]"
	setcycle 9 TrialCoordinateEnd "[Row10_End]"
	setcycle 9 X "[X1]"
	setcycle 9 TrialCoordinateMinusOne "[Row9_Start]"
	setcycle 10 A "[A1]"
	setcycle 10 B "[B1]"
	setcycle 10 Outcome "NoDiamond.png"
	setcycle 10 Stim1 "[B1]"
	setcycle 10 Stim2 "[X1]"
	setcycle 10 Trial 11
	setcycle 10 TrialCoordinate "[Row11_Start]"
	setcycle 10 TrialCoordinateEnd "[Row11_End]"
	setcycle 10 X "[X1]"
	setcycle 10 TrialCoordinateMinusOne "[Row10_Start]"
	setcycle 11 A "[A1]"
	setcycle 11 B "[B1]"
	setcycle 11 Outcome "Diamond.png"
	setcycle 11 Stim1 "[A1]"
	setcycle 11 Stim2 "[X1]"
	setcycle 11 Trial 12
	setcycle 11 TrialCoordinate "[Row12_Start]"
	setcycle 11 TrialCoordinateEnd "[Row12_End]"
	setcycle 11 X "[X1]"
	setcycle 11 TrialCoordinateMinusOne "[Row11_Start]"
	setcycle 12 A "[A1]"
	setcycle 12 B "[B1]"
	setcycle 12 Outcome "NoDiamond.png"
	setcycle 12 Stim1 "[A1]"
	setcycle 12 Stim2 "[X1]"
	setcycle 12 Trial 13
	setcycle 12 TrialCoordinate "[Row13_Start]"
	setcycle 12 TrialCoordinateEnd "[Row13_End]"
	setcycle 12 X "[X1]"
	setcycle 12 TrialCoordinateMinusOne "[Row12_Start]"
	setcycle 13 A "[A1]"
	setcycle 13 B "[B1]"
	setcycle 13 Outcome "Diamond.png"
	setcycle 13 Stim1 "[B1]"
	setcycle 13 Stim2 "[X1]"
	setcycle 13 Trial 14
	setcycle 13 TrialCoordinate "[Row14_Start]"
	setcycle 13 TrialCoordinateEnd "[Row14_End]"
	setcycle 13 X "[X1]"
	setcycle 13 TrialCoordinateMinusOne "[Row13_Start]"
	setcycle 14 A "[A1]"
	setcycle 14 B "[B1]"
	setcycle 14 Outcome "Diamond.png"
	setcycle 14 Stim1 "[A1]"
	setcycle 14 Stim2 "[X1]"
	setcycle 14 Trial 15
	setcycle 14 TrialCoordinate "[Row15_Start]"
	setcycle 14 TrialCoordinateEnd "[Row15_End]"
	setcycle 14 X "[X1]"
	setcycle 14 TrialCoordinateMinusOne "[Row14_Start]"
	setcycle 15 A "[A1]"
	setcycle 15 B "[B1]"
	setcycle 15 Outcome "NoDiamond.png"
	setcycle 15 Stim1 "[B1]"
	setcycle 15 Stim2 "[X1]"
	setcycle 15 Trial 16
	setcycle 15 TrialCoordinate "[Row16_Start]"
	setcycle 15 TrialCoordinateEnd "[Row16_End]"
	setcycle 15 X "[X1]"
	setcycle 15 TrialCoordinateMinusOne "[Row15_Start]"
	run new_sequence_1

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define sequence new_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Randomizer000_1 always
	run Stim000_1 always
	run Outcome000_1 always
	run Click_loop000 always
	run new_inline_javascript_1 always
	run new_logger always

