---
API: 2.1
OpenSesame: 3.3.7
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground "#000000"
set font_underline no
set font_size 16
set font_italic no
set font_family sans
set font_bold no
set experiment_path "C:\\Users\\Sanne\\Dropbox\\MasterProject\\Experiments\\JavaScript"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#cecece"

define form_consent AConsentform
	set timeout infinite
	set spacing 10
	set rows "1;4;1;1"
	set only_render no
	set margins "50;50;50;50"
	set form_title "Consent form"
	__form_text__
	In this study we aim to investigate how people assign causes to events. The experiment takes approximately 15 to 20 minutes. You will see images of objects on screen and rate on a scale from 0 to 8 on your keyboard the causal relation between them. 
	The data obtained during this study will be stored and processed anonymously and therefore we will not be able to trace back your data or remove your data after submission. The data will only be used for scientific research and not for other purposes.
	There are no foreseeable risks or discomfort as a result of your taking part in this experiment, and you are free to withdraw your participation at any time during the experiment. 
	Upon completion of your participation in this study, you will be provided with a brief explanation of the question that this study addresses.
	
	Please contact Sanne for questions about the experiment ( s.poelstra.1@student.rug.nl ). Any complaints concerning this study can be directed to the Research Ethical Review Committee (CETO) of the University of Groningen ( ceto@rug.nl ) . This research project is carried out under supervision of Dr. Jessie Nixon (University of Tübingen, Germany) and Dr. Jacolien van Rij (University of Groningen, The Netherlands).
	By clicking the checkbox below you agree with the following statements:
	· My participation in this experiment is voluntary. I understand that I can stop at any time without giving reasons.
	· I consent that my data will be used for scientific research.
	__end__
	set description "A simple consent form"
	set decline_text "Do not participate"
	set decline_message "You need to accept the consent form to participate"
	set cols "2;2"
	set checkbox_text "I have read and understood the information above"
	set accept_text "Participate!"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 2 1 checkbox text="[checkbox_text]" var=checkbox_status
	widget 0 3 1 1 button text="[accept_text]" var=accept_status
	widget 1 3 1 1 button text="[decline_text]"


define loop Click_loop000
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run Click_sequence000

define loop Click_loop000_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run Click_sequence000_1

define loop Click_loop050
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run Click_sequence050

define sequence Click_sequence000
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run current_time always
	run PreviousResponses always
	run Rating000 always
	run Keyboard000 always
	run KeyboardResponses000 always
	run Repeat_cycle000 always

define sequence Click_sequence000_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define sequence Click_sequence050
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define sequence Cond000Sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Click_loop000 always

define sequence Cond050Sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Click_loop050 always

define sequence Cond100Sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define sequence Coordinate_Sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define loop Coordinate_loops
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "This loop is for creating global variables of the coordinates"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Row0_Start -374
	setcycle 0 Row0_End -296
	setcycle 0 Row1_Start -295
	setcycle 0 Row1_End -257
	setcycle 0 Row2_Start -256
	setcycle 0 Row2_End -218
	setcycle 0 Row3_Start -217
	setcycle 0 Row3_End -179
	setcycle 0 Row4_Start -178
	setcycle 0 Row4_End -140
	setcycle 0 Row5_Start -139
	setcycle 0 Row5_End -101
	setcycle 0 Row6_Start -100
	setcycle 0 Row6_End -62
	setcycle 0 Row7_Start -61
	setcycle 0 Row7_End -23
	setcycle 0 Row8_Start -22
	setcycle 0 Row8_End 16
	setcycle 0 Row9_Start 17
	setcycle 0 Row9_End 55
	setcycle 0 Row10_Start 56
	setcycle 0 Row10_End 94
	setcycle 0 Row11_Start 95
	setcycle 0 Row11_End 133
	setcycle 0 Row12_Start 134
	setcycle 0 Row12_End 172
	setcycle 0 Row13_Start 173
	setcycle 0 Row13_End 211
	setcycle 0 Row14_Start 212
	setcycle 0 Row14_End 250
	setcycle 0 Row15_Start 251
	setcycle 0 Row15_End 289
	setcycle 0 Row16_Start 290
	setcycle 0 Row16_End 328
	setcycle 0 Row17_Start 329
	setcycle 0 Row17_End 367
	setcycle 0 Col0_Start -502
	setcycle 0 Col0_End -292
	setcycle 0 Col1_Start -291
	setcycle 0 Col1_End -81
	setcycle 0 Col2_Start -80
	setcycle 0 Col2_End 130
	setcycle 0 Col3_Start 131
	setcycle 0 Col3_End 183
	setcycle 0 Col4_Start 184
	setcycle 0 Col4_End 289
	setcycle 0 Col5_Start 290
	setcycle 0 Col5_End 395
	setcycle 0 Col6_Start 396
	setcycle 0 Col6_End 501
	setcycle 0 Next_x 425
	setcycle 0 Next_y 346
	run Coordinate_Sequence

define inline_javascript Initialization_1
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//We initialize all row and columns beginning and ending coordinates here.
	//These are chosen in this way because in the Python form these were the coordinates of each row and column and I liked the layout of that.
	vars.Row0_Start = -334
	vars.Row0_End = -296
	vars.Row1_Start = -295
	vars.Row1_End =-257
	vars.Row2_Start = -256
	vars.Row2_End = -218
	vars.Row3_Start = -217
	vars.Row3_End = -179
	vars.Row4_Start = -178
	vars.Row4_End = -140
	vars.Row5_Start = -139
	vars.Row5_End = -101
	vars.Row6_Start = -100
	vars.Row6_End = -62
	vars.Row7_Start = -61
	vars.Row7_End = -23
	vars.Row8_Start = -22
	vars.Row8_End = 16
	vars.Row9_Start = 17
	vars.Row9_End = 55
	vars.Row10_Start = 56
	vars.Row10_End = 94
	vars.Row11_Start = 95
	vars.Row11_End = 133
	vars.Row12_Start = 134
	vars.Row12_End = 172
	vars.Row13_Start = 173
	vars.Row13_End = 211
	vars.Row14_Start = 212
	vars.Row14_End = 250
	vars.Row15_Start = 251
	vars.Row15_End = 289
	vars.Row16_Start = 290
	vars.Row16_End = 328
	vars.Row17_Start = 329
	vars.Row17_End = 367
	
	vars.Col0_Start = -502
	vars.Col0_End = -292
	vars.Col1_Start = -291
	vars.Col1_End = -81
	vars.Col2_Start = -80
	vars.Col2_End = 130
	vars.Col3_Start = 131
	vars.Col3_End = 183
	vars.Col4_Start = 184
	vars.Col4_End = 289
	vars.Col5_Start = 290
	vars.Col5_End = 395
	vars.Col6_Start = 396
	vars.Col6_End = 501
	
	
	//There are 6 different conditions (3 block types that can be combined together in 6 ways)
	//This determines, based on participants number which order people get.
	
	if(vars.subject_nr%6 === 1){
	    vars.block1 = 0
	    vars.block2 = 1
	    vars.block3 = 2
	    vars.group = 1
	}
	if(vars.subject_nr%6 === 2){
	    vars.block1 = 0
	    vars.block2 = 2
	    vars.block3 = 1
	    vars.group = 2
	}
	if(vars.subject_nr%6 === 3){
	    vars.block1 = 1
	    vars.block2 = 0
	    vars.block3 = 2
	    vars.group = 3
	}
	if(vars.subject_nr%6 === 4){
	    vars.block1 = 1
	    vars.block2 = 2
	    vars.block3 = 0
	    vars.group = 4
	}
	if(vars.subject_nr%6 === 5){
	    vars.block1 = 2
	    vars.block2 = 1
	    vars.block3 = 0
	    vars.group = 5
	}
	else if(vars.subject_nr%6 === 0){
	    vars.block1 = 2
	    vars.block2 = 0
	    vars.block3 = 1
	    vars.group = 6
	}
	
	//The list of food conditions from table 3, but I changed the order to A, B, X instead of X, A, B as in the table
	vars.stim1 = ['Strawberries', 'Peanuts', 'Shrimp']
	vars.stim2 = ['Bran', 'Cabbage', 'Yogurt']
	vars.stim3 = ['Chicken', 'Mustard', 'Bananas']
	vars.stim4 = ['Walnuts', 'Peaches', 'Wheat']
	vars.stim5 = ['Horseradish', 'Lobster', 'Corn']
	vars.stim6 = ['Cheese', 'Pork', 'Blueberries']
	
	
	if(vars.group == 1){ //their order is 2, 1, 3
	vars.A1 = vars.stim2[0]
	vars.B1 = vars.stim2[1]
	vars.X1 = vars.stim2[2]
	vars.A2 = vars.stim1[0]
	vars.B2 = vars.stim1[1]
	vars.X2 = vars.stim1[2]
	vars.A3 = vars.stim3[0]
	vars.B3 = vars.stim3[1]
	vars.X3 = vars.stim3[2]
	vars.C = 'Celery'
	}
	
	if(vars.group == 2){ //their order is 1, 3, 2
	vars.A1 = vars.stim1[0]
	vars.B1 = vars.stim1[1]
	vars.X1 = vars.stim1[2]
	vars.A2 = vars.stim3[0]
	vars.B2 = vars.stim3[1]
	vars.X2 = vars.stim3[2]
	vars.A3 = vars.stim2[0]
	vars.B3 = vars.stim2[1]
	vars.X3 = vars.stim2[2]
	vars.C = 'Celery'
	}
	
	if(vars.group == 3){ //their order is 3, 2, 1
	vars.A1 = vars.stim3[0]
	vars.B1 = vars.stim3[1]
	vars.X1 = vars.stim3[2]
	vars.A2 = vars.stim2[0]
	vars.B2 = vars.stim2[1]
	vars.X2 = vars.stim2[2]
	vars.A3 = vars.stim1[0]
	vars.B3 = vars.stim1[1]
	vars.X3 = vars.stim1[2]
	vars.C = 'Celery'
	}
	
	if(vars.group == 4){ //their order is 5, 6, 4
	vars.A1 = vars.stim5[0]
	vars.B1 = vars.stim5[1]
	vars.X1 = vars.stim5[2]
	vars.A2 = vars.stim6[0]
	vars.B2 = vars.stim6[1]
	vars.X2 = vars.stim6[2]
	vars.A3 = vars.stim4[0]
	vars.B3 = vars.stim4[1]
	vars.X3 = vars.stim4[2]
	vars.C = 'Celery'
	}
	
	if(vars.group == 5){ //their order is 4, 5, 6
	vars.A1 = vars.stim4[0]
	vars.B1 = vars.stim4[1]
	vars.X1 = vars.stim4[2]
	vars.A2 = vars.stim5[0]
	vars.B2 = vars.stim5[1]
	vars.X2 = vars.stim5[2]
	vars.A3 = vars.stim6[0]
	vars.B3 = vars.stim6[1]
	vars.X3 = vars.stim6[2]
	vars.C = 'Celery'
	}
	
	if(vars.group == 6){ //their order is 6, 4, 5
	vars.A1 = vars.stim6[0]
	vars.B1 = vars.stim6[1]
	vars.X1 = vars.stim6[2]
	vars.A2 = vars.stim4[0]
	vars.B2 = vars.stim4[1]
	vars.X2 = vars.stim4[2]
	vars.A3 = vars.stim5[0]
	vars.B3 = vars.stim5[1]
	vars.X3 = vars.stim5[2]
	vars.C = 'Celery'
	}
	
	
	
	//Here we create an array of possible locations. The stimuli can only appear in column 0 and 2, so not in 1 in which the outcome is located.
	//Note that "column" and 'row' are artifacts left over from when this was created in a form, bascially I translated the columns and rows to coordinates such that they can be displayed on a sketchpad.
	vars.locations = [[vars.Col0_Start + 1,vars.Row0_Start], [vars.Col0_Start + 1,vars.Row1_Start], [vars.Col0_Start + 1,vars.Row2_Start], [vars.Col0_Start + 1,vars.Row3_Start], [vars.Col0_Start + 1,vars.Row4_Start], [vars.Col0_Start + 1,vars.Row5_Start], [vars.Col0_Start + 1,vars.Row6_Start], [vars.Col0_Start + 1,vars.Row7_Start], [vars.Col0_Start + 1,vars.Row8_Start], [vars.Col0_Start + 1,vars.Row9_Start], [vars.Col0_Start + 1,vars.Row10_Start], [vars.Col0_Start + 1,vars.Row11_Start], [vars.Col0_Start + 1,vars.Row12_Start], [vars.Col0_Start + 1,vars.Row13_Start], [vars.Col2_Start + 1,vars.Row0_Start], [vars.Col2_Start + 1,vars.Row1_Start], [vars.Col2_Start + 1,vars.Row2_Start], [vars.Col2_Start + 1,vars.Row3_Start], [vars.Col2_Start + 1,vars.Row4_Start], [vars.Col2_Start + 1,vars.Row5_Start], [vars.Col2_Start + 1,vars.Row6_Start], [vars.Col2_Start + 1,vars.Row7_Start], [vars.Col2_Start + 1,vars.Row8_Start], [vars.Col2_Start + 1,vars.Row9_Start], [vars.Col2_Start + 1,vars.Row10_Start], [vars.Col2_Start + 1,vars.Row11_Start], [vars.Col2_Start + 1,vars.Row12_Start], [vars.Col2_Start + 1,vars.Row13_Start]]
	
	vars.location1X = -408
	vars.location1Y = -128
	vars.location2X = -96
	vars.location2Y = -128
	vars.locationOX = -296
	vars.locationOY = 82        //this is an O not a zero 0
	
	
	
	//Here we have an array for responses. This is used to loop over R1, R2 and R3 in the selection of which box people want to type in their answer
	vars.responses = ["R1", "R2", "R3"]
	
	vars.Responses000 = []
	vars.Responses050
	vars.Responses100
	__end__
	___prepare__
	//import Math
	//var DataFrame = require('dataframe-js').DataFrame
	__end__

define keyboard_response Keyboard000
	set timeout 15000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "0;1;2;3;4;5;6;7;8;ENTER;RETURN;RIGHT;LEFT;kp0;kp1;kp2;kp3;kp4;kp5;kp6;kp7;kp8"

define inline_javascript KeyboardResponses000
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//With right and left we can cycle through the different boxes
	if(vars.response == 'right'){
	    vars.y += 1
	    vars.current = vars.responses[vars.y%3] //this loops over the 3 items in the loop,namely R1,R2 and R3
	}
	if(vars.response == 'left'){
	    if(vars.y == 0){ //otherwise it can go out of bounds if people press left too often
	        vars.current = vars.responses[vars.y%3]
	    }
	    else{
	        vars.y -= 1
	        vars.current = vars.responses[vars.y%3]
	    }
	}
	
	//If people put in a number, then put that number in whichever rating box was selected
	//had to put 9 here as otherwise it wouldnt work with 8 somehow
	if(vars.response in [0,1,2,3,4,5,6,7,8,9]){
	    if(vars.current === "R1"){
	        vars.responseR1 = vars.response
	    }
	    if(vars.current === "R2"){
	        vars.responseR2 = vars.response
	    }
	    if(vars.current === "R3"){
	        vars.responseR3 = vars.response
	    }
	}
	
	//not a very pretty solution, but it should work!
	if(vars.response == 'kp0'){
	   if(vars.current === "R1"){
	        vars.responseR1 = 0
	    }
	    if(vars.current === "R2"){
	        vars.responseR2 = 0
	    }
	    if(vars.current === "R3"){
	        vars.responseR3 = 0
	    } 
	}
	
	if(vars.response == 'kp1'){
	   if(vars.current === "R1"){
	        vars.responseR1 = 1
	    }
	    if(vars.current === "R2"){
	        vars.responseR2 = 1
	    }
	    if(vars.current === "R3"){
	        vars.responseR3 = 1
	    } 
	}
	
	if(vars.response == 'kp2'){
	   if(vars.current === "R1"){
	        vars.responseR1 = 2
	    }
	    if(vars.current === "R2"){
	        vars.responseR2 = 2
	    }
	    if(vars.current === "R3"){
	        vars.responseR3 = 2
	    } 
	}
	
	if(vars.response == 'kp3'){
	   if(vars.current === "R1"){
	        vars.responseR1 = 3
	    }
	    if(vars.current === "R2"){
	        vars.responseR2 = 3
	    }
	    if(vars.current === "R3"){
	        vars.responseR3 = 3
	    } 
	}
	
	if(vars.response == 'kp4'){
	   if(vars.current === "R1"){
	        vars.responseR1 = 4
	    }
	    if(vars.current === "R2"){
	        vars.responseR2 = 4
	    }
	    if(vars.current === "R3"){
	        vars.responseR3 = 4
	    } 
	}
	
	if(vars.response == 'kp5'){
	   if(vars.current === "R1"){
	        vars.responseR1 = 5
	    }
	    if(vars.current === "R2"){
	        vars.responseR2 = 5
	    }
	    if(vars.current === "R3"){
	        vars.responseR3 = 5
	    } 
	}
	
	if(vars.response == 'kp6'){
	   if(vars.current === "R1"){
	        vars.responseR1 = 6
	    }
	    if(vars.current === "R2"){
	        vars.responseR2 = 6
	    }
	    if(vars.current === "R3"){
	        vars.responseR3 = 6
	    } 
	}
	
	if(vars.response == 'kp7'){
	   if(vars.current === "R1"){
	        vars.responseR1 = 7
	    }
	    if(vars.current === "R2"){
	        vars.responseR2 = 7
	    }
	    if(vars.current === "R3"){
	        vars.responseR3 = 7
	    } 
	}
	
	if(vars.response == 'kp8'){
	   if(vars.current === "R1"){
	        vars.responseR1 = 8
	    }
	    if(vars.current === "R2"){
	        vars.responseR2 = 8
	    }
	    if(vars.current === "R3"){
	        vars.responseR3 = 8
	    } 
	}
	
	
	
	
	//if someone pressed enter (or return, as it works on my keyboard)
	if(vars.response == 'enter'| vars.response == 'return'){
	    //and all of the responses are filled in, then the check will change to yes
	    if(vars.responseR1 !== '' & vars.responseR2 !== '' & vars.responseR3 !== ''){
	        vars.check = 'yes'
	    }
	    //else set the reminder to yes, to make a bit of text appear that will say "hey fill in all 3 things first pls"
	    else{
	        vars.reminder = 'yes'
	    }
	}
	
	//console.log(vars.response)
	//console.log("R1:" + vars.responseR1)
	//console.log("R2:" + vars.responseR2)
	//console.log("R3:" + vars.responseR3)
	__end__
	set _prepare ""

define feedback Outcome000_1
	set reset_variables yes
	set duration 0
	set description "Provides feedback to the participant"
	draw image center=0 file="Note.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[Stim1]" x="[pos1X]" y="[pos1Y]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[Stim2]" x="[pos2X]" y="[pos2Y]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[Outcome]" x="[locationOX]" y="[locationOY]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Day [Trial]" x=-448 y=-275 z_index=0

define inline_javascript PreviousResponses
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//i am so so sorry future me
	
	//OKAY what I did here was. I cannot dynamically put everything on the sketchpad as with my form in Python. So to get around this problem in the easiest way (as I'd like to test after two months thanks) I created a for loop with differently named variables for EVERY TRIAL, such that all these variables can be displayed
	
	vars.j=1
	console.log(vars.Responses000)
	if(vars.Trial == 2){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        console.log("vars.j" + vars.j)
	        vars.T1A = vars.Responses000[vars.j-1][0]
	        vars.T1B = vars.Responses000[vars.j-1][1]
	        vars.T1X = vars.Responses000[vars.j-1][2]
	        
	        if(vars.T1A == 999){
	            vars.T1A = 'X'
	        }
	        if(vars.T1B == 999){
	            vars.T1B = 'X'
	        }
	        if(vars.T1X == 999){
	            vars.T1X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 3){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        console.log("vars.j" + vars.j)
	        vars.T2A = vars.Responses000[vars.j-1][0]
	        vars.T2B = vars.Responses000[vars.j-1][1]
	        vars.T2X = vars.Responses000[vars.j-1][2]
	        
	        if(vars.T2A == 999){
	            vars.T2A = 'X'
	        }
	        if(vars.T2B == 999){
	            vars.T2B = 'X'
	        }
	        if(vars.T2X == 999){
	            vars.T2X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 4){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        console.log("vars.j" + vars.j)
	        vars.T3A = vars.Responses000[vars.j-1][0]
	        vars.T3B = vars.Responses000[vars.j-1][1]
	        vars.T3X = vars.Responses000[vars.j-1][2]
	        
	        if(vars.T3A == 999){
	            vars.T3A = 'X'
	        }
	        if(vars.T3B == 999){
	            vars.T3B = 'X'
	        }
	        if(vars.T3X == 999){
	            vars.T3X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 5){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        console.log("vars.j" + vars.j)
	        vars.T4A = vars.Responses000[vars.j-1][0]
	        vars.T4B = vars.Responses000[vars.j-1][1]
	        vars.T4X = vars.Responses000[vars.j-1][2]
	        
	        if(vars.T4A == 999){
	            vars.T4A = 'X'
	        }
	        if(vars.T4B == 999){
	            vars.T4B = 'X'
	        }
	        if(vars.T4X == 999){
	            vars.T4X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 6){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        console.log("vars.j" + vars.j)
	        vars.T5A = vars.Responses000[vars.j-1][0]
	        vars.T5B = vars.Responses000[vars.j-1][1]
	        vars.T5X = vars.Responses000[vars.j-1][2]
	        
	        if(vars.T5A == 999){
	            vars.T5A = 'X'
	        }
	        if(vars.T5B == 999){
	            vars.T5B = 'X'
	        }
	        if(vars.T5X == 999){
	            vars.T5X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 7){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        console.log("vars.j" + vars.j)
	        vars.T6A = vars.Responses000[vars.j-1][0]
	        vars.T6B = vars.Responses000[vars.j-1][1]
	        vars.T6X = vars.Responses000[vars.j-1][2]
	        
	        if(vars.T6A == 999){
	            vars.T6A = 'X'
	        }
	        if(vars.T6B == 999){
	            vars.T6B = 'X'
	        }
	        if(vars.T6X == 999){
	            vars.T6X = 'X'
	        }
	    }
	}
	if(vars.Trial == 8){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        console.log("vars.j" + vars.j)
	        vars.T7A = vars.Responses000[vars.j-1][0]
	        vars.T7B = vars.Responses000[vars.j-1][1]
	        vars.T7X = vars.Responses000[vars.j-1][2]
	        
	        if(vars.T7A == 999){
	            vars.T7A = 'X'
	        }
	        if(vars.T7B == 999){
	            vars.T7B = 'X'
	        }
	        if(vars.T7X == 999){
	            vars.T7X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 9){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        console.log("vars.j" + vars.j)
	        vars.T8A = vars.Responses000[vars.j-1][0]
	        vars.T8B = vars.Responses000[vars.j-1][1]
	        vars.T8X = vars.Responses000[vars.j-1][2]
	        
	        if(vars.T8A == 999){
	            vars.T8A = 'X'
	        }
	        if(vars.T8B == 999){
	            vars.T8B = 'X'
	        }
	        if(vars.T8X == 999){
	            vars.T8X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 10){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        console.log("vars.j" + vars.j)
	        vars.T9A = vars.Responses000[vars.j-1][0]
	        vars.T9B = vars.Responses000[vars.j-1][1]
	        vars.T9X = vars.Responses000[vars.j-1][2]
	        
	        if(vars.T9A == 999){
	            vars.T9A = 'X'
	        }
	        if(vars.T9B == 999){
	            vars.T9B = 'X'
	        }
	        if(vars.T9X == 999){
	            vars.T9X = 'X'
	        }
	    }
	}
	if(vars.Trial == 11){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        console.log("vars.j" + vars.j)
	        vars.T10A = vars.Responses000[vars.j-1][0]
	        vars.T10B = vars.Responses000[vars.j-1][1]
	        vars.T10X = vars.Responses000[vars.j-1][2]
	        
	        if(vars.T10A == 999){
	            vars.T10A = 'X'
	        }
	        if(vars.T10B == 999){
	            vars.T10B = 'X'
	        }
	        if(vars.T10X == 999){
	            vars.T10X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 12){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        console.log("vars.j" + vars.j)
	        vars.T11A = vars.Responses000[vars.j-1][0]
	        vars.T11B = vars.Responses000[vars.j-1][1]
	        vars.T11X = vars.Responses000[vars.j-1][2]
	        
	        if(vars.T11A == 999){
	            vars.T11A = 'X'
	        }
	        if(vars.T11B == 999){
	            vars.T11B = 'X'
	        }
	        if(vars.T11X == 999){
	            vars.T11X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 13){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        console.log("vars.j" + vars.j)
	        vars.T12A = vars.Responses000[vars.j-1][0]
	        vars.T12B = vars.Responses000[vars.j-1][1]
	        vars.T12X = vars.Responses000[vars.j-1][2]
	        
	        if(vars.T12A == 999){
	            vars.T12A = 'X'
	        }
	        if(vars.T12B == 999){
	            vars.T12B = 'X'
	        }
	        if(vars.T12X == 999){
	            vars.T12X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 14){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        console.log("vars.j" + vars.j)
	        vars.T13A = vars.Responses000[vars.j-1][0]
	        vars.T13B = vars.Responses000[vars.j-1][1]
	        vars.T13X = vars.Responses000[vars.j-1][2]
	        
	        if(vars.T13A == 999){
	            vars.T13A = 'X'
	        }
	        if(vars.T13B == 999){
	            vars.T13B = 'X'
	        }
	        if(vars.T13X == 999){
	            vars.T13X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 15){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        console.log("vars.j" + vars.j)
	        vars.T14A = vars.Responses000[vars.j-1][0]
	        vars.T14B = vars.Responses000[vars.j-1][1]
	        vars.T14X = vars.Responses000[vars.j-1][2]
	        
	        if(vars.T14A == 999){
	            vars.T14A = 'X'
	        }
	        if(vars.T14B == 999){
	            vars.T14B = 'X'
	        }
	        if(vars.T14X == 999){
	            vars.T14X = 'X'
	        }
	    }
	}
	
	if(vars.Trial == 16){
	    for(vars.j = 1; vars.j<vars.Trial;vars.j++){
	        console.log("vars.j" + vars.j)
	        vars.T15A = vars.Responses000[vars.j-1][0]
	        vars.T15B = vars.Responses000[vars.j-1][1]
	        vars.T15X = vars.Responses000[vars.j-1][2]
	        
	        if(vars.T15A == 999){
	            vars.T15A = 'X'
	        }
	        if(vars.T15B == 999){
	            vars.T15B = 'X'
	        }
	        if(vars.T15X == 999){
	            vars.T15X = 'X'
	        }
	    }
	}
	__end__
	set _prepare ""

define feedback Rating000
	set reset_variables yes
	set duration 0
	set description "Provides feedback to the participant"
	draw image center=0 file="Note.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=14 html=yes show_if=always text="[A]" x="[Col4_Start]" y="[Row0_Start]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=14 html=yes show_if=always text="[B]" x="[Col5_Start]" y="[Row0_Start]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=14 html=yes show_if=always text="[X]" x="[Col6_Start]" y="[Row0_Start]" z_index=0
	draw rect color="#f8f8ff" fill=1 h=32 penwidth=1 show_if=always w=50 x="[Col4_Start]" y="[TrialCoordinate]" z_index=0
	draw rect color="#f8f8ff" fill=1 h=32 penwidth=1 show_if=always w=50 x="[Col5_Start]" y="[TrialCoordinate]" z_index=0
	draw rect color="#f8f8ff" fill=1 h=32 penwidth=1 show_if=always w=50 x="[Col6_Start]" y="[TrialCoordinate]" z_index=0
	draw rect color="#00b300" fill=0 h=32 penwidth=1 show_if="[current]=R1" w=50 x="[Col4_Start]" y="[TrialCoordinate]" z_index=0
	draw rect color="#00b300" fill=0 h=32 penwidth=1 show_if="[current]=R2" w=50 x="[Col5_Start]" y="[TrialCoordinate]" z_index=0
	draw rect color="#00b300" fill=0 h=32 penwidth=1 show_if="[current]=R3" w=50 x="[Col6_Start]" y="[TrialCoordinate]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[responseR1]" x="[Col4_Start]" y="[TrialCoordinate]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[responseR2]" x="[Col5_Start]" y="[TrialCoordinate]" z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[responseR3]" x="[Col6_Start]" y="[TrialCoordinate]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[Stim1]" x="[pos1X]" y="[pos1Y]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[Stim2]" x="[pos2X]" y="[pos2Y]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[Outcome]" x="[locationOX]" y="[locationOY]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=1 x="[Col3_Start]" y="[Row1_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=2 x="[Col3_Start]" y="[Row2_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=3 x="[Col3_Start]" y="[Row3_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=4 x="[Col3_Start]" y="[Row4_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=5 x="[Col3_Start]" y="[Row5_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=6 x="[Col3_Start]" y="[Row6_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=7 x="[Col3_Start]" y="[Row7_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=8 x="[Col3_Start]" y="[Row8_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=9 x="[Col3_Start]" y="[Row9_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=10 x="[Col3_Start]" y="[Row10_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=11 x="[Col3_Start]" y="[Row11_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=12 x="[Col3_Start]" y="[Row12_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=13 x="[Col3_Start]" y="[Row13_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=14 x="[Col3_Start]" y="[Row14_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=15 x="[Col3_Start]" y="[Row15_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=16 x="[Col3_Start]" y="[Row16_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=14 html=yes show_if="[reminder]=yes" text="Please fill in all three scores first!" x="[Col4_Start]" y="[Row17_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=2" text="[T1A]" x="[Col4_Start]" y="[Row1_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=2" text="[T1B]" x="[Col5_Start]" y="[Row1_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=2" text="[T1X]" x="[Col6_Start]" y="[Row1_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=3" text="[T2A]" x="[Col4_Start]" y="[Row2_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=3" text="[T2B]" x="[Col5_Start]" y="[Row2_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=3" text="[T2X]" x="[Col6_Start]" y="[Row2_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=4" text="[T3A]" x="[Col4_Start]" y="[Row3_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=4" text="[T3B]" x="[Col5_Start]" y="[Row3_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=4" text="[T3X]" x="[Col6_Start]" y="[Row3_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=5" text="[T4A]" x="[Col4_Start]" y="[Row4_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=5" text="[T4B]" x="[Col5_Start]" y="[Row4_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=5" text="[T4X]" x="[Col6_Start]" y="[Row4_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=6" text="[T5A]" x="[Col4_Start]" y="[Row5_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=6" text="[T5B]" x="[Col5_Start]" y="[Row5_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=6" text="[T5X]" x="[Col6_Start]" y="[Row5_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=7" text="[T6A]" x="[Col4_Start]" y="[Row6_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=7" text="[T6B]" x="[Col5_Start]" y="[Row6_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=7" text="[T6X]" x="[Col6_Start]" y="[Row6_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=8" text="[T7A]" x="[Col4_Start]" y="[Row7_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=8" text="[T7B]" x="[Col5_Start]" y="[Row7_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=8" text="[T7X]" x="[Col6_Start]" y="[Row7_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=9" text="[T8A]" x="[Col4_Start]" y="[Row8_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=9" text="[T8B]" x="[Col5_Start]" y="[Row8_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=9" text="[T8X]" x="[Col6_Start]" y="[Row8_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=10" text="[T9A]" x="[Col4_Start]" y="[Row9_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=10" text="[T9B]" x="[Col5_Start]" y="[Row9_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=10" text="[T9X]" x="[Col6_Start]" y="[Row9_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=11" text="[T10A]" x="[Col4_Start]" y="[Row10_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=11" text="[T10B]" x="[Col5_Start]" y="[Row10_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=11" text="[T10X]" x="[Col6_Start]" y="[Row10_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=12" text="[T11A]" x="[Col4_Start]" y="[Row11_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=12" text="[T11B]" x="[Col5_Start]" y="[Row11_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=12" text="[T11X]" x="[Col6_Start]" y="[Row11_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=13" text="[T12A]" x="[Col4_Start]" y="[Row12_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=13" text="[T12B]" x="[Col5_Start]" y="[Row12_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=13" text="[T12X]" x="[Col6_Start]" y="[Row12_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=14" text="[T13A]" x="[Col4_Start]" y="[Row13_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=14" text="[T13B]" x="[Col5_Start]" y="[Row13_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=14" text="[T13X]" x="[Col6_Start]" y="[Row13_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=15" text="[T14A]" x="[Col4_Start]" y="[Row14_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=15" text="[T14B]" x="[Col5_Start]" y="[Row14_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=15" text="[T14X]" x="[Col6_Start]" y="[Row14_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=16" text="[T15A]" x="[Col4_Start]" y="[Row15_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=16" text="[T15B]" x="[Col5_Start]" y="[Row15_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[Trial]>=16" text="[T15X]" x="[Col6_Start]" y="[Row15_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Day [Trial]" x=-448 y=-275 z_index=0

define repeat_cycle Repeat_cycle000
	set description "Optionally repeat a cycle from a loop"
	set condition "[check] == no and [timeout_occurred] == no"

define feedback Stim000_1
	set reset_variables yes
	set duration 0
	set description "Provides feedback to the participant"
	draw image center=0 file="Note.png" scale=1 show_if=always x="[Col0_Start]" y="[Row0_Start]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[Stim1]" x="[pos1X]" y="[pos1Y]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[Stim2]" x="[pos2X]" y="[pos2Y]" z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Day [Trial]" x=-448 y=-275 z_index=0

define notepad TODO
	set note ""
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_javascript TrialInitializer000
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	vars.math = Math.random()
	
	if(vars.math <= 0.5){
	vars.pos1X = vars.location1X
	vars.pos1Y = vars.location1Y
	vars.pos2X = vars.location2X
	vars.pos2Y = vars.location2Y
	}
	if(vars.math > 0.5){
	vars.pos1X = vars.location2X
	vars.pos1Y = vars.location2Y
	vars.pos2X = vars.location1X
	vars.pos2Y = vars.location1Y
	}
	console.log(vars.math)
	console.log('pos1x: ' + vars.pos1X)
	console.log('pos1y: ' + vars.pos1Y)
	console.log('pos2x: ' + vars.pos2X)
	console.log('pos2y: ' + vars.pos2Y)
	
	
	//From locations, pick a random item (list), then put the first item of this list 
	//vars.pos1 = vars.locations[Math.floor(Math.random() * vars.locations.length)]
	//vars.pos1X = vars.pos1[0]
	//vars.pos1Y = vars.pos1[1]
	
	//vars.temp = []
	
	//create an array that has all the points in it that are not in the same column as the previous stimuli
	//vars.i = 0
	//for(vars.i = 0; vars.i<vars.locations.length;vars.i++){
	//    if(vars.locations[vars.i][0] != vars.pos1X){
	//        vars.temp.push(vars.locations[vars.i])}
	//}
	
	//then pick a random one again
	//vars.pos2 = vars.temp[Math.floor(Math.random()*vars.temp.length)]
	//vars.pos2X = vars.pos2[0]
	//vars.pos2Y = vars.pos2[1]
	
	
	
	//Set in place a .check, to check if all three values are filled in later on
	//a .reminder to indicate whether people clicked on enter too soon
	//a .current to indicate which textbox is selected/highlighted
	//and a .y which will be the indicator of which text box is selected (currently - so vars.responses[0])
	vars.check = 'no'
	vars.reminder = 'no'
	vars.current = vars.responses[0]
	vars.y = 0
	
	//Then we have the default input for the response for responses 1,2 and 3
	vars.responseR1 = ''
	vars.responseR2 = ''
	vars.responseR3 = ''
	__end__

define inline_javascript current_time
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.current_time = new Date().getTime();
	//how much time has passed?
	vars.time_passed = vars.current_time - vars.starting_time
	//update the timeout
	vars.var_timeout = 15000 - vars.time_passed
	//Make sure that the timeout cannot be negative
	if(vars.var_timeout <=0){
	    //change the variable keeping track
	    vars.timeout_occurred = "yes"
	}
	//console.log("var_timeout: " + vars.var_timeout)
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run TODO always
	run new_form_text_display always
	run Initialization_1 always
	run new_loop_1 always
	run new_inline_javascript always

define feedback new_feedback
	set reset_variables yes
	set duration 0
	set description "Provides feedback to the participant"

define form_text_display new_form_text_display
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Start!"
	set margins "50;50;50;50"
	set form_title Welcome
	__form_text__
	Hi there! 
	
	Here is a small demo of my experiment. I'll get it working for all conditions soon but I wanted to show you right away!!
	
	The controls are: left and right arrow keys to select a box to fill in. Then type 1-9 on your keyboard (no numpad), and once everything is filled in, press enter!
	
	Hope you enjoy this little demonstration!
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define inline_javascript new_inline_javascript
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//var surveyUrl = "https://rug.eu.qualtrics.com/jfe/form/SV_3kQ0z4Q65Umz69U"
	//vars.surveyUrl = surveyUrl
	
	//try {
	//	jatos.endStudyAndRedirect(surveyUrl);	
	//} catch {
		// for testing without Jatos ('Run in browser') 
	//	window.open(surveyUrl); 
	//}
	__end__
	set _prepare ""

define inline_javascript new_inline_javascript_1
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//if nothing was filled in for either R1, R2 or R3 (because time ran out for example), then fill in 999 so we can identify and sort on that later
	if(vars.responseR1 === ''){
	    vars.responseR1 = 999
	}
	if(vars.responseR2 === ''){
	    vars.responseR2 = 999
	}
	if(vars.responseR3 === ''){
	    vars.responseR3 = 999
	}
	
	//combine all the new answers into a list, and put that list into the list of lists of the responses for this condition
	vars.NewAnswers = [vars.responseR1, vars.responseR2, vars.responseR3]
	vars.Responses000.push(vars.NewAnswers)
	//console.log(vars.Responses000)
	__end__
	set _prepare ""

define inline_javascript new_inline_javascript_2
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run "console.log(vars.response)"
	set _prepare ""

define keyboard_response new_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define logger new_logger
	set description "Logs experimental data"
	set auto_log yes

define loop new_loop_1
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 A "[A1]"
	setcycle 0 B "[B1]"
	setcycle 0 Outcome "Allergic reaction"
	setcycle 0 Stim1 "[A1]"
	setcycle 0 Stim2 "[X1]"
	setcycle 0 Trial 1
	setcycle 0 TrialCoordinate "[Row1_Start]"
	setcycle 0 TrialCoordinateEnd "[Row1_End]"
	setcycle 0 X "[X1]"
	setcycle 1 A "[A1]"
	setcycle 1 B "[B1]"
	setcycle 1 Outcome "No allergic reaction"
	setcycle 1 Stim1 "[B1]"
	setcycle 1 Stim2 "[X1]"
	setcycle 1 Trial 2
	setcycle 1 TrialCoordinate "[Row2_Start]"
	setcycle 1 TrialCoordinateEnd "[Row2_End]"
	setcycle 1 X "[X1]"
	setcycle 2 A "[A1]"
	setcycle 2 B "[B1]"
	setcycle 2 Outcome "Allergic reaction"
	setcycle 2 Stim1 "[B1]"
	setcycle 2 Stim2 "[X1]"
	setcycle 2 Trial 3
	setcycle 2 TrialCoordinate "[Row3_Start]"
	setcycle 2 TrialCoordinateEnd "[Row3_End]"
	setcycle 2 X "[X1]"
	setcycle 3 A "[A1]"
	setcycle 3 B "[B1]"
	setcycle 3 Outcome "No allergic reaction"
	setcycle 3 Stim1 "[A1]"
	setcycle 3 Stim2 "[X1]"
	setcycle 3 Trial 4
	setcycle 3 TrialCoordinate "[Row4_Start]"
	setcycle 3 TrialCoordinateEnd "[Row4_End]"
	setcycle 3 X "[X1]"
	setcycle 4 A "[A1]"
	setcycle 4 B "[B1]"
	setcycle 4 Outcome "No allergic reaction"
	setcycle 4 Stim1 "[A1]"
	setcycle 4 Stim2 "[X1]"
	setcycle 4 Trial 5
	setcycle 4 TrialCoordinate "[Row5_Start]"
	setcycle 4 TrialCoordinateEnd "[Row5_End]"
	setcycle 4 X "[X1]"
	setcycle 5 A "[A1]"
	setcycle 5 B "[B1]"
	setcycle 5 Outcome "Allergic reaction"
	setcycle 5 Stim1 "[B1]"
	setcycle 5 Stim2 "[X1]"
	setcycle 5 Trial 6
	setcycle 5 TrialCoordinate "[Row6_Start]"
	setcycle 5 TrialCoordinateEnd "[Row6_End]"
	setcycle 5 X "[X1]"
	setcycle 6 A "[A1]"
	setcycle 6 B "[B1]"
	setcycle 6 Outcome "Allergic reaction"
	setcycle 6 Stim1 "[A1]"
	setcycle 6 Stim2 "[X1]"
	setcycle 6 Trial 7
	setcycle 6 TrialCoordinate "[Row7_Start]"
	setcycle 6 TrialCoordinateEnd "[Row7_End]"
	setcycle 6 X "[X1]"
	setcycle 7 A "[A1]"
	setcycle 7 B "[B1]"
	setcycle 7 Outcome "No allergic reaction"
	setcycle 7 Stim1 "[B1]"
	setcycle 7 Stim2 "[X1]"
	setcycle 7 Trial 8
	setcycle 7 TrialCoordinate "[Row8_Start]"
	setcycle 7 TrialCoordinateEnd "[Row8_End]"
	setcycle 7 X "[X1]"
	setcycle 8 A "[A1]"
	setcycle 8 B "[B1]"
	setcycle 8 Outcome "Allergic reaction"
	setcycle 8 Stim1 "[B1]"
	setcycle 8 Stim2 "[X1]"
	setcycle 8 Trial 9
	setcycle 8 TrialCoordinate "[Row9_Start]"
	setcycle 8 TrialCoordinateEnd "[Row9_End]"
	setcycle 8 X "[X1]"
	setcycle 9 A "[A1]"
	setcycle 9 B "[B1]"
	setcycle 9 Outcome "No allergic reaction"
	setcycle 9 Stim1 "[A1]"
	setcycle 9 Stim2 "[X1]"
	setcycle 9 Trial 10
	setcycle 9 TrialCoordinate "[Row10_Start]"
	setcycle 9 TrialCoordinateEnd "[Row10_End]"
	setcycle 9 X "[X1]"
	setcycle 10 A "[A1]"
	setcycle 10 B "[B1]"
	setcycle 10 Outcome "No allergic reaction"
	setcycle 10 Stim1 "[B1]"
	setcycle 10 Stim2 "[X1]"
	setcycle 10 Trial 11
	setcycle 10 TrialCoordinate "[Row11_Start]"
	setcycle 10 TrialCoordinateEnd "[Row11_End]"
	setcycle 10 X "[X1]"
	setcycle 11 A "[A1]"
	setcycle 11 B "[B1]"
	setcycle 11 Outcome "Allergic reaction"
	setcycle 11 Stim1 "[A1]"
	setcycle 11 Stim2 "[X1]"
	setcycle 11 Trial 12
	setcycle 11 TrialCoordinate "[Row12_Start]"
	setcycle 11 TrialCoordinateEnd "[Row12_End]"
	setcycle 11 X "[X1]"
	setcycle 12 A "[A1]"
	setcycle 12 B "[B1]"
	setcycle 12 Outcome "No allergic reaction"
	setcycle 12 Stim1 "[A1]"
	setcycle 12 Stim2 "[X1]"
	setcycle 12 Trial 13
	setcycle 12 TrialCoordinate "[Row13_Start]"
	setcycle 12 TrialCoordinateEnd "[Row13_End]"
	setcycle 12 X "[X1]"
	setcycle 13 A "[A1]"
	setcycle 13 B "[B1]"
	setcycle 13 Outcome "Allergic reaction"
	setcycle 13 Stim1 "[B1]"
	setcycle 13 Stim2 "[X1]"
	setcycle 13 Trial 14
	setcycle 13 TrialCoordinate "[Row14_Start]"
	setcycle 13 TrialCoordinateEnd "[Row14_End]"
	setcycle 13 X "[X1]"
	setcycle 14 A "[A1]"
	setcycle 14 B "[B1]"
	setcycle 14 Outcome "Allergic reaction"
	setcycle 14 Stim1 "[A1]"
	setcycle 14 Stim2 "[X1]"
	setcycle 14 Trial 15
	setcycle 14 TrialCoordinate "[Row15_Start]"
	setcycle 14 TrialCoordinateEnd "[Row15_End]"
	setcycle 14 X "[X1]"
	setcycle 15 A "[A1]"
	setcycle 15 B "[B1]"
	setcycle 15 Outcome "No allergic reaction"
	setcycle 15 Stim1 "[B1]"
	setcycle 15 Stim2 "[X1]"
	setcycle 15 Trial 16
	setcycle 15 TrialCoordinate "[Row16_Start]"
	setcycle 15 TrialCoordinateEnd "[Row16_End]"
	setcycle 15 X "[X1]"
	run new_sequence_1

define sequence new_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run TrialInitializer000 always
	run Stim000_1 always
	run Outcome000_1 always
	run set_timer always
	run Click_loop000 always
	run new_inline_javascript_1 always
	run new_logger always

define inline_javascript set_timer
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//create a timeout variable, and this makes sure it resets every trial
	vars.var_timeout = 15000
	//the current time stamp before starting the click loop
	vars.starting_time = new Date().getTime();
	//create a variable that checks if a timeout occured
	vars.timeout_occurred = "no"
	__end__
	set _prepare ""

