---
API: 2.1
OpenSesame: 3.3.6
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title Experiment1
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground "#000000"
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/Sanne/Dropbox/MasterProject/Experiments"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#f1f1f1"

define inline_script Cond000Outcome
	set description "Executes Python code"
	set _run "#Everything has been moved to prepare!"
	___prepare__
	#Creating a form that has 7 colomns, 3 for the stimuli part of the screen and 4 for the rating part of the screen, 18 rows (16 trials plus pictures and one for the next button) and that has relatively small margins.
	Cond000 = Form(cols=[4,4,4,1,2,2,2], rows=[2,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1], margins=(10,10,10,10), spacing = 10)
	Cond000.timeout = 1000 #this part of the experiment takes 1 second
	
	#Create the background for both the stimuli (earth) and the rating (screen). 
	#Res of screen is 1024x768, so minus margins, internal spacing and such we will need a pic of 
	#appro 614x728 for the earth and 350x728 for the screen.
	earth = ImageWidget(path=pool["bgLight4.png"], adjust=True)
	
	
	
	#Create the stimuli that are shown on the screen. These depend on the Trial we're in
	S1 = ImageWidget(path=pool[var.Stim1])
	S2 = ImageWidget(path=pool[var.Stim2])
	
	#Create the outcome that is shown on screen. This is either "Diamond.png" or "NoDiamond.png" depending on what the loop states.
	Outcome = ImageWidget(path=pool[var.Outcome])
	
	#############################################################################################################################
	#This is what wouldve been in RUN
	
	
	#First set the background images such that they can be displayed behind other pictures
	#They span the amount of columns and rows as their area is big.
	Cond000.set_widget(earth, (0,0), colspan=3, rowspan=17)
	
	
	#The outcome should be at the same place always, in this case in the middle of the screen, such that the stimuli can be positioned around it
	Cond000.set_widget(Outcome, (1,7),rowspan = 4)
	
	#Putting the two stimuli on screen. Their positions are based on the ones defined in prepare of Stim.
	if var.pos1Y == 0:
	    var.rs1 = 3
	if var.pos2Y == 0:
	    var.rs2 = 3
	else:
	    var.rs1 = 4
	    var.rs2 = 4
	Cond000.set_widget(S1, (var.pos1X,var.pos1Y), rowspan = var.rs1)
	Cond000.set_widget(S2, (var.pos2X,var.pos2Y), rowspan = var.rs2)
	 
	
	Cond000._exec()
	__end__

define inline_script Cond000Ratings
	set description "Executes Python code"
	set _run "#Everything has been moved to prepare!"
	___prepare__
	#A form validator that makes sure the next button can only be pressed after every rating is filled in.
	def my_form_validator():
	
	    return var.RatingA != u'' and var.RatingB != u'' and var.RatingX != u''
	
	
	#Creating a form that has 7 colomns, 3 for the stimuli part of the screen and 4 for the rating part of the screen, 18 rows (16 trials plus pictures and one for the next button) and that has relatively small margins.
	Cond000 = Form(validator= my_form_validator, cols=[4,4,4,1,2,2,2], rows=[2,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1], margins=(10,10,10,10), spacing = 10)
	Cond000.timeout = 12000 #this part of the experiment takes 12 seconds
	
	#Create the background for both the stimuli (earth) and the rating (screen). 
	#Res of screen is 1024x768, so minus margins, internal spacing and such we will need a pic of 
	#appro 614x728 for the earth and 350x728 for the screen.
	earth = ImageWidget(path=pool["bgLight4.png"], adjust=True)
	#screenO = ImageWidget(path=pool["computerscreenLong.png"], adjust=True)
	
	#Create the images that appear in the log book. 
	#With adjust=True they should be approximately the same size, even though the pictures in the stimuli part might be of differing sizes.
	A = ImageWidget(path=pool[var.A], adjust = True)
	B = ImageWidget(path=pool[var.B], adjust = True)
	X = ImageWidget(path=pool[var.X], adjust = True)
	
	#Create the stimuli that are shown on the screen. These depend on the Trial we're in
	S1 = ImageWidget(path=pool[var.Stim1])
	S2 = ImageWidget(path=pool[var.Stim2])
	
	#Create the outcome that is shown on screen. This is either "Diamond.png" or "NoDiamond.png" depending on what the loop states.
	Outcome = ImageWidget(path=pool[var.Outcome])
	
	#Create the labels of the trials, basically just 1 to 16 so they can appear on screen
	for i in range(1,17):
	    exp.set(f'T{i}',Label(text=f'{i}'))
	
	#validation to check if only the numbers 0 to 8 are filled in, nothing else
	#this is done by creating a filter function for each of the stimuli ratings
	def filter_digitsA(ch):
	    #ch = re.sub("[^0-8]", "", ch) ->> trying to get numpad to work
	    #if there is nothing in there yet, accept any input from 0 to 8
	    if len(str(var.RatingA)) < 1:
	        return ch in u'012345678'
	    #If there is something in there and someone pressed backspace, then return a backspace and remove the digit
	    elif (len(str(var.RatingA)) == 1 and ch == 'backspace'):
	        return '\b'
	    #else do nothing since we don't want things like 81 or 04687 to be accepted
	    else:    
	        return
	    
	def filter_digitsB(ch):
	    if len(str(var.RatingB)) < 1:
	        return ch in u'012345678'
	    elif (len(str(var.RatingB)) == 1 and ch == 'backspace'):
	        return '\b'
	    else:    
	        return
	    
	def filter_digitsX(ch):
	    if len(str(var.RatingX)) < 1:
	        return ch in u'012345678'
	    elif (len(str(var.RatingX)) == 1 and ch == 'backspace'):
	        return '\b'
	    else:    
	        return
	       
	#Creating the boxes that can be used to put the rating in for the trial that is currently ongoing.
	RatingA = TextInput(text='', frame = True, stub = "Rate", var = 'RatingA', key_filter=filter_digitsA)
	RatingB = TextInput(text='', frame = True, stub = "Rate", var = 'RatingB', key_filter=filter_digitsB)
	RatingX = TextInput(text='', frame = True, stub = "Rate", var = 'RatingX', key_filter=filter_digitsX)
	
	Next = Button(text='Next', var = 'NextButton')
	
	#############################################################################################################################
	#This is what wouldve been in RUN
	
	
	#First set the background images such that they can be displayed behind other pictures
	#They span the amount of columns and rows as their area is big.
	Cond000.set_widget(earth, (0,0), colspan=3, rowspan=17)
	#Cond000.set_widget(screen, (3,0), colspan=4, rowspan=17)
	
	#Then set the stimuli that show up on the rating system
	Cond000.set_widget(A, (4,0))
	Cond000.set_widget(B, (5,0))
	Cond000.set_widget(X, (6,0))
	
	#And all of the trial numbers
	for i in range(1,17):
	    Cond000.set_widget(exp.get(f'T{i}'), (3,i))
	
	#The outcome should be at the same place always, in this case in the middle of the screen, such that the stimuli can be positioned around it
	Cond000.set_widget(Outcome, (1,7),rowspan = 4)
	
	#Putting the two stimuli on screen. Their positions are based on the ones defined in prepare of Stim.
	if var.pos1Y == 0:
	    var.rs1 = 3
	if var.pos2Y == 0:
	    var.rs2 = 3
	else:
	    var.rs1 = 4
	    var.rs2 = 4
	Cond000.set_widget(S1, (var.pos1X,var.pos1Y), rowspan = var.rs1)
	Cond000.set_widget(S2, (var.pos2X,var.pos2Y), rowspan = var.rs2)
	
	#Setting the rating boxes for the current trial
	Cond000.set_widget(RatingA, (4,var.Trial))
	Cond000.set_widget(RatingB, (5,var.Trial))
	Cond000.set_widget(RatingX, (6,var.Trial))
	
	#Currently putting this in Run, such that I don't have to make new variables each time before setting them
	#IF this does give issues with the timing aspect, I will have to split it into prepare and run
	if var.Trial > 1:
	    for i in range(1,var.Trial): 
	        #Look up what was answered in that trial (kept outside of the label making)
	        var.j = var.Responses000.iat[i-1,0]
	        var.k = var.Responses000.iat[i-1,1]
	        var.l = var.Responses000.iat[i-1,2]
	        
	        #such that we can then do this: 
	        #If nothing is filled in (and the answer thus 999), display an 'X' since that is clearer to the participant
	        if var.j == 999:
	            var.j = 'X'
	        if var.k == 999:
	            var.k = 'X'
	        if var.l == 999:
	            var.l = 'X'
	        Cond000.set_widget(Label(text=var.j), (4,i))
	        Cond000.set_widget(Label(text=var.k), (5,i))
	        Cond000.set_widget(Label(text=var.l), (6,i))
	
	#if var.RatingA != '' and var.RatingB != '' and var.RatingX != '':
	Cond000.set_widget(Next, (6,17))      
	    
	
	Cond000._exec()
	
	
	#after the excecute we can be sure that something (or nothing) is filled in, so therefore we have to do this after the execute.
	
	#First check if something was filled in. If not ('') then set the value to 999 (which is an integer)
	if var.RatingA =='':
	    var.RatingA = 999
	if var.RatingB =='':
	    var.RatingB = 999
	if var.RatingX =='':
	    var.RatingX = 999
	
	#create a dataframe new answers in which we collect the answers under the same column names as the overall dataset
	var.NewAnswers = pandas.DataFrame([[int(var.RatingA),int(var.RatingB),int(var.RatingX)]], columns=['ResponsesA', 'ResponsesB', 'ResponsesX'], dtype='int')
	#Then append this row to the dataframe, to collect all answers over time
	var.Responses000 = var.Responses000.append(var.NewAnswers, ignore_index=True)
	__end__

define sequence Cond000Sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Cond000Stim always
	run Cond000Outcome always
	run Cond000Ratings always
	run new_logger always

define inline_script Cond000Stim
	set description "Executes Python code"
	set _run "#Everything has been moved to Prepare!"
	___prepare__
	#Creating a form that has 7 colomns, 3 for the stimuli part of the screen and 4 for the rating part of the screen, 18 rows (16 trials plus pictures and one for the next button) and that has relatively small margins.
	Cond000S = Form(cols=[4,4,4,1,2,2,2], rows=[2,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1], margins=(10,10,10,10), spacing = 10)
	Cond000S.timeout = 2000 #this part of the experiment takes 2 seconds
	
	#Create the background for both the stimuli (earth) and the rating (screen). 
	#Res of screen is 1024x768, so minus margins, internal spacing and such we will need a pic of 
	#approx 614x728 for the earth and 350x728 for the screen if there are 17 rows.
	#If there are 18 we will need 614x689 for earth
	earth = ImageWidget(path=pool["bgLight4.png"], adjust=True)
	#screen = ImageWidget(path=pool["computerscreenLong.png"], adjust=True)
	
	
	#Create the stimuli that are shown on the screen. These depend on the Trial we're in
	S1 = ImageWidget(path=pool[var.Stim1])
	S2 = ImageWidget(path=pool[var.Stim2])
	
	
	#To determine at what position the stimuli should be, choose a random x,y combo from all the possible combos
	var.pos1 = random.choice(var.locations)
	var.pos1X = var.pos1[0]
	var.pos1Y = var.pos1[1]
	
	#Create a temporary file such that we don't have to delete items from the original list
	var.temp = []
	
	#Then for each combination in locations, check if the first item (the x coordinate) is not the same as the x coordinate of the item chosen as position one. This makes sure that the other item will appear in the other row
	for i in range(0,len(var.locations)):
	    if var.locations[i][0] != var.pos1X:
	        var.temp.append(var.locations[i])
	
	#then pick a random option from this new list and set that as the position of your second stimuli
	var.pos2 = random.choice(var.temp)
	var.pos2X = var.pos2[0]
	var.pos2Y = var.pos2[1]
	  
	########################################################################################################################
	#This would normally be the RUN part of the code, but to keep things being able to have the same name, we put in in PREPARE
	  
	#First set the background images such that they can be displayed behind other pictures
	#They span the amount of columns and rows as their area is big.
	Cond000S.set_widget(earth, (0,0), colspan=3, rowspan=17)
	
	#If they are placed in the top of the screen, then set the rowspan to 3 instead of 4
	if var.pos1Y == 0:
	    var.rs1 = 3
	if var.pos2Y == 0:
	    var.rs2 = 3
	else:
	    var.rs1 = 4
	    var.rs2 = 4
	
	Cond000S.set_widget(S1, (var.pos1X,var.pos1Y), rowspan = var.rs1)
	Cond000S.set_widget(S2, (var.pos2X,var.pos2Y), rowspan = var.rs2)
	
	   
	Cond000S._exec()
	__end__

define inline_script Cond050Outcome
	set description "Executes Python code"
	set _run "#Everything has been moved to prepare!"
	___prepare__
	#Creating a form that has 7 colomns, 3 for the stimuli part of the screen and 4 for the rating part of the screen, 18 rows (16 trials plus pictures and one for the next button) and that has relatively small margins.
	Cond050 = Form(cols=[4,4,4,1,2,2,2], rows=[2,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1], margins=(10,10,10,10), spacing = 10)
	Cond050.timeout = 1000 #this part of the experiment takes 13 seconds
	
	#Create the background for both the stimuli (earth) and the rating (screen). 
	#Res of screen is 1024x768, so minus margins, internal spacing and such we will need a pic of 
	#appro 614x728 for the earth and 350x728 for the screen.
	earth = ImageWidget(path=pool["bgLight4.png"], adjust=True)
	
	#Create the stimuli that are shown on the screen. These depend on the Trial we're in
	S1 = ImageWidget(path=pool[var.Stim1])
	S2 = ImageWidget(path=pool[var.Stim2])
	
	#Create the outcome that is shown on screen. This is either "Diamond.png" or "NoDiamond.png" depending on what the loop states.
	Outcome = ImageWidget(path=pool[var.Outcome])
	
	#############################################################################################################################
	#This is what wouldve been in RUN
	
	
	#First set the background images such that they can be displayed behind other pictures
	#They span the amount of columns and rows as their area is big.
	Cond050.set_widget(earth, (0,0), colspan=3, rowspan=17)
	
	#The outcome should be at the same place always, in this case in the middle of the screen, such that the stimuli can be positioned around it
	Cond050.set_widget(Outcome, (1,7),rowspan = 4)
	
	#Putting the two stimuli on screen. Their positions are based on the ones defined in prepare of Stim.
	if var.pos1Y == 0:
	    var.rs1 = 3
	if var.pos2Y == 0:
	    var.rs2 = 3
	else:
	    var.rs1 = 4
	    var.rs2 = 4
	Cond050.set_widget(S1, (var.pos1X,var.pos1Y), rowspan = var.rs1)
	Cond050.set_widget(S2, (var.pos2X,var.pos2Y), rowspan = var.rs2)
	
	Cond050._exec()
	__end__

define inline_script Cond050Rating
	set description "Executes Python code"
	set _run "#Everything has been moved to prepare!"
	___prepare__
	#A form validator that makes sure the next button can only be pressed after every rating is filled in.
	def my_form_validator():
	
	    return var.RatingA != u'' and var.RatingB != u'' and var.RatingX != u''
	
	
	#Creating a form that has 7 colomns, 3 for the stimuli part of the screen and 4 for the rating part of the screen, 18 rows (16 trials plus pictures and one for the next button) and that has relatively small margins.
	Cond050 = Form(validator= my_form_validator, cols=[4,4,4,1,2,2,2], rows=[2,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1], margins=(10,10,10,10), spacing = 10)
	Cond050.timeout = 12000 #this part of the experiment takes 13 seconds
	
	#Create the background for both the stimuli (earth) and the rating (screen). 
	#Res of screen is 1024x768, so minus margins, internal spacing and such we will need a pic of 
	#appro 614x728 for the earth and 350x728 for the screen.
	earth = ImageWidget(path=pool["bgLight4.png"], adjust=True)
	
	#Create the images that appear in the log book. 
	#With adjust=True they should be approximately the same size, even though the pictures in the stimuli part might be of differing sizes.
	A = ImageWidget(path=pool[var.A], adjust = True)
	B = ImageWidget(path=pool[var.B], adjust = True)
	X = ImageWidget(path=pool[var.X], adjust = True)
	
	#Create the stimuli that are shown on the screen. These depend on the Trial we're in
	S1 = ImageWidget(path=pool[var.Stim1])
	S2 = ImageWidget(path=pool[var.Stim2])
	
	#Create the outcome that is shown on screen. This is either "Diamond.png" or "NoDiamond.png" depending on what the loop states.
	Outcome = ImageWidget(path=pool[var.Outcome])
	
	#Create the labels of the trials, basically just 1 to 16 so they can appear on screen
	for i in range(1,17):
	    exp.set(f'T{i}',Label(text=f'{i}'))
	
	#validation to check if only the numbers 0 to 8 are filled in, nothing else
	#this is done by creating a filter function for each of the stimuli ratings
	def filter_digitsA(ch):
	    #ch = re.sub("[^0-8]", "", ch) ->> trying to get numpad to work
	    #if there is nothing in there yet, accept any input from 0 to 8
	    if len(str(var.RatingA)) < 1:
	        return ch in u'012345678'
	    #If there is something in there and someone pressed backspace, then return a backspace and remove the digit
	    elif (len(str(var.RatingA)) == 1 and ch == 'backspace'):
	        return '\b'
	    #else do nothing since we don't want things like 81 or 04687 to be accepted
	    else:    
	        return
	    
	def filter_digitsB(ch):
	    if len(str(var.RatingB)) < 1:
	        return ch in u'012345678'
	    elif (len(str(var.RatingB)) == 1 and ch == 'backspace'):
	        return '\b'
	    else:    
	        return
	    
	def filter_digitsX(ch):
	    if len(str(var.RatingX)) < 1:
	        return ch in u'012345678'
	    elif (len(str(var.RatingX)) == 1 and ch == 'backspace'):
	        return '\b'
	    else:    
	        return
	       
	#Creating the boxes that can be used to put the rating in for the trial that is currently ongoing.
	RatingA = TextInput(text='', frame = True, stub = "Rate", var = 'RatingA', key_filter=filter_digitsA)
	RatingB = TextInput(text='', frame = True, stub = "Rate", var = 'RatingB', key_filter=filter_digitsB)
	RatingX = TextInput(text='', frame = True, stub = "Rate", var = 'RatingX', key_filter=filter_digitsX)
	
	Next = Button(text='Next', var = "NextButton")
	
	#############################################################################################################################
	#This is what wouldve been in RUN
	
	
	#First set the background images such that they can be displayed behind other pictures
	#They span the amount of columns and rows as their area is big.
	Cond050.set_widget(earth, (0,0), colspan=3, rowspan=17)
	#Cond000.set_widget(screen, (3,0), colspan=4, rowspan=17)
	
	#Then set the stimuli that show up on the rating system
	Cond050.set_widget(A, (4,0))
	Cond050.set_widget(B, (5,0))
	Cond050.set_widget(X, (6,0))
	
	#And all of the trial numbers
	for i in range(1,17):
	    Cond050.set_widget(exp.get(f'T{i}'), (3,i))
	
	#The outcome should be at the same place always, in this case in the middle of the screen, such that the stimuli can be positioned around it
	Cond050.set_widget(Outcome, (1,7),rowspan = 4)
	
	#Putting the two stimuli on screen. Their positions are based on the ones defined in prepare of Stim.
	if var.pos1Y == 0:
	    var.rs1 = 3
	if var.pos2Y == 0:
	    var.rs2 = 3
	else:
	    var.rs1 = 4
	    var.rs2 = 4
	Cond050.set_widget(S1, (var.pos1X,var.pos1Y), rowspan = var.rs1)
	Cond050.set_widget(S2, (var.pos2X,var.pos2Y), rowspan = var.rs2)
	
	#Setting the rating boxes for the current trial
	Cond050.set_widget(RatingA, (4,var.Trial))
	Cond050.set_widget(RatingB, (5,var.Trial))
	Cond050.set_widget(RatingX, (6,var.Trial))
	
	#Currently putting this in Run, such that I don't have to make new variables each time before setting them
	#IF this does give issues with the timing aspect, I will have to split it into prepare and run
	if var.Trial > 1:
	    for i in range(1,var.Trial): 
	        #Look up what was answered in that trial (kept outside of the label making)
	        var.j = var.Responses050.iat[i-1,0]
	        var.k = var.Responses050.iat[i-1,1]
	        var.l = var.Responses050.iat[i-1,2]
	        
	        #such that we can then do this: 
	        #If nothing is filled in (and the answer thus 999), display an 'X' since that is clearer to the participant
	        if var.j == 999:
	            var.j = 'X'
	        if var.k == 999:
	            var.k = 'X'
	        if var.l == 999:
	            var.l = 'X'
	        Cond050.set_widget(Label(text=var.j), (4,i))
	        Cond050.set_widget(Label(text=var.k), (5,i))
	        Cond050.set_widget(Label(text=var.l), (6,i))
	
	#if var.RatingA != '' and var.RatingB != '' and var.RatingX != '':
	Cond050.set_widget(Next, (6,17))      
	    
	
	Cond050._exec()
	
	
	#after the excecute we can be sure that something (or nothing) is filled in, so therefore we have to do this after the execute.
	
	#First check if something was filled in. If not ('') then set the value to 999 (which is an integer)
	if var.RatingA =='':
	    var.RatingA = 999
	if var.RatingB =='':
	    var.RatingB = 999
	if var.RatingX =='':
	    var.RatingX = 999
	
	#create a dataframe new answers in which we collect the answers under the same column names as the overall dataset
	var.NewAnswers = pandas.DataFrame([[int(var.RatingA),int(var.RatingB),int(var.RatingX)]], columns=['ResponsesA', 'ResponsesB', 'ResponsesX'], dtype='int')
	#Then append this row to the dataframe, to collect all answers over time
	var.Responses050 = var.Responses050.append(var.NewAnswers, ignore_index=True)
	#print(var.Responses000)
	__end__

define sequence Cond050Sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Cond050Stim always
	run Cond050Outcome always
	run Cond050Rating always
	run new_logger always

define inline_script Cond050Stim
	set description "Executes Python code"
	set _run "#Everything has been moved to Prepare!"
	___prepare__
	#Creating a form that has 7 colomns, 3 for the stimuli part of the screen and 4 for the rating part of the screen, 18 rows (16 trials plus pictures and one for the next button) and that has relatively small margins.
	Cond050S = Form(cols=[4,4,4,1,2,2,2], rows=[2,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1], margins=(10,10,10,10), spacing = 10)
	Cond050S.timeout = 2000 #this part of the experiment takes 2 seconds
	
	#Create the background for both the stimuli (earth) and the rating (screen). 
	#Res of screen is 1024x768, so minus margins, internal spacing and such we will need a pic of 
	#approx 614x728 for the earth and 350x728 for the screen if there are 17 rows.
	#If there are 18 we will need 614x689 for earth
	earth = ImageWidget(path=pool["bgLight4.png"], adjust=True)
	
	#Create the stimuli that are shown on the screen. These depend on the Trial we're in
	S1 = ImageWidget(path=pool[var.Stim1])
	S2 = ImageWidget(path=pool[var.Stim2])
	    
	#To determine at what position the stimuli should be, choose a random x,y combo from all the possible combos
	var.pos1 = random.choice(var.locations)
	var.pos1X = var.pos1[0]
	var.pos1Y = var.pos1[1]
	
	#Create a temporary file such that we don't have to delete items from the original list
	var.temp = []
	
	#Then for each combination in locations, check if the first item (the x coordinate) is not the same as the x coordinate of the item chosen as position one. This makes sure that the other item will appear in the other row
	for i in range(0,len(var.locations)):
	    if var.locations[i][0] != var.pos1X:
	        var.temp.append(var.locations[i])
	
	#then pick a random option from this new list and set that as the position of your second stimuli
	var.pos2 = random.choice(var.temp)
	var.pos2X = var.pos2[0]
	var.pos2Y = var.pos2[1]
	  
	########################################################################################################################
	#This would normally be the RUN part of the code, but to keep things being able to have the same name, we put in in PREPARE
	  
	#First set the background images such that they can be displayed behind other pictures
	#They span the amount of columns and rows as their area is big.
	Cond050S.set_widget(earth, (0,0), colspan=3, rowspan=17)
	
	#Putting the two stimuli on screen. Their positions are based on the randomized ones we had before.
	if var.pos1Y == 0:
	    var.rs1 = 3
	if var.pos2Y == 0:
	    var.rs2 = 3
	else:
	    var.rs1 = 4
	    var.rs2 = 4
	Cond050S.set_widget(S1, (var.pos1X,var.pos1Y), rowspan = var.rs1)
	Cond050S.set_widget(S2, (var.pos2X,var.pos2Y), rowspan = var.rs2)
	   
	Cond050S._exec()
	__end__

define inline_script Cond100Outcome
	set description "Executes Python code"
	set _run "#Everything has been moved to prepare!"
	___prepare__
	#Creating a form that has 7 colomns, 3 for the stimuli part of the screen and 4 for the rating part of the screen, 18 rows (16 trials plus pictures and one for the next button) and that has relatively small margins.
	Cond100 = Form(cols=[4,4,4,1,2,2,2], rows=[2,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1], margins=(10,10,10,10), spacing = 10)
	Cond100.timeout = 1000 #this part of the experiment takes 13 seconds
	
	#Create the background for both the stimuli (earth) and the rating (screen). 
	#Res of screen is 1024x768, so minus margins, internal spacing and such we will need a pic of 
	#appro 614x728 for the earth and 350x728 for the screen.
	earth = ImageWidget(path=pool["bgLight4.png"], adjust=True)
	
	#Create the stimuli that are shown on the screen. These depend on the Trial we're in
	S1 = ImageWidget(path=pool[var.Stim1])
	S2 = ImageWidget(path=pool[var.Stim2])
	
	#Create the outcome that is shown on screen. This is either "Diamond.png" or "NoDiamond.png" depending on what the loop states.
	Outcome = ImageWidget(path=pool[var.Outcome])
	
	#############################################################################################################################
	#This is what wouldve been in RUN
	
	
	#First set the background images such that they can be displayed behind other pictures
	#They span the amount of columns and rows as their area is big.
	Cond100.set_widget(earth, (0,0), colspan=3, rowspan=17)
	
	#The outcome should be at the same place always, in this case in the middle of the screen, such that the stimuli can be positioned around it
	Cond100.set_widget(Outcome, (1,7),rowspan = 4)
	
	#Putting the two stimuli on screen. Their positions are based on the ones defined in prepare of Stim.
	if var.pos1Y == 0:
	    var.rs1 = 3
	if var.pos2Y == 0:
	    var.rs2 = 3
	else:
	    var.rs1 = 4
	    var.rs2 = 4
	Cond100.set_widget(S1, (var.pos1X,var.pos1Y), rowspan = var.rs1)
	Cond100.set_widget(S2, (var.pos2X,var.pos2Y), rowspan = var.rs2)
	
	
	Cond100._exec()
	__end__

define inline_script Cond100Rating
	set description "Executes Python code"
	set _run "#Everything has been moved to prepare!"
	___prepare__
	#A form validator that makes sure the next button can only be pressed after every rating is filled in.
	def my_form_validator():
	
	    return var.RatingA != u'' and var.RatingB != u'' and var.RatingX != u''
	
	
	#Creating a form that has 7 colomns, 3 for the stimuli part of the screen and 4 for the rating part of the screen, 18 rows (16 trials plus pictures and one for the next button) and that has relatively small margins.
	Cond100 = Form(validator= my_form_validator, cols=[4,4,4,1,2,2,2], rows=[2,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1], margins=(10,10,10,10), spacing = 10)
	Cond100.timeout = 12000 #this part of the experiment takes 13 seconds
	
	#Create the background for both the stimuli (earth) and the rating (screen). 
	#Res of screen is 1024x768, so minus margins, internal spacing and such we will need a pic of 
	#appro 614x728 for the earth and 350x728 for the screen.
	earth = ImageWidget(path=pool["bgLight4.png"], adjust=True)
	#screenO = ImageWidget(path=pool["computerscreenLong.png"], adjust=True)
	
	#Create the images that appear in the log book. 
	#With adjust=True they should be approximately the same size, even though the pictures in the stimuli part might be of differing sizes.
	A = ImageWidget(path=pool[var.A], adjust = True)
	B = ImageWidget(path=pool[var.B], adjust = True)
	X = ImageWidget(path=pool[var.X], adjust = True)
	
	#Create the stimuli that are shown on the screen. These depend on the Trial we're in
	S1 = ImageWidget(path=pool[var.Stim1])
	S2 = ImageWidget(path=pool[var.Stim2])
	
	#Create the outcome that is shown on screen. This is either "Diamond.png" or "NoDiamond.png" depending on what the loop states.
	Outcome = ImageWidget(path=pool[var.Outcome])
	
	#Create the labels of the trials, basically just 1 to 16 so they can appear on screen
	for i in range(1,17):
	    exp.set(f'T{i}',Label(text=f'{i}'))
	
	#validation to check if only the numbers 0 to 8 are filled in, nothing else
	#this is done by creating a filter function for each of the stimuli ratings
	def filter_digitsA(ch):
	    #ch = re.sub("[^0-8]", "", ch) ->> trying to get numpad to work
	    #if there is nothing in there yet, accept any input from 0 to 8
	    if len(str(var.RatingA)) < 1:
	        return ch in u'012345678'
	    #If there is something in there and someone pressed backspace, then return a backspace and remove the digit
	    elif (len(str(var.RatingA)) == 1 and ch == 'backspace'):
	        return '\b'
	    #else do nothing since we don't want things like 81 or 04687 to be accepted
	    else:    
	        return
	    
	def filter_digitsB(ch):
	    if len(str(var.RatingB)) < 1:
	        return ch in u'012345678'
	    elif (len(str(var.RatingB)) == 1 and ch == 'backspace'):
	        return '\b'
	    else:    
	        return
	    
	def filter_digitsX(ch):
	    if len(str(var.RatingX)) < 1:
	        return ch in u'012345678'
	    elif (len(str(var.RatingX)) == 1 and ch == 'backspace'):
	        return '\b'
	    else:    
	        return
	       
	#Creating the boxes that can be used to put the rating in for the trial that is currently ongoing.
	RatingA = TextInput(text='', frame = True, stub = "Rate", var = 'RatingA', key_filter=filter_digitsA)
	RatingB = TextInput(text='', frame = True, stub = "Rate", var = 'RatingB', key_filter=filter_digitsB)
	RatingX = TextInput(text='', frame = True, stub = "Rate", var = 'RatingX', key_filter=filter_digitsX)
	
	Next = Button(text='Next', var = "NextButton")
	
	#############################################################################################################################
	#This is what wouldve been in RUN
	
	
	#First set the background images such that they can be displayed behind other pictures
	#They span the amount of columns and rows as their area is big.
	Cond100.set_widget(earth, (0,0), colspan=3, rowspan=17)
	#Cond000.set_widget(screen, (3,0), colspan=4, rowspan=17)
	
	#Then set the stimuli that show up on the rating system
	Cond100.set_widget(A, (4,0))
	Cond100.set_widget(B, (5,0))
	Cond100.set_widget(X, (6,0))
	
	#And all of the trial numbers
	for i in range(1,17):
	    Cond100.set_widget(exp.get(f'T{i}'), (3,i))
	
	#The outcome should be at the same place always, in this case in the middle of the screen, such that the stimuli can be positioned around it
	Cond100.set_widget(Outcome, (1,7),rowspan = 4)
	
	#Putting the two stimuli on screen. Their positions are based on the ones defined in prepare of Stim.
	if var.pos1Y == 0:
	    var.rs1 = 3
	if var.pos2Y == 0:
	    var.rs2 = 3
	else:
	    var.rs1 = 4
	    var.rs2 = 4
	Cond100.set_widget(S1, (var.pos1X,var.pos1Y), rowspan = var.rs1)
	Cond100.set_widget(S2, (var.pos2X,var.pos2Y), rowspan = var.rs2)
	
	#Setting the rating boxes for the current trial
	Cond100.set_widget(RatingA, (4,var.Trial))
	Cond100.set_widget(RatingB, (5,var.Trial))
	Cond100.set_widget(RatingX, (6,var.Trial))
	
	#Currently putting this in Run, such that I don't have to make new variables each time before setting them
	#IF this does give issues with the timing aspect, I will have to split it into prepare and run
	if var.Trial > 1:
	    for i in range(1,var.Trial): 
	        #Look up what was answered in that trial (kept outside of the label making)
	        var.j = var.Responses100.iat[i-1,0]
	        var.k = var.Responses100.iat[i-1,1]
	        var.l = var.Responses100.iat[i-1,2]
	        
	        #such that we can then do this: 
	        #If nothing is filled in (and the answer thus 999), display an 'X' since that is clearer to the participant
	        if var.j == 999:
	            var.j = 'X'
	        if var.k == 999:
	            var.k = 'X'
	        if var.l == 999:
	            var.l = 'X'
	        Cond100.set_widget(Label(text=var.j), (4,i))
	        Cond100.set_widget(Label(text=var.k), (5,i))
	        Cond100.set_widget(Label(text=var.l), (6,i))
	
	#if var.RatingA != '' and var.RatingB != '' and var.RatingX != '':
	Cond100.set_widget(Next, (6,17))      
	    
	
	Cond100._exec()
	
	
	#after the excecute we can be sure that something (or nothing) is filled in, so therefore we have to do this after the execute.
	
	#First check if something was filled in. If not ('') then set the value to 999 (which is an integer)
	if var.RatingA =='':
	    var.RatingA = 999
	if var.RatingB =='':
	    var.RatingB = 999
	if var.RatingX =='':
	    var.RatingX = 999
	
	#create a dataframe new answers in which we collect the answers under the same column names as the overall dataset
	var.NewAnswers = pandas.DataFrame([[int(var.RatingA),int(var.RatingB),int(var.RatingX)]], columns=['ResponsesA', 'ResponsesB', 'ResponsesX'], dtype='int')
	#Then append this row to the dataframe, to collect all answers over time
	var.Responses100 = var.Responses100.append(var.NewAnswers, ignore_index=True)
	#print(var.Responses000)
	__end__

define sequence Cond100Sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Cond100Stim always
	run Cond100Outcome always
	run Cond100Rating always
	run new_logger always

define inline_script Cond100Stim
	set description "Executes Python code"
	set _run "#Everything has been moved to Prepare!"
	___prepare__
	#Creating a form that has 7 colomns, 3 for the stimuli part of the screen and 4 for the rating part of the screen, 18 rows (16 trials plus pictures and one for the next button) and that has relatively small margins.
	Cond100S = Form(cols=[4,4,4,1,2,2,2], rows=[2,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1], margins=(10,10,10,10), spacing = 10)
	Cond100S.timeout = 2000 #this part of the experiment takes 2 seconds
	
	#Create the background for both the stimuli (earth) and the rating (screen). 
	#Res of screen is 1024x768, so minus margins, internal spacing and such we will need a pic of 
	#approx 614x728 for the earth and 350x728 for the screen if there are 17 rows.
	#If there are 18 we will need 614x689 for earth
	earth = ImageWidget(path=pool["bgLight4.png"], adjust=True)
	
	#Create the stimuli that are shown on the screen. These depend on the Trial we're in
	S1 = ImageWidget(path=pool[var.Stim1])
	S2 = ImageWidget(path=pool[var.Stim2])
	
	#To determine at what position the stimuli should be, choose a random x,y combo from all the possible combos
	var.pos1 = random.choice(var.locations)
	var.pos1X = var.pos1[0]
	var.pos1Y = var.pos1[1]
	
	#Create a temporary file such that we don't have to delete items from the original list
	var.temp = []
	
	#Then for each combination in locations, check if the first item (the x coordinate) is not the same as the x coordinate of the item chosen as position one. This makes sure that the other item will appear in the other row
	for i in range(0,len(var.locations)):
	    if var.locations[i][0] != var.pos1X:
	        var.temp.append(var.locations[i])
	
	#then pick a random option from this new list and set that as the position of your second stimuli
	var.pos2 = random.choice(var.temp)
	var.pos2X = var.pos2[0]
	var.pos2Y = var.pos2[1]
	  
	########################################################################################################################
	#This would normally be the RUN part of the code, but to keep things being able to have the same name, we put in in PREPARE
	  
	#First set the background images such that they can be displayed behind other pictures
	#They span the amount of columns and rows as their area is big.
	Cond100S.set_widget(earth, (0,0), colspan=3, rowspan=17)
	
	#Putting the two stimuli on screen. Their positions are based on the randomized ones we had before.
	if var.pos1Y == 0:
	    var.rs1 = 3
	if var.pos2Y == 0:
	    var.rs2 = 3
	else:
	    var.rs1 = 4
	    var.rs2 = 4
	Cond100S.set_widget(S1, (var.pos1X,var.pos1Y), rowspan = var.rs1)
	Cond100S.set_widget(S2, (var.pos2X,var.pos2Y), rowspan = var.rs2)
	
	Cond100S._exec()
	__end__

define inline_script Conditions_Stimuli
	set description "Executes Python code"
	___run__
	#There are 6 different conditions (3 block types that can be combined together in 6 ways)
	#This determines, based on participants number which order people get.
	
	#first we create a list of list with the order of the blocks
	counterbalancing = [[2,0,1], [0,1,2], [0,2,1], [1,0,2], [1,2,0], [2,1,0]]
	#Then set block 1 2 and 3 to the items on the list on the posistion of the subject number modulo 6
	var.block1, var.block2, var.block3 = counterbalancing[var.subject_nr%6]
	
	#Now we want to shuffle the stimuli for participants
	#The first way to do this is by stim = pool.files(), however that will also include things such as Diamond.png and background.png, so we'd rather not have that
	#Therefore we put them in by hand for now:
	stim = ['Acorn.png', 'Beetle.png', 'BlackBerries.png', 'Feather.png', 'Flower.png', 'Footprints.png', 'Log.png', 'Mouse.png', 'Puddle.png']
	random.shuffle(stim) #shuffle them
	#Assign them to either A B or X and to either block 1 2 or 3
	var.A1, var.B1, var.X1, var.A2, var.B2, var.X2, var.A3, var.B3, var.X3 = stim
	print(stim)
	print(var.A1,var.B1,var.X1,var.A2,var.B2,var.X2,var.A3,var.B3,var.X3)
	
	#Create the response dataframes globally was well, to use later to display the responses participants gave
	var.Responses000 = pandas.DataFrame(columns=['ResponsesA', 'ResponsesB', 'ResponsesX'], dtype='int')
	var.Responses050 = pandas.DataFrame(columns=['ResponsesA', 'ResponsesB', 'ResponsesX'], dtype='int')
	var.Responses100 = pandas.DataFrame(columns=['ResponsesA', 'ResponsesB', 'ResponsesX'], dtype='int')
	var.PracticeRate = pandas.DataFrame(columns=['ResponsesA', 'ResponsesB', 'ResponsesX'], dtype='int')
	
	#All possible locations the stimuli can be on
	var.locations = [[0,0], [0,1], [0,2], [0,3], [0,4], [0,5], [0,6], [0,7], [0,8], [0,9], [0,10], [0,11], [0,12], [0,13], [2,0], [2,1], [2,2], [2,3], [2,4], [2,5], [2,6], [2,7], [2,8], [2,9], [2,10], [2,11], [2,12], [2,13]]
	
	###THIS DOES THE SAME, BUT LONGER
	# if self.get('subject_nr')%6 == 1:
	#     block1 = 0
	#     block2 = 1 
	#     block3 = 2
	#     
	# if self.get('subject_nr')%6 == 2:
	#     block1 = 0
	#     block2 = 2  
	#     block3 = 1
	#     
	# if self.get('subject_nr')%6 == 3:
	#     block1 = 1
	#     block2 = 0 
	#     block3 = 2
	#     
	# if self.get('subject_nr')%6 == 4:
	#     block1 = 1
	#     block2 = 2 
	#     block3 = 0
	#     
	# if self.get('subject_nr')%6 == 5:
	#     block1 = 2
	#     block2 = 1 
	#     block3 = 0
	#     
	# elif self.get('subject_nr')%6==0:
	#     block1 = 2
	#     block2 = 0 
	#     block3 = 1
	    
	#We then also don't have to explictely set these variables anymore
	# exp.set('block1', block1)
	# exp.set('block2', block2)
	# exp.set('block3', block3)
	
	
	# A1 = stim[0]
	# B1 = stim[1]
	# X1 = stim[2]
	# A2 = stim[3]
	# B2 = stim[4]
	# X2 = stim[5]
	# A3 = stim[6]
	# B3 = stim[7]
	# X3 = stim[8]
	
	#Set them globally
	# exp.set('A1', A1)
	# exp.set('B1', B1)
	# exp.set('X1', X1)
	# exp.set('A2', A2)
	# exp.set('B2', B2)
	# exp.set('X2', X2)
	# exp.set('A3', A3)
	# exp.set('B3', B3)
	# exp.set('X3', X3)
	__end__
	___prepare__
	#importing packages
	import random
	import pandas
	import re
	__end__

define notepad Current_Problems
	__note__
	Right now in the file Cond000Stim I've created things like A, B, X or T1 to T16.
	In the file Cond000Outcome these things are called AO, BO, XO and T1O to T16O. If I put these to the same name as those in Cond000Stim then these items do not appear on screen. 
	
	I've named the first Trial number (T1) of the Cond000Outcome file T1 instead of T1O to show you what I mean. There is a comment in the form of:
	##############
	#here comment
	##############
	Above the relevant parts of the code in Cond000Outcome prepare and run
	
	Thanks again for looking at it!
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define form_text_display DoneFirstBlock
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Good luck!"
	set margins "50;50;50;50"
	set form_title "First part done"
	__form_text__
	These were your first 16 days, well done!
	
	We will now move to a different part of the planet where there will be different objects laying around. The things you find are still the same, so either a precious stone, or nothing.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display DoneSecondBlock
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Let's go!"
	set margins "50;50;50;50"
	set form_title "Second part done"
	__form_text__
	16 more days done, great job!
	
	Now we will move to a new area one more time, where there will be new objects again.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display End
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Goodbye!"
	set margins "50;50;50;50"
	set form_title "Thank you!"
	__form_text__
	Well done space explorer! 
	You've found many treasures and are ready to see what the next planet has in store for you. I wish you the best of luck on your future explorations and thank you very much for helping out with this one.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display EndOfPractice
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Let's go!"
	set margins "50;50;50;50"
	set form_title "Practice Over"
	__form_text__
	You are now ready to go into the real world! 
	
	Remember that you will either see a precious stone or you will see an empty hole as the result of your digging. It's the goal to rate how likely you think a precious stone will show up.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display Explanation
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Start!"
	set margins "50;50;50;50"
	set form_title "Practice run"
	__form_text__
	To get you used to the rating system the computer will give you a practice run.
	
	Select a square to type in a number between 0 and 8, this cannot be done with the numpad. Please use the keyboard.
	
	The <next> button in the bottom corner will only work once all 3 ratings of that trial are filled in.
	
	You will have as much time as you need and you can try 4 days.
	
	Good luck!
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display Introduction
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Next
	set margins "50;50;50;50"
	set form_title "Welcome space adventurer!"
	__form_text__
	You are a space adventurer from Mars. You've travelled a long way and you are ready to look for treasure.
	The planet you landed on is called PNF-404 and it was abandoned long ago by its inhabitants. Rumor has it that there are still precious stones buried in the soil. It's your task to find them! To help you figure out where the treasure is buried you should pay attention to your surroundings.
	
	To help you and future treasure hunters on PNF-404, you are given a log book in which you can see the 3 most common items on this part of the planet. After each day please write down for all three items (even if you did not see it that day) how likely you think it is that it will lead to treasure.
	Do this on a scale from 0 to 8, where 0 is very unlikely and 8 is very likely.
	
	Since you want to save the batteries on your equipment you have to fill in the scores within 15 seconds of seeing the items.
	
	You have 16 days on this area of the planet, after which you will go to another part of the planet, where other objects are found.
	
	Have fun exploring and good luck finding treasure!
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define loop NewStim
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run new_logger

define loop OldStim
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Outcome "Diamond.png"
	setcycle 0 Stim1 "[A1]"
	setcycle 0 Stim2 "[X1]"
	setcycle 0 Trial 1
	setcycle 1 Outcome "Fossil.png"
	setcycle 1 Stim1 "[A1]"
	setcycle 1 Stim2 "[X1]"
	setcycle 1 Trial 2
	setcycle 2 Outcome "Diamond.png"
	setcycle 2 Stim1 "[B1]"
	setcycle 2 Stim2 "[X1]"
	setcycle 2 Trial 3
	setcycle 3 Outcome "Fossil.png"
	setcycle 3 Stim1 "[B1]"
	setcycle 3 Stim2 "[X1]"
	setcycle 3 Trial 4
	setcycle 4 Outcome "Diamond.png"
	setcycle 4 Stim1 "[C]"
	setcycle 4 Stim2 "[X1]"
	setcycle 4 Trial 5
	setcycle 5 Outcome "Fossil.png"
	setcycle 5 Stim1 "[C]"
	setcycle 5 Stim2 "[X1]"
	setcycle 5 Trial 6
	setcycle 6 Outcome "Diamond.png"
	setcycle 6 Stim1 "[A3]"
	setcycle 6 Stim2 "[X1]"
	setcycle 6 Trial 7
	setcycle 7 Outcome "Fossil.png"
	setcycle 7 Stim1 "[A3]"
	setcycle 7 Stim2 "[X1]"
	setcycle 7 Trial 8
	setcycle 8 Outcome "Diamond.png"
	setcycle 8 Stim1 "[B3]"
	setcycle 8 Stim2 "[X1]"
	setcycle 8 Trial 9
	setcycle 9 Outcome "Fossil.png"
	setcycle 9 Stim1 "[B3]"
	setcycle 9 Stim2 "[X1]"
	setcycle 9 Trial 10
	run new_logger

define loop Practice_phase
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Trial 1
	setcycle 1 Trial 2
	setcycle 2 Trial 3
	setcycle 3 Trial 4
	run practice_sequence

define inline_script Practicerun
	set description "Executes Python code"
	set _run ""
	___prepare__
	#A form validator that makes sure the next button can only be pressed after every rating is filled in.
	def my_form_validator():
	
	    return var.RatingA != u'' and var.RatingB != u'' and var.RatingX != u''
	
	
	#Creating a form that has 7 colomns, 3 for the stimuli part of the screen and 4 for the rating part of the screen, 18 rows (16 trials plus pictures and one for the next button) and that has relatively small margins.
	Practice = Form(validator= my_form_validator, cols=[4,4,4,1,2,2,2], rows=[2,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1], margins=(10,10,10,10), spacing = 10)
	#Practice.timeout = 12000 #this part of the experiment takes 12 seconds
	
	#Create the background for both the stimuli (earth) and the rating (screen). 
	#Res of screen is 1024x768, so minus margins, internal spacing and such we will need a pic of 
	#appro 614x728 for the earth and 350x728 for the screen.
	earth = ImageWidget(path=pool["bgLight4.png"], adjust=True)
	#screenO = ImageWidget(path=pool["computerscreenLong.png"], adjust=True)
	
	#Create the images that appear in the log book. 
	#With adjust=True they should be approximately the same size, even though the pictures in the stimuli part might be of differing sizes.
	A = Label(text='Object 1')
	B = Label(text='Object 2')
	X = Label(text='Object 3')
	
	#Create the stimuli that are shown on the screen. These depend on the Trial we're in
	#S1 = ImageWidget(path=pool[var.Stim1])
	#S2 = ImageWidget(path=pool[var.Stim2])
	
	#Create the outcome that is shown on screen. This is either "Diamond.png" or "NoDiamond.png" depending on what the loop states.
	#Outcome = ImageWidget(path=pool[var.Outcome])
	
	#Create the labels of the trials, basically just 1 to 16 so they can appear on screen
	for i in range(1,5):
	    exp.set(f'T{i}',Label(text=f'{i}'))
	
	#validation to check if only the numbers 0 to 8 are filled in, nothing else
	#this is done by creating a filter function for each of the stimuli ratings
	def filter_digitsA(ch):
	    #ch = re.sub("[^0-8]", "", ch) ->> trying to get numpad to work
	    #if there is nothing in there yet, accept any input from 0 to 8
	    if len(str(var.RatingA)) < 1:
	        return ch in u'012345678'
	    #If there is something in there and someone pressed backspace, then return a backspace and remove the digit
	    elif (len(str(var.RatingA)) == 1 and ch == 'backspace'):
	        return '\b'
	    #else do nothing since we don't want things like 81 or 04687 to be accepted
	    else:    
	        return
	    
	def filter_digitsB(ch):
	    if len(str(var.RatingB)) < 1:
	        return ch in u'012345678'
	    elif (len(str(var.RatingB)) == 1 and ch == 'backspace'):
	        return '\b'
	    else:    
	        return
	    
	def filter_digitsX(ch):
	    if len(str(var.RatingX)) < 1:
	        return ch in u'012345678'
	    elif (len(str(var.RatingX)) == 1 and ch == 'backspace'):
	        return '\b'
	    else:    
	        return
	       
	#Creating the boxes that can be used to put the rating in for the trial that is currently ongoing.
	RatingA = TextInput(text='', frame = True, stub = "Rate", var = 'RatingA', key_filter=filter_digitsA)
	RatingB = TextInput(text='', frame = True, stub = "Rate", var = 'RatingB', key_filter=filter_digitsB)
	RatingX = TextInput(text='', frame = True, stub = "Rate", var = 'RatingX', key_filter=filter_digitsX)
	
	Next = Button(text='Next', var = 'NextButton')
	
	#############################################################################################################################
	#This is what wouldve been in RUN
	
	
	#First set the background images such that they can be displayed behind other pictures
	#They span the amount of columns and rows as their area is big.
	Practice.set_widget(earth, (0,0), colspan=3, rowspan=17)
	#Cond000.set_widget(screen, (3,0), colspan=4, rowspan=17)
	
	#Then set the stimuli that show up on the rating system
	Practice.set_widget(A, (4,0))
	Practice.set_widget(B, (5,0))
	Practice.set_widget(X, (6,0))
	
	#And all of the trial numbers
	for i in range(1,5):
	    Practice.set_widget(exp.get(f'T{i}'), (3,i))
	
	#The outcome should be at the same place always, in this case in the middle of the screen, such that the stimuli can be positioned around it
	#Cond000.set_widget(Outcome, (1,7),rowspan = 4)
	
	#Putting the two stimuli on screen. Their positions are based on the ones defined in prepare of Stim.
	
	#Practice.set_widget(S1, (var.pos1X,var.pos1Y), rowspan = var.rs1)
	#Practice.set_widget(S2, (var.pos2X,var.pos2Y), rowspan = var.rs2)
	
	#Setting the rating boxes for the current trial
	Practice.set_widget(RatingA, (4,var.Trial))
	Practice.set_widget(RatingB, (5,var.Trial))
	Practice.set_widget(RatingX, (6,var.Trial))
	
	#Currently putting this in Run, such that I don't have to make new variables each time before setting them
	#IF this does give issues with the timing aspect, I will have to split it into prepare and run
	if var.Trial > 1:
	    for i in range(1,var.Trial): 
	        #Look up what was answered in that trial (kept outside of the label making)
	        var.j = var.PracticeRate.iat[i-1,0]
	        var.k = var.PracticeRate.iat[i-1,1]
	        var.l = var.PracticeRate.iat[i-1,2]
	        
	        #such that we can then do this: 
	        #If nothing is filled in (and the answer thus 999), display an 'X' since that is clearer to the participant
	        if var.j == 999:
	            var.j = 'X'
	        if var.k == 999:
	            var.k = 'X'
	        if var.l == 999:
	            var.l = 'X'
	        Practice.set_widget(Label(text=var.j), (4,i))
	        Practice.set_widget(Label(text=var.k), (5,i))
	        Practice.set_widget(Label(text=var.l), (6,i))
	
	Practice.set_widget(Next, (6,17))      
	    
	
	Practice._exec()
	
	
	#after the excecute we can be sure that something (or nothing) is filled in, so therefore we have to do this after the execute.
	
	#First check if something was filled in. If not ('') then set the value to 999 (which is an integer)
	if var.RatingA =='':
	    var.RatingA = 999
	if var.RatingB =='':
	    var.RatingB = 999
	if var.RatingX =='':
	    var.RatingX = 999
	
	#create a dataframe new answers in which we collect the answers under the same column names as the overall dataset
	var.NewAnswers = pandas.DataFrame([[int(var.RatingA),int(var.RatingB),int(var.RatingX)]], columns=['ResponsesA', 'ResponsesB', 'ResponsesX'], dtype='int')
	#Then append this row to the dataframe, to collect all answers over time
	var.PracticeRate = var.PracticeRate.append(var.NewAnswers, ignore_index=True)
	#print(var.Responses000)
	__end__

define form_text_display Testphaseintro
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Start
	set margins "50;50;50;50"
	set form_title "Putting it all together"
	__form_text__
	Well done! You have finished all the exploration on the planet.
	
	You were not the first explorer out here, since there were other before. Therefore the computer wants to compare your findings to that of them. It will show you objects and you will have to rate these objects on the screen from 0 to 8 again (0 very unlikely, 8 very likely). Others might have found different precious stones than you, so be sure to rate according to what you can see on the screen!
	
	Just fill in the ratings again for the combination of surrounding items and the treasure, as you did before, but this time you will not see an outcome.
	
	You still have 15 seconds per day.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define notepad To_dos
	__note__
	Scale the images outside. Since im not sure which image is presented it is best if they come "prescaled"
	
	Scale the screen to the user (does OS do that automatically?)
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define loop _000
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Outcome "Diamond.png"
	setcycle 0 Stim1 "[A1]"
	setcycle 0 Stim2 "[X1]"
	setcycle 0 Trial 1
	setcycle 0 A "[A1]"
	setcycle 0 B "[B1]"
	setcycle 0 X "[X1]"
	setcycle 1 Outcome "NoDiamond.png"
	setcycle 1 Stim1 "[B1]"
	setcycle 1 Stim2 "[X1]"
	setcycle 1 Trial 2
	setcycle 1 A "[A1]"
	setcycle 1 B "[B1]"
	setcycle 1 X "[X1]"
	setcycle 2 Outcome "Diamond.png"
	setcycle 2 Stim1 "[B1]"
	setcycle 2 Stim2 "[X1]"
	setcycle 2 Trial 3
	setcycle 2 A "[A1]"
	setcycle 2 B "[B1]"
	setcycle 2 X "[X1]"
	setcycle 3 Outcome "NoDiamond.png"
	setcycle 3 Stim1 "[A1]"
	setcycle 3 Stim2 "[X1]"
	setcycle 3 Trial 4
	setcycle 3 A "[A1]"
	setcycle 3 B "[B1]"
	setcycle 3 X "[X1]"
	setcycle 4 Outcome "NoDiamond.png"
	setcycle 4 Stim1 "[A1]"
	setcycle 4 Stim2 "[X1]"
	setcycle 4 Trial 5
	setcycle 4 A "[A1]"
	setcycle 4 B "[B1]"
	setcycle 4 X "[X1]"
	setcycle 5 Outcome "Diamond.png"
	setcycle 5 Stim1 "[B1]"
	setcycle 5 Stim2 "[X1]"
	setcycle 5 Trial 6
	setcycle 5 A "[A1]"
	setcycle 5 B "[B1]"
	setcycle 5 X "[X1]"
	setcycle 6 Outcome "Diamond.png"
	setcycle 6 Stim1 "[A1]"
	setcycle 6 Stim2 "[X1]"
	setcycle 6 Trial 7
	setcycle 6 A "[A1]"
	setcycle 6 B "[B1]"
	setcycle 6 X "[X1]"
	setcycle 7 Outcome "NoDiamond.png"
	setcycle 7 Stim1 "[B1]"
	setcycle 7 Stim2 "[X1]"
	setcycle 7 Trial 8
	setcycle 7 A "[A1]"
	setcycle 7 B "[B1]"
	setcycle 7 X "[X1]"
	setcycle 8 Outcome "Diamond.png"
	setcycle 8 Stim1 "[B1]"
	setcycle 8 Stim2 "[X1]"
	setcycle 8 Trial 9
	setcycle 8 A "[A1]"
	setcycle 8 B "[B1]"
	setcycle 8 X "[X1]"
	setcycle 9 Outcome "NoDiamond.png"
	setcycle 9 Stim1 "[A1]"
	setcycle 9 Stim2 "[X1]"
	setcycle 9 Trial 10
	setcycle 9 A "[A1]"
	setcycle 9 B "[B1]"
	setcycle 9 X "[X1]"
	setcycle 10 Outcome "NoDiamond.png"
	setcycle 10 Stim1 "[B1]"
	setcycle 10 Stim2 "[X1]"
	setcycle 10 Trial 11
	setcycle 10 A "[A1]"
	setcycle 10 B "[B1]"
	setcycle 10 X "[X1]"
	setcycle 11 Outcome "Diamond.png"
	setcycle 11 Stim1 "[A1]"
	setcycle 11 Stim2 "[X1]"
	setcycle 11 Trial 12
	setcycle 11 A "[A1]"
	setcycle 11 B "[B1]"
	setcycle 11 X "[X1]"
	setcycle 12 Outcome "NoDiamond.png"
	setcycle 12 Stim1 "[A1]"
	setcycle 12 Stim2 "[X1]"
	setcycle 12 Trial 13
	setcycle 12 A "[A1]"
	setcycle 12 B "[B1]"
	setcycle 12 X "[X1]"
	setcycle 13 Outcome "Diamond.png"
	setcycle 13 Stim1 "[B1]"
	setcycle 13 Stim2 "[X1]"
	setcycle 13 Trial 14
	setcycle 13 A "[A1]"
	setcycle 13 B "[B1]"
	setcycle 13 X "[X1]"
	setcycle 14 Outcome "Diamond.png"
	setcycle 14 Stim1 "[A1]"
	setcycle 14 Stim2 "[X1]"
	setcycle 14 Trial 15
	setcycle 14 A "[A1]"
	setcycle 14 B "[B1]"
	setcycle 14 X "[X1]"
	setcycle 15 Outcome "NoDiamond.png"
	setcycle 15 Stim1 "[B1]"
	setcycle 15 Stim2 "[X1]"
	setcycle 15 Trial 16
	setcycle 15 A "[A1]"
	setcycle 15 B "[B1]"
	setcycle 15 X "[X1]"
	run Cond000Sequence

define loop _050
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Outcome "Diamond.png"
	setcycle 0 Stim1 "[A2]"
	setcycle 0 Stim2 "[X2]"
	setcycle 0 Trial 1
	setcycle 0 A "[A2]"
	setcycle 0 B "[B2]"
	setcycle 0 X "[X2]"
	setcycle 1 Outcome "NoDiamond.png"
	setcycle 1 Stim1 "[B2]"
	setcycle 1 Stim2 "[X2]"
	setcycle 1 Trial 2
	setcycle 1 A "[A2]"
	setcycle 1 B "[B2]"
	setcycle 1 X "[X2]"
	setcycle 2 Outcome "Diamond.png"
	setcycle 2 Stim1 "[B2]"
	setcycle 2 Stim2 "[X2]"
	setcycle 2 Trial 3
	setcycle 2 A "[A2]"
	setcycle 2 B "[B2]"
	setcycle 2 X "[X2]"
	setcycle 3 Outcome "Diamond.png"
	setcycle 3 Stim1 "[A2]"
	setcycle 3 Stim2 "[X2]"
	setcycle 3 Trial 4
	setcycle 3 A "[A2]"
	setcycle 3 B "[B2]"
	setcycle 3 X "[X2]"
	setcycle 4 Outcome "NoDiamond.png"
	setcycle 4 Stim1 "[A2]"
	setcycle 4 Stim2 "[X2]"
	setcycle 4 Trial 5
	setcycle 4 A "[A2]"
	setcycle 4 B "[B2]"
	setcycle 4 X "[X2]"
	setcycle 5 Outcome "NoDiamond.png"
	setcycle 5 Stim1 "[B2]"
	setcycle 5 Stim2 "[X2]"
	setcycle 5 Trial 6
	setcycle 5 A "[A2]"
	setcycle 5 B "[B2]"
	setcycle 5 X "[X2]"
	setcycle 6 Outcome "Diamond.png"
	setcycle 6 Stim1 "[A2]"
	setcycle 6 Stim2 "[X2]"
	setcycle 6 Trial 7
	setcycle 6 A "[A2]"
	setcycle 6 B "[B2]"
	setcycle 6 X "[X2]"
	setcycle 7 Outcome "NoDiamond.png"
	setcycle 7 Stim1 "[B2]"
	setcycle 7 Stim2 "[X2]"
	setcycle 7 Trial 8
	setcycle 7 A "[A2]"
	setcycle 7 B "[B2]"
	setcycle 7 X "[X2]"
	setcycle 8 Outcome "Diamond.png"
	setcycle 8 Stim1 "[B2]"
	setcycle 8 Stim2 "[X2]"
	setcycle 8 Trial 9
	setcycle 8 A "[A2]"
	setcycle 8 B "[B2]"
	setcycle 8 X "[X2]"
	setcycle 9 Outcome "Diamond.png"
	setcycle 9 Stim1 "[A2]"
	setcycle 9 Stim2 "[X2]"
	setcycle 9 Trial 10
	setcycle 9 A "[A2]"
	setcycle 9 B "[B2]"
	setcycle 9 X "[X2]"
	setcycle 10 Outcome "NoDiamond.png"
	setcycle 10 Stim1 "[B2]"
	setcycle 10 Stim2 "[X2]"
	setcycle 10 Trial 11
	setcycle 10 A "[A2]"
	setcycle 10 B "[B2]"
	setcycle 10 X "[X2]"
	setcycle 11 Outcome "Diamond.png"
	setcycle 11 Stim1 "[A2]"
	setcycle 11 Stim2 "[X2]"
	setcycle 11 Trial 12
	setcycle 11 A "[A2]"
	setcycle 11 B "[B2]"
	setcycle 11 X "[X2]"
	setcycle 12 Outcome "NoDiamond.png"
	setcycle 12 Stim1 "[A2]"
	setcycle 12 Stim2 "[X2]"
	setcycle 12 Trial 13
	setcycle 12 A "[A2]"
	setcycle 12 B "[B2]"
	setcycle 12 X "[X2]"
	setcycle 13 Outcome "NoDiamond.png"
	setcycle 13 Stim1 "[B2]"
	setcycle 13 Stim2 "[X2]"
	setcycle 13 Trial 14
	setcycle 13 A "[A2]"
	setcycle 13 B "[B2]"
	setcycle 13 X "[X2]"
	setcycle 14 Outcome "Diamond.png"
	setcycle 14 Stim1 "[A2]"
	setcycle 14 Stim2 "[X2]"
	setcycle 14 Trial 15
	setcycle 14 A "[A2]"
	setcycle 14 B "[B2]"
	setcycle 14 X "[X2]"
	setcycle 15 Outcome "NoDiamond.png"
	setcycle 15 Stim1 "[B2]"
	setcycle 15 Stim2 "[X2]"
	setcycle 15 Trial 16
	setcycle 15 A "[A2]"
	setcycle 15 B "[B2]"
	setcycle 15 X "[X2]"
	run Cond050Sequence

define loop _100
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Outcome "Diamond.png"
	setcycle 0 Stim1 "[A3]"
	setcycle 0 Stim2 "[X3]"
	setcycle 0 Trial 1
	setcycle 0 A "[A3]"
	setcycle 0 B "[B3]"
	setcycle 0 X "[X3]"
	setcycle 1 Outcome "NoDiamond.png"
	setcycle 1 Stim1 "[B3]"
	setcycle 1 Stim2 "[X3]"
	setcycle 1 Trial 2
	setcycle 1 A "[A3]"
	setcycle 1 B "[B3]"
	setcycle 1 X "[X3]"
	setcycle 2 Outcome "NoDiamond.png"
	setcycle 2 Stim1 "[B3]"
	setcycle 2 Stim2 "[X3]"
	setcycle 2 Trial 3
	setcycle 2 A "[A3]"
	setcycle 2 B "[B3]"
	setcycle 2 X "[X3]"
	setcycle 3 Outcome "Diamond.png"
	setcycle 3 Stim1 "[A3]"
	setcycle 3 Stim2 "[X3]"
	setcycle 3 Trial 4
	setcycle 3 A "[A3]"
	setcycle 3 B "[B3]"
	setcycle 3 X "[X3]"
	setcycle 4 Outcome "Diamond.png"
	setcycle 4 Stim1 "[A3]"
	setcycle 4 Stim2 "[X3]"
	setcycle 4 Trial 5
	setcycle 4 A "[A3]"
	setcycle 4 B "[B3]"
	setcycle 4 X "[X3]"
	setcycle 5 Outcome "NoDiamond.png"
	setcycle 5 Stim1 "[B3]"
	setcycle 5 Stim2 "[X3]"
	setcycle 5 Trial 6
	setcycle 5 A "[A3]"
	setcycle 5 B "[B3]"
	setcycle 5 X "[X3]"
	setcycle 6 Outcome "Diamond.png"
	setcycle 6 Stim1 "[A3]"
	setcycle 6 Stim2 "[X3]"
	setcycle 6 Trial 7
	setcycle 6 A "[A3]"
	setcycle 6 B "[B3]"
	setcycle 6 X "[X3]"
	setcycle 7 Outcome "NoDiamond.png"
	setcycle 7 Stim1 "[B3]"
	setcycle 7 Stim2 "[X3]"
	setcycle 7 Trial 8
	setcycle 7 A "[A3]"
	setcycle 7 B "[B3]"
	setcycle 7 X "[X3]"
	setcycle 8 Outcome "NoDiamond.png"
	setcycle 8 Stim1 "[B3]"
	setcycle 8 Stim2 "[X3]"
	setcycle 8 Trial 9
	setcycle 8 A "[A3]"
	setcycle 8 B "[B3]"
	setcycle 8 X "[X3]"
	setcycle 9 Outcome "Diamond.png"
	setcycle 9 Stim1 "[A3]"
	setcycle 9 Stim2 "[X3]"
	setcycle 9 Trial 10
	setcycle 9 A "[A3]"
	setcycle 9 B "[B3]"
	setcycle 9 X "[X3]"
	setcycle 10 Outcome "NoDiamond.png"
	setcycle 10 Stim1 "[B3]"
	setcycle 10 Stim2 "[X3]"
	setcycle 10 Trial 11
	setcycle 10 A "[A3]"
	setcycle 10 B "[B3]"
	setcycle 10 X "[X3]"
	setcycle 11 Outcome "Diamond.png"
	setcycle 11 Stim1 "[A3]"
	setcycle 11 Stim2 "[X3]"
	setcycle 11 Trial 12
	setcycle 11 A "[A3]"
	setcycle 11 B "[B3]"
	setcycle 11 X "[X3]"
	setcycle 12 Outcome "Diamond.png"
	setcycle 12 Stim1 "[A3]"
	setcycle 12 Stim2 "[X3]"
	setcycle 12 Trial 13
	setcycle 12 A "[A3]"
	setcycle 12 B "[B3]"
	setcycle 12 X "[X3]"
	setcycle 13 Outcome "NoDiamond.png"
	setcycle 13 Stim1 "[B3]"
	setcycle 13 Stim2 "[X3]"
	setcycle 13 Trial 14
	setcycle 13 A "[A3]"
	setcycle 13 B "[B3]"
	setcycle 13 X "[X3]"
	setcycle 14 Outcome "Diamond.png"
	setcycle 14 Stim1 "[A3]"
	setcycle 14 Stim2 "[X3]"
	setcycle 14 Trial 15
	setcycle 14 A "[A3]"
	setcycle 14 B "[B3]"
	setcycle 14 X "[X3]"
	setcycle 15 Outcome "NoDiamond.png"
	setcycle 15 Stim1 "[B3]"
	setcycle 15 Stim2 "[X3]"
	setcycle 15 Trial 16
	setcycle 15 A "[A3]"
	setcycle 15 B "[B3]"
	setcycle 15 X "[X3]"
	run Cond100Sequence

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Current_Problems always
	run To_dos always
	run Conditions_Stimuli always
	run Introduction always
	run Explanation always
	run Practice_phase always
	run EndOfPractice always
	run training_phase always
	run End always

define sequence main_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run _000 "[block1] = [count_main_sequence]"
	run _050 "[block2] = [count_main_sequence]"
	run _100 "[block3] = [count_main_sequence]"
	run DoneFirstBlock "[count_main_sequence] = 0"
	run DoneSecondBlock "[count_main_sequence] = 1"

define logger new_logger
	set description "Logs experimental data"
	set auto_log no
	log A
	log A1
	log A2
	log A3
	log B
	log B1
	log B2
	log B3
	log X
	log X1
	log X2
	log X3
	log Outcome
	log RatingA
	log RatingB
	log RatingX
	log Stim1
	log Stim2
	log Trial
	log block1
	log block2
	log block3
	log count_Cond000Outcome
	log count_Cond000Ratings
	log count_Cond000Sequence
	log count_Cond000Stim
	log count_Cond050Outcome
	log count_Cond050Rating
	log count_Cond050Sequence
	log count_Cond050Stim
	log count_Cond100Outcome
	log count_Cond100Rating
	log count_Cond100Sequence
	log count_Cond100Stim
	log count_Conditions_Stimuli
	log count_DoneFirstBlock
	log count_DoneSecondBlock
	log count_End
	log count_Explanation
	log count_Introduction
	log count_NewStim
	log count_OldStim
	log count_Stimuli
	log count_Testphaseintro
	log count__000
	log count__050
	log count__100
	log count_experiment
	log count_main_sequence
	log count_test_sequence
	log count_testing_phase
	log count_training_phase
	log pos1
	log pos1X
	log pos1Y
	log pos2
	log pos2X
	log pos2Y
	log subject_parity
	log subject_nr
	log time_Cond000Outcome
	log time_Cond000Ratings
	log time_Cond000Sequence
	log time_Cond000Stim
	log time_Cond050Outcome
	log time_Cond050Rating
	log time_Cond050Sequence
	log time_Cond050Stim
	log time_Cond100Outcome
	log time_Cond100Rating
	log time_Cond100Sequence
	log time_Cond100Stim
	log time_Conditions_Stimuli
	log time_DoneFirstBlock
	log time_DoneSecondBlock
	log time_End
	log time_Explanation
	log time_Introduction
	log time_NewStim
	log time_OldStim
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
define repeat_cycle new_repeat_cycle
	set description "Optionally repeat a cycle from a loop"
	set condition never

define sequence practice_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Practicerun always

define sequence test_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run OldStim "[count_test_sequence] = 0"
	run NewStim "[count_test_sequence] = 1"

define loop testing_phase
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	setcycle 1 empty_column ""
	run test_sequence

define loop training_phase
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	setcycle 1 empty_column ""
	setcycle 2 empty_column ""
	run main_sequence

