---
API: 2.1
OpenSesame: 3.3.6
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground "#000000"
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\Sanne\\Dropbox\\MasterProject\\Experiments"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#d6d6d6"

define inline_script Conditions
	set description "Executes Python code"
	___run__
	#There are 6 different conditions (3 block types that can be combined together in 6 ways)
	#This determines, based on participants number which order people get.
	
	#first we create a list of list with the order of the blocks
	counterbalancing = [[2,0,1], [0,1,2], [0,2,1], [1,0,2], [1,2,0], [2,1,0]]
	#Then set block 1 2 and 3 to the items on the list on the posistion of the subject number modulo 6
	var.block1, var.block2, var.block3 = counterbalancing[var.subject_nr%6]
	
	#Now we want to shuffle the stimuli for participants
	#The first way to do this is by stim = pool.files(), however that will also include things such as Diamond.png and background.png, so we'd rather not have that
	#Therefore we put them in by hand for now:
	stim = ['Acorn.png', 'Beetle.png', 'BlackBerries.png', 'Feather.png', 'Flower.png', 'Footprints.png', 'Log.png', 'Mouse.png', 'Puddle.png']
	random.shuffle(stim) #shuffle them
	#Assign them to either A B or X and to either block 1 2 or 3
	var.A1, var.B1, var.X1, var.A2, var.B2, var.X2, var.A3, var.B3, var.X3 = stim
	print(stim)
	print(var.A1,var.B1,var.X1,var.A2,var.B2,var.X2,var.A3,var.B3,var.X3)
	
	#Create the response dataframes globally was well, to use later to display the responses participants gave
	var.Responses000 = pandas.DataFrame(columns=['ResponsesA', 'ResponsesB', 'ResponsesX'], dtype='int')
	var.Responses050 = pandas.DataFrame(columns=['ResponsesA', 'ResponsesB', 'ResponsesX'], dtype='int')
	var.Responses100 = pandas.DataFrame(columns=['ResponsesA', 'ResponsesB', 'ResponsesX'], dtype='int')
	
	#All possible locations the stimuli can be on
	var.locations = [[0,0], [0,1], [0,2], [0,3], [0,4], [0,5], [0,6], [0,7], [0,8], [0,9], [0,10], [0,11], [0,12], [0,13], [2,0], [2,1], [2,2], [2,3], [2,4], [2,5], [2,6], [2,7], [2,8], [2,9], [2,10], [2,11], [2,12], [2,13]]
	
	var.C = 'Toadstools.png' 
	__end__
	___prepare__
	#importing packages
	import random
	import pandas
	import re
	__end__

define loop NewStim
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run ""

define loop OldStim
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Outcome "Diamond.png"
	setcycle 0 Stim1 "[A1]"
	setcycle 0 Stim2 "[X1]"
	setcycle 0 Trial 1
	setcycle 1 Outcome "Fossil.png"
	setcycle 1 Stim1 "[A1]"
	setcycle 1 Stim2 "[X1]"
	setcycle 1 Trial 2
	setcycle 2 Outcome "Diamond.png"
	setcycle 2 Stim1 "[B1]"
	setcycle 2 Stim2 "[X1]"
	setcycle 2 Trial 3
	setcycle 3 Outcome "Fossil.png"
	setcycle 3 Stim1 "[B1]"
	setcycle 3 Stim2 "[X1]"
	setcycle 3 Trial 4
	setcycle 4 Outcome "Diamond.png"
	setcycle 4 Stim1 "[C]"
	setcycle 4 Stim2 "[X1]"
	setcycle 4 Trial 5
	setcycle 5 Outcome "Fossil.png"
	setcycle 5 Stim1 "[C]"
	setcycle 5 Stim2 "[X1]"
	setcycle 5 Trial 6
	setcycle 6 Outcome "Diamond.png"
	setcycle 6 Stim1 "[A3]"
	setcycle 6 Stim2 "[X3]"
	setcycle 6 Trial 7
	setcycle 7 Outcome "Fossil.png"
	setcycle 7 Stim1 "[A3]"
	setcycle 7 Stim2 "[X3]"
	setcycle 7 Trial 8
	setcycle 8 Outcome "Diamond.png"
	setcycle 8 Stim1 "[B3]"
	setcycle 8 Stim2 "[X3]"
	setcycle 8 Trial 9
	setcycle 9 Outcome "Fossil.png"
	setcycle 9 Stim1 "[B3]"
	setcycle 9 Stim2 "[X3]"
	setcycle 9 Trial 10
	run new_sequence

define inline_script TestOldStim
	set description "Executes Python code"
	set _run ""
	___prepare__
	TestOldS = Form(cols=[4,4,4,1,2,2,2], rows=[2,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1], margins=(10,10,10,10), spacing = 10)
	TestOldS.timeout = 5000 
	
	earth = ImageWidget(path=pool["bgLight4.png"], adjust=True)
	
	S1 = ImageWidget(path=pool[var.Stim1])
	S2 = ImageWidget(path=pool[var.Stim2])
	
	var.pos1 = random.choice(var.locations)
	var.pos1X = var.pos1[0]
	var.pos1Y = var.pos1[1]
	var.temp = []
	
	for i in range(0,len(var.locations)):
	    if var.locations[i][0] != var.pos1X:
	        var.temp.append(var.locations[i])
	        
	var.pos2 = random.choice(var.temp)
	var.pos2X = var.pos2[0]
	var.pos2Y = var.pos2[1]
	
	TestOldS.set_widget(earth, (0,0), colspan=3, rowspan=17)
	if var.pos1Y == 0:
	    var.rs1 = 3
	if var.pos2Y == 0:
	    var.rs2 = 3
	else:
	    var.rs1 = 4
	    var.rs2 = 4
	
	TestOldS.set_widget(S1, (var.pos1X,var.pos1Y), rowspan = var.rs1)
	TestOldS.set_widget(S2, (var.pos2X,var.pos2Y), rowspan = var.rs2)
	
	   
	TestOldS._exec()
	__end__

define inline_script TrialsCond000Outcome
	set description "Executes Python code"
	___run__
	#First set the background images such that they can be displayed behind other pictures
	#They span the amount of columns and rows as their area is big.
	Cond000.set_widget(earthO, (0,0), colspan=3, rowspan=17)
	#Cond000.set_widget(screen, (3,0), colspan=4, rowspan=17)
	
	#Then set the stimuli that show up on the rating system
	Cond000.set_widget(AO, (4,0))
	Cond000.set_widget(BO, (5,0))
	Cond000.set_widget(XO, (6,0))
	
	#And all of the trial numbers
	Cond000.set_widget(T1O, (3,1))
	Cond000.set_widget(T2O, (3,2))
	Cond000.set_widget(T3O, (3,3))
	Cond000.set_widget(T4O, (3,4))
	Cond000.set_widget(T5O, (3,5))
	Cond000.set_widget(T6O, (3,6))
	Cond000.set_widget(T7O, (3,7))
	Cond000.set_widget(T8O, (3,8))
	Cond000.set_widget(T9O, (3,9))
	Cond000.set_widget(T10O, (3,10))
	Cond000.set_widget(T11O, (3,11))
	Cond000.set_widget(T12O, (3,12))
	Cond000.set_widget(T13O, (3,13))
	Cond000.set_widget(T14O, (3,14))
	Cond000.set_widget(T15O, (3,15))
	Cond000.set_widget(T16O, (3,16))
	
	#The outcome should be at the same place always, in this case in the middle of the screen, such that the stimuli can be positioned around it
	Cond000.set_widget(Outcome, (1,7),rowspan = 4)
	
	#Putting the two stimuli on screen. Their position should still be randomized.
	Cond000.set_widget(S1O, (2,1), rowspan = 4)
	Cond000.set_widget(S2O, (0,10), rowspan = 4)
	
	#Setting the rating boxes for the current trial
	Cond000.set_widget(RatingA, (4,var.Trial))
	Cond000.set_widget(RatingB, (5,var.Trial))
	Cond000.set_widget(RatingX, (6,var.Trial))
	
	#Currently putting this in Run, such that I don't have to make new variables each time before setting them
	#IF this does give issues with the timing aspect, I will have to split it into prepare and run
	if var.Trial > 1:
	    for i in range(1,var.Trial): 
	        #Look up what was answered in that trial (kept outside of the label making)
	        var.j = var.Responses000.iat[i-1,0]
	        var.k = var.Responses000.iat[i-1,1]
	        var.l = var.Responses000.iat[i-1,2]
	        
	        #such that we can then do this: 
	        #If nothing is filled in (and the answer thus 999), display an 'X' since that is clearer to the participant
	        if var.j == 999:
	            var.j = 'X'
	        if var.k == 999:
	            var.k = 'X'
	        if var.l == 999:
	            var.l = 'X'
	        Cond000.set_widget(Label(text=var.j), (4,i))
	        Cond000.set_widget(Label(text=var.k), (5,i))
	        Cond000.set_widget(Label(text=var.l), (6,i))
	
	#if var.RatingA != '' and var.RatingB != '' and var.RatingX != '':
	#    Cond000.set_widget(Next, (6,10))      
	    
	
	Cond000._exec()
	
	    
	#after the excecute we can be sure that something (or nothing) is filled in, so therefore we have to do this after the execute.
	
	#First check if something was filled in. If not ('') then set the value to 999 (which is an integer)
	if var.RatingA =='':
	    var.RatingA = 999
	if var.RatingB =='':
	    var.RatingB = 999
	if var.RatingX =='':
	    var.RatingX = 999
	
	#create a dataframe new answers in which we collect the answers under the same column names as the overall dataset
	var.NewAnswers = pandas.DataFrame([[int(var.RatingA),int(var.RatingB),int(var.RatingX)]], columns=['ResponsesA', 'ResponsesB', 'ResponsesX'], dtype='int')
	#Then append this row to the dataframe, to collect all answers over time
	var.Responses000 = var.Responses000.append(var.NewAnswers, ignore_index=True)
	#print(var.Responses000)
	__end__
	___prepare__
	#Creating a form that has 7 colomns, 3 for the stimuli part of the screen and 4 for the rating part of the screen, 17 rows (16 trials plus pictures) and that has relatively small margins.
	Cond000 = Form(cols=[4,4,4,1,2,2,2], rows=[2,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1], margins=(10,10,10,10), spacing = 10)
	Cond000.timeout = 13000 #make sure the trial takes 15 seconds
	#Still need to add a button to go to the next trial if you are already done (check if everything is filled in)
	
	#Create the background for both the stimuli (earth) and the rating (screen). 
	#Res of screen is 1024x768, so minus margins, internal spacing and such we will need a pic of 
	#appro 614x728 for the earth and 350x728 for the screen.
	earthO = ImageWidget(path=pool["bgLight3.png"], adjust=True)
	screenO = ImageWidget(path=pool["computerscreenLong.png"], adjust=True)
	
	#Create the images that appear in the log book. 
	#With adjust=True they should be approximately the same size, even though the pictures in the stimuli part might be of differing sizes.
	AO = ImageWidget(path=pool[var.A], adjust = True)
	BO = ImageWidget(path=pool[var.B], adjust = True)
	XO = ImageWidget(path=pool[var.X], adjust = True)
	
	#Create the stimuli that are shown on the screen. These depend on the Trial we're in
	S1O = ImageWidget(path=pool[var.Stim1])
	S2O = ImageWidget(path=pool[var.Stim2])
	
	#Create the outcome that is shown on screen. This is either "Diamond.png" or "NoDiamond.png" depending on what the loop states.
	Outcome = ImageWidget(path=pool[var.Outcome])
	
	#Create the labels of the trials, basically just 1 to 16 so they can appear on screen
	T1O = Label(text="1")
	T2O = Label(text="2")
	T3O = Label(text="3")
	T4O = Label(text="4")
	T5O = Label(text="5")
	T6O = Label(text="6")
	T7O = Label(text="7")
	T8O = Label(text="8")
	T9O = Label(text="9")
	T10O = Label(text="10")
	T11O = Label(text="11")
	T12O = Label(text="12")
	T13O = Label(text="13")
	T14O = Label(text="14")
	T15O = Label(text="15")
	T16O = Label(text="16")
	
	#validation to check if only the numbers 0 to 8 are filled in, nothing else
	#this is done by creating a filter function for each of the stimuli ratings
	def filter_digitsA(ch):
	    #ch = re.sub("[^0-8]", "", ch) ->> trying to get numpad to work
	    #if there is nothing in there yet, accept any input from 0 to 8
	    if len(str(var.RatingA)) < 1:
	        return ch in u'012345678'
	    #If there is something in there and someone pressed backspace, then return a backspace and remove the digit
	    elif (len(str(var.RatingA)) == 1 and ch == 'backspace'):
	        return '\b'
	    #else do nothing since we don't want things like 81 or 04687 to be accepted
	    else:    
	        return
	    
	def filter_digitsB(ch):
	    if len(str(var.RatingB)) < 1:
	        return ch in u'012345678'
	    elif (len(str(var.RatingB)) == 1 and ch == 'backspace'):
	        return '\b'
	    else:    
	        return
	    
	def filter_digitsX(ch):
	    if len(str(var.RatingX)) < 1:
	        return ch in u'012345678'
	    elif (len(str(var.RatingX)) == 1 and ch == 'backspace'):
	        return '\b'
	    else:    
	        return
	       
	#Creating the boxes that can be used to put the rating in for the trial that is currently ongoing.
	RatingA = TextInput(text='', frame = True, stub = "Rate", var = 'RatingA', key_filter=filter_digitsA)
	RatingB = TextInput(text='', frame = True, stub = "Rate", var = 'RatingB', key_filter=filter_digitsB)
	RatingX = TextInput(text='', frame = True, stub = "Rate", var = 'RatingX', key_filter=filter_digitsX)
	
	Next = Button(text='Next')
	  
	  
	__end__

define inline_script TrialsCond000Stim
	set description "Executes Python code"
	___run__
	#First set the background images such that they can be displayed behind other pictures
	#They span the amount of columns and rows as their area is big.
	Cond000S.set_widget(earth, (0,0), colspan=3, rowspan=17)
	#Cond000.set_widget(screen, (3,0), colspan=4, rowspan=17)
	
	#Then set the stimuli that show up on the rating system
	Cond000S.set_widget(A, (4,0))
	Cond000S.set_widget(B, (5,0))
	Cond000S.set_widget(X, (6,0))
	
	#And all of the trial numbers
	Cond000S.set_widget(T1, (3,1))
	Cond000S.set_widget(T2, (3,2))
	Cond000S.set_widget(T3, (3,3))
	Cond000S.set_widget(T4, (3,4))
	Cond000S.set_widget(T5, (3,5))
	Cond000S.set_widget(T6, (3,6))
	Cond000S.set_widget(T7, (3,7))
	Cond000S.set_widget(T8, (3,8))
	Cond000S.set_widget(T9, (3,9))
	Cond000S.set_widget(T10, (3,10))
	Cond000S.set_widget(T11, (3,11))
	Cond000S.set_widget(T12, (3,12))
	Cond000S.set_widget(T13, (3,13))
	Cond000S.set_widget(T14, (3,14))
	Cond000S.set_widget(T15, (3,15))
	Cond000S.set_widget(T16, (3,16))
	
	#The outcome should be at the same place always, in this case in the middle of the screen, such that the stimuli can be positioned around it
	#Cond000.set_widget(Outcome, (1,7),rowspan = 4)
	
	#Putting the two stimuli on screen. Their position should still be randomized.
	Cond000S.set_widget(S1, (2,1), rowspan = 4)
	Cond000S.set_widget(S2, (0,10), rowspan = 4)
	
	#Setting the rating boxes for the current trial
	#Cond000.set_widget(RatingA, (4,var.Trial))
	#Cond000.set_widget(RatingB, (5,var.Trial))
	#Cond000.set_widget(RatingX, (6,var.Trial))
	
	#Currently putting this in Run, such that I don't have to make new variables each time before setting them
	#IF this does give issues with the timing aspect, I will have to split it into prepare and run
	if var.Trial > 1:
	    for i in range(1,var.Trial): 
	        #Look up what was answered in that trial (kept outside of the label making)
	        var.j = var.Responses000.iat[i-1,0]
	        var.k = var.Responses000.iat[i-1,1]
	        var.l = var.Responses000.iat[i-1,2]
	        
	        #such that we can then do this: 
	        #If nothing is filled in (and the answer thus 999), display an 'X' since that is clearer to the participant
	        if var.j == 999:
	            var.j = 'X'
	        if var.k == 999:
	            var.k = 'X'
	        if var.l == 999:
	            var.l = 'X'
	        Cond000S.set_widget(Label(text=var.j), (4,i))
	        Cond000S.set_widget(Label(text=var.k), (5,i))
	        Cond000S.set_widget(Label(text=var.l), (6,i))
	
	#if var.RatingA != '' and var.RatingB != '' and var.RatingX != '':
	#    Cond000.set_widget(Next, (6,10))      
	    
	# Cond000.set_widget(A1, (0,0))
	# Cond000.set_widget(A2, (0,1))
	# Cond000.set_widget(A3, (0,2))
	# Cond000.set_widget(A4, (0,3))
	# Cond000.set_widget(A5, (0,4))
	# Cond000.set_widget(A6, (0,5))
	# Cond000.set_widget(A7, (0,6))
	# Cond000.set_widget(A8, (0,7))
	# Cond000.set_widget(A9, (0,8))
	# Cond000.set_widget(A10, (0,9))
	# Cond000.set_widget(A11, (0,10))
	# Cond000.set_widget(A12, (0,11))
	# Cond000.set_widget(A13, (0,12))
	# Cond000.set_widget(A14, (0,13))
	# Cond000.set_widget(A15, (0,14))
	# Cond000.set_widget(A16, (0,15))
	
	# Cond000.set_widget(B1, (1,0))
	# Cond000.set_widget(C1, (2,0))
	# Cond000.set_widget(D1, (3,0))
	# Cond000.set_widget(E1, (4,0))
	# Cond000.set_widget(F1, (5,0))
	# Cond000.set_widget(G1, (6,0))
	
	
	
	Cond000S._exec()
	
	    
	#after the excecute we can be sure that something (or nothing) is filled in, so therefore we have to do this after the execute.
	
	#First check if something was filled in. If not ('') then set the value to 999 (which is an integer)
	#if var.RatingA =='':
	#    var.RatingA = 999
	#if var.RatingB =='':
	#    var.RatingB = 999
	#if var.RatingX =='':
	#    var.RatingX = 999
	
	#create a dataframe new answers in which we collect the answers under the same column names as the overall dataset
	#var.NewAnswers = pandas.DataFrame([[int(var.RatingA),int(var.RatingB),int(var.RatingX)]], columns=['ResponsesA', 'ResponsesB', 'ResponsesX'], dtype='int')
	#Then append this row to the dataframe, to collect all answers over time
	#var.Responses000 = var.Responses000.append(var.NewAnswers, ignore_index=True)
	#print(var.Responses000)
	__end__
	___prepare__
	#Creating a form that has 7 colomns, 3 for the stimuli part of the screen and 4 for the rating part of the screen, 17 rows (16 trials plus pictures) and that has relatively small margins.
	Cond000S = Form(cols=[4,4,4,1,2,2,2], rows=[2,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1], margins=(10,10,10,10), spacing = 10)
	Cond000S.timeout = 2000 #make sure the trial takes 15 seconds
	#Still need to add a button to go to the next trial if you are already done (check if everything is filled in)
	
	#Create the background for both the stimuli (earth) and the rating (screen). 
	#Res of screen is 1024x768, so minus margins, internal spacing and such we will need a pic of 
	#appro 614x728 for the earth and 350x728 for the screen.
	earth = ImageWidget(path=pool["bgLight3.png"], adjust=True)
	screen = ImageWidget(path=pool["computerscreenLong.png"], adjust=True)
	
	#Create the images that appear in the log book. 
	#With adjust=True they should be approximately the same size, even though the pictures in the stimuli part might be of differing sizes.
	A = ImageWidget(path=pool[var.A], adjust = True)
	B = ImageWidget(path=pool[var.B], adjust = True)
	X = ImageWidget(path=pool[var.X], adjust = True)
	
	#Create the stimuli that are shown on the screen. These depend on the Trial we're in
	S1 = ImageWidget(path=pool[var.Stim1])
	S2 = ImageWidget(path=pool[var.Stim2])
	
	#Create the outcome that is shown on screen. This is either "Diamond.png" or "NoDiamond.png" depending on what the loop states.
	#Outcome = ImageWidget(path=pool[var.Outcome])
	
	#Create the labels of the trials, basically just 1 to 16 so they can appear on screen
	T1 = Label(text="1")
	T2 = Label(text="2")
	T3 = Label(text="3")
	T4 = Label(text="4")
	T5 = Label(text="5")
	T6 = Label(text="6")
	T7 = Label(text="7")
	T8 = Label(text="8")
	T9 = Label(text="9")
	T10 = Label(text="10")
	T11 = Label(text="11")
	T12 = Label(text="12")
	T13 = Label(text="13")
	T14 = Label(text="14")
	T15 = Label(text="15")
	T16 = Label(text="16")
	
	#validation to check if only the numbers 0 to 8 are filled in, nothing else
	#this is done by creating a filter function for each of the stimuli ratings
	#def filter_digitsA(ch):
	    #ch = re.sub("[^0-8]", "", ch) ->> trying to get numpad to work
	    #if there is nothing in there yet, accept any input from 0 to 8
	 #   if len(str(var.RatingA)) < 1:
	#        return ch in u'012345678'
	    #If there is something in there and someone pressed backspace, then return a backspace and remove the digit
	#    elif (len(str(var.RatingA)) == 1 and ch == 'backspace'):
	#        return '\b'
	    #else do nothing since we don't want things like 81 or 04687 to be accepted
	#    else:    
	#        return
	    
	#def filter_digitsB(ch):
	#    if len(str(var.RatingB)) < 1:
	#        return ch in u'012345678'
	#    elif (len(str(var.RatingB)) == 1 and ch == 'backspace'):
	#        return '\b'
	#    else:    
	#        return
	    
	#def filter_digitsX(ch):
	#    if len(str(var.RatingX)) < 1:
	#       return ch in u'012345678'
	#    elif (len(str(var.RatingX)) == 1 and ch == 'backspace'):
	 #       return '\b'
	#    else:    
	#        return
	       
	#Creating the boxes that can be used to put the rating in for the trial that is currently ongoing.
	#RatingA = TextInput(text='', frame = True, stub = "Rate", var = 'RatingA', key_filter=filter_digitsA)
	#RatingB = TextInput(text='', frame = True, stub = "Rate", var = 'RatingB', key_filter=filter_digitsB)
	#RatingX = TextInput(text='', frame = True, stub = "Rate", var = 'RatingX', key_filter=filter_digitsX)
	
	#Next = Button(text='Next')
	  
	  
	#These were to test what the rows and columns looked like such that I could start designing. Leave them in for debugging, throw them out later.
	# A1 = Label(text=u"A1", frame=True)
	# A2 = Label(text=u"A2", frame=True)
	# A3 = Label(text=u"A3", frame=True)
	# A4 = Label(text=u"A4", frame=True)
	# A5 = Label(text=u"A5", frame=True)
	# A6 = Label(text=u"A6", frame=True)
	# A7 = Label(text=u"A7", frame=True)
	# A8 = Label(text=u"A8", frame=True)
	# A9 = Label(text=u"A9", frame=True)
	# A10 = Label(text=u"A10", frame=True)
	# A11 = Label(text=u"A11", frame=True)
	# A12 = Label(text=u"A12", frame=True)
	# A13 = Label(text=u"A13", frame=True)
	# A14 = Label(text=u"A14", frame=True)
	# A15 = Label(text=u"A15", frame=True)
	# A16 = Label(text=u"A16", frame=True)
	#A17 = Label(text=u"A17", frame = True)
	# B1 = Label(text=u"B1", frame=True)
	# C1 = Label(text=u"C1", frame=True)
	# D1 = Label(text=u"D1", frame=True)
	# E1 = Label(text=u"E1", frame=True)
	# F1 = Label(text=u"F1", frame=True)
	# G1 = Label(text=u"G1", frame=True)
	__end__

define loop _000
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Outcome "Diamond.png"
	setcycle 0 Stim1 "[A1]"
	setcycle 0 Stim2 "[X1]"
	setcycle 0 Trial 1
	setcycle 0 A "[A1]"
	setcycle 0 B "[B1]"
	setcycle 0 X "[X1]"
	setcycle 1 Outcome "NoDiamond.png"
	setcycle 1 Stim1 "[B1]"
	setcycle 1 Stim2 "[X1]"
	setcycle 1 Trial 2
	setcycle 1 A "[A1]"
	setcycle 1 B "[B1]"
	setcycle 1 X "[X1]"
	setcycle 2 Outcome "Diamond.png"
	setcycle 2 Stim1 "[B1]"
	setcycle 2 Stim2 "[X1]"
	setcycle 2 Trial 3
	setcycle 2 A "[A1]"
	setcycle 2 B "[B1]"
	setcycle 2 X "[X1]"
	setcycle 3 Outcome "NoDiamond.png"
	setcycle 3 Stim1 "[A1]"
	setcycle 3 Stim2 "[X1]"
	setcycle 3 Trial 4
	setcycle 3 A "[A1]"
	setcycle 3 B "[B1]"
	setcycle 3 X "[X1]"
	setcycle 4 Outcome "NoDiamond.png"
	setcycle 4 Stim1 "[A1]"
	setcycle 4 Stim2 "[X1]"
	setcycle 4 Trial 5
	setcycle 4 A "[A1]"
	setcycle 4 B "[B1]"
	setcycle 4 X "[X1]"
	setcycle 5 Outcome "Diamond.png"
	setcycle 5 Stim1 "[B1]"
	setcycle 5 Stim2 "[X1]"
	setcycle 5 Trial 6
	setcycle 5 A "[A1]"
	setcycle 5 B "[B1]"
	setcycle 5 X "[X1]"
	setcycle 6 Outcome "Diamond.png"
	setcycle 6 Stim1 "[A1]"
	setcycle 6 Stim2 "[X1]"
	setcycle 6 Trial 7
	setcycle 6 A "[A1]"
	setcycle 6 B "[B1]"
	setcycle 6 X "[X1]"
	setcycle 7 Outcome "NoDiamond.png"
	setcycle 7 Stim1 "[B1]"
	setcycle 7 Stim2 "[X1]"
	setcycle 7 Trial 8
	setcycle 7 A "[A1]"
	setcycle 7 B "[B1]"
	setcycle 7 X "[X1]"
	setcycle 8 Outcome "Diamond.png"
	setcycle 8 Stim1 "[B1]"
	setcycle 8 Stim2 "[X1]"
	setcycle 8 Trial 9
	setcycle 8 A "[A1]"
	setcycle 8 B "[B1]"
	setcycle 8 X "[X1]"
	setcycle 9 Outcome "NoDiamond.png"
	setcycle 9 Stim1 "[A1]"
	setcycle 9 Stim2 "[X1]"
	setcycle 9 Trial 10
	setcycle 9 A "[A1]"
	setcycle 9 B "[B1]"
	setcycle 9 X "[X1]"
	setcycle 10 Outcome "NoDiamond.png"
	setcycle 10 Stim1 "[B1]"
	setcycle 10 Stim2 "[X1]"
	setcycle 10 Trial 11
	setcycle 10 A "[A1]"
	setcycle 10 B "[B1]"
	setcycle 10 X "[X1]"
	setcycle 11 Outcome "Diamond.png"
	setcycle 11 Stim1 "[A1]"
	setcycle 11 Stim2 "[X1]"
	setcycle 11 Trial 12
	setcycle 11 A "[A1]"
	setcycle 11 B "[B1]"
	setcycle 11 X "[X1]"
	setcycle 12 Outcome "NoDiamond.png"
	setcycle 12 Stim1 "[A1]"
	setcycle 12 Stim2 "[X1]"
	setcycle 12 Trial 13
	setcycle 12 A "[A1]"
	setcycle 12 B "[B1]"
	setcycle 12 X "[X1]"
	setcycle 13 Outcome "Diamond.png"
	setcycle 13 Stim1 "[B1]"
	setcycle 13 Stim2 "[X1]"
	setcycle 13 Trial 14
	setcycle 13 A "[A1]"
	setcycle 13 B "[B1]"
	setcycle 13 X "[X1]"
	setcycle 14 Outcome "Diamond.png"
	setcycle 14 Stim1 "[A1]"
	setcycle 14 Stim2 "[X1]"
	setcycle 14 Trial 15
	setcycle 14 A "[A1]"
	setcycle 14 B "[B1]"
	setcycle 14 X "[X1]"
	setcycle 15 Outcome "NoDiamond.png"
	setcycle 15 Stim1 "[B1]"
	setcycle 15 Stim2 "[X1]"
	setcycle 15 Trial 16
	setcycle 15 A "[A1]"
	setcycle 15 B "[B1]"
	setcycle 15 X "[X1]"
	run ""

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Conditions always
	run testing_phase always

define logger new_logger_1
	set description "Logs experimental data"
	set auto_log yes

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run TestOldStim always

define sequence test_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run OldStim "[count_test_sequence] = 0"

define loop testing_phase
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	setcycle 1 empty_column ""
	run test_sequence

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="OpenSesame 3.3 <i>Lentiform Loewenfeld</i>" x=0 y=0 z_index=0

